PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant': '', 'experiment': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [500, 200]
  color = $[1.000,1.000,1.000]
  expName = Live2
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        #!/usr/bin/env python
        import csv
        import os.path
        import datetime
        import time
        import math
        import ast #Lets you convert string representations of lists to lists

        #Get directory
        thisdir = os.path.abspath(os.path.join(os.path.dirname(_thisDir),'.'))

        #Get Subject ID and experiment
        participant = expInfo['participant']
        experiment = expInfo['experiment']

        fileNum = 1

        completeSound = sound.Sound('complete.wav', secs=-1, stereo=True)
        completeSound.setVolume(1)
        oneMinSound = sound.Sound('1min.wav', secs=-1, stereo=True)
        completeSound.setVolume(1)
      Begin Routine:
        participantText.text = participant
        experimentText.text = experiment
        loadingpercent = 0
        loadingpercent2 = 0
        loadFinal = 0
        loadFinal2 = 0
        firstRun = True #This var turns off in top of code
        realFirstRun = True #This one turns off at bottom
        thisLine = [0, 0, 0, 0, 0, 0]
        totalstim = 0
        isDone = False
        soundIsPlaying = False
        oneMinSoundIsPlaying = False
      Each Frame:
        if os.path.exists(thisdir + '/' + experiment + '/live/'+ participant + '/live' + str(fileNum) + '.csv'):
            time.sleep(0.5) #Makes sure all of file is done saving before reading it
            #datafile = open('/Volumes/bamlab/Experiments/PACO/' + experiment + '/live/'+ participant + '/live' + str(fileNum) + '.csv', "rb")
            with open (thisdir + '/' + experiment + '/live/'+ participant + '/live' + str(fileNum) + '.csv', 'r', encoding='utf-8') as csv_file:
                csv_reader = csv.reader(csv_file)
                for line in csv_reader:
                    thisLine = line
            fileNum += 1 #Increase number on end of file
            firstRun = False #Not first run anymore
            print(thisLine)
            soundIsPlaying = False
        elif firstRun:
            text.setText('Experiment has not started')

        #Update Loading Bar
        LoadingBar.setSize((loadingpercent/25, 1), log=False)
        LoadingBar.setPos(((loadingpercent/100)-1, 0.05))
        percentText.text = str(round(loadingpercent)) + '% Section'

        LoadingBar2.setSize((loadingpercent2/25, 1), log=False)
        LoadingBar2.setPos(((loadingpercent2/100)-1, -.28))
        percentText2.text = str(round(loadingpercent2)) + '% Total'

        #Marks experiment as done
        if thisLine[0] == 'Done':
            isDone = True
            if not soundIsPlaying:
                win.callOnFlip(completeSound.play)  # screen flip
                soundIsPlaying = True

        #Plays warning tone
        if thisLine[5] == '1':
            if not soundIsPlaying:
                win.callOnFlip(oneMinSound.play)  # screen flip
                soundIsPlaying = True

        #Update progress
        if firstRun == False and not isDone:
            loadFinal = 100/int(thisLine[2])*(int(thisLine[1])-1) #Minus one is bc not 100% when on trial 5 of 5 ect
            loadFinal2 = 100/int(thisLine[4])*(int(thisLine[3])-1)
            text.setText(thisLine[0] + ' Phase')
            subText.setText('Trial ' + thisLine[1] + ' of ' + thisLine[2])
            statusText.setText('Status: In Progress')
            statusText.setColor('green')
            if thisLine[1] == '1':
                loadingpercent = 0
            if loadingpercent < loadFinal:
                loadingpercent += loadFinal/50
                if loadingpercent > 100:
                    loadingpercent = 100
            if loadingpercent2 < loadFinal2:
                loadingpercent2 += loadFinal2/50
                if loadingpercent2 > 100:
                    loadingpercent2 = 100
        elif isDone:
            text.setText('Participant is complete')
            subText.setText('Press Esc To Exit')
            statusText.setText('Status: Complete')
            statusText.setColor('black')
            loadingpercent += loadFinal/50
            if loadingpercent > 100:
                loadingpercent = 100
            loadingpercent2 += loadFinal2/50
            if loadingpercent2 > 100:
                loadingpercent2 = 100
    ImageComponent stimuli
      color = $[-1.000,-1.000,-1.000]
      image = None
      pos = (-0.45, -.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = 0.14
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = Participant is on practice phase
      wrapWidth = 12
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    TextComponent subText
      color = black
      letterHeight = 0.10
      pos = (0, .22)
      startVal [time (s)] = 0.0
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    TextComponent statusText
      color = black
      letterHeight = 0.06
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Status: Ready
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    TextComponent participantText
      color = black
      letterHeight = 0.12
      pos = (-1.1, .41)
      startVal [time (s)] = 0.0
      text = 000
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    TextComponent experimentText
      color = black
      letterHeight = 0.12
      pos = (1, .41)
      startVal [time (s)] = 0.0
      text = 000
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    TextComponent percentText
      color = black
      letterHeight = 0.08
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = 0% Section
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    PolygonComponent LoadingBackground
      fillColor = $[0.278,0.278,0.278]
      pos = (0, 0.05)
      shape = rectangle
      size = (2, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent LoadingBar
      fillColor = $[-0.184,0.365,1.000]
      pos = (0, 0.05)
      shape = rectangle
      size = (.5, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent percentText2
      color = black
      letterHeight = 0.08
      pos = (0, -0.43)
      startVal [time (s)] = 0.0
      text = 0% Total
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    PolygonComponent LoadingBackground2
      fillColor = $[0.278,0.278,0.278]
      pos = (0, -.28)
      shape = rectangle
      size = (2, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent LoadingBar2
      fillColor = $[-0.184,0.365,1.000]
      pos = (0, -.28)
      shape = rectangle
      size = (.5, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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Flow
  Routine trial
