PsychoPy2experiment version="3.1.5"
Settings
  Data filename = u'data/Logs/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Enable Escape = False
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1.000,-1.000,-1.000]
  expName = PACOLO
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Routines
  Routine test
    MouseComponent mouse1
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent DragCode
      Code Type = Py
      Begin Experiment:
        #To prevent user from clicking inside the color wheel and selecting a color, noClickShape surrounds entire image, set opacity to one to see for yourself ;)
        noClickShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,0,1], pos=(0,0), size=(0.25,0.25), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 0)
      Begin Routine:
        isDragging = False #Lets other parts of experiment know that the user is dragging the stimuli
        didFinishDrag = False #Lets some aspects of the experiment only do something once after a drag has finished
        hasDragged = False #For preventing the user from going on until dragged
        place = (0,0) #Place of object (Image)
        Image.setPos(place) #Sets image to (0,0)
        noClickShape.setPos(place) #Sets noClickShape to (0,0), see Begin Experiment for more about noClickShape
        mousePlace = (0,0) #Place of mouse when clicked
        mousex = 0.0 #Offset of mouse x
        mousey = 0.0 #Offset of mouse y
        firstDrag = True #For updating positions of mousex and mousey
      Each Frame:
        #This whole complicated thing makes sure that the stimuli always stays on the mouse if they click on the stimuli first
        if mouse1.isPressedIn(screenRect) and didFinishDrag == False:#ScreenRect is used to detect if mouse is pressed anywhere on screen
            if mouse1.isPressedIn(noClickShape): #Checks when mouse is pressed down, see Begin Experiment for more about noClickShape
                #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                mousePlace = mouse1.getPos()
                if firstDrag == True: #Only updates offset once when starting the drag
                    mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                    mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                    firstDrag = False #Disables first drag
                place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                Image.setPos(place) #Sets position of the image equal to the position of the mouse
                noClickShape.setPos(place) #Set position
                isDragging = True #Sets is dragging to true when the mouse starts on the object (noClickShape in this case)
                hasDragged = True #For preventing the user from going on until dragged
                win.mouseVisible = False #Hide mouse when dragging
            elif isDragging == True: #If the mouse started on noClickShape but isnt there right now (and still pressed down) it will update position anyway
                #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                mousePlace = mouse1.getPos()
                if firstDrag == True: #Only updates offset once when starting the drag
                        mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                        mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                        firstDrag = False #Disables first drag
                place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                Image.setPos(place) #Sets position of the image equal to the position of the mouse
                noClickShape.setPos(place) #Set position
        elif didFinishDrag == True and isDragging == True: #Disables didFinishDrag for good
            didFinishDrag = False
        elif isDragging == True: #This is an elif statement so will only play if others above are false
            didFinishDrag = True #Makes var true so it only is true for one frame
            isDragging = False #It is no longer dragging
            win.mouseVisible = True #Show mouse once your done dragging
            firstDrag = True #re-enables first drag again so when the first if statement plays it will update position of offset
        else:
            didFinishDrag = False #Disables didFinishDrag for good

        noClickShape.draw() #Draws no click shape
    PolygonComponent screenRect
      fillColor = $[-0.851,1.000,-1.000]
      opacity = 0
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent SaveCode
      Code Type = Py
      Begin Experiment:
        import datetime #For saving raction times

        currentTest = 0
        testrad = 0 #Requires it to be defined at the beginning for some reason

        testOnset = -1
      Begin Routine:
        then = datetime.datetime.now() #Saves time they begun the section
        nowtime = datetime.datetime.now().time() #Saves time they begun the section

        degrees = 0 #Resests degrees so that if it saves with an exit the degrees will be 0 and not some random number
        Image.setColor([0,0,1])#sets Image hsv color



        #Live stuff reset to N/A in case there is no correct location/color
        livetestx = 'N/A'
        livetesty = 'N/A'
        livetestrad = 'N/A'

        testPath = 'N/A'
        testx = "N/A"
        testy = "N/A"
        testrad = 0
        testPath = stimuli[0][test_order[currentTest]] #Gets path of the study image
        testoldornew = stimuli[4][test_order[currentTest]] #Gets color of the study image
        livetestPath = testPath #For live file
        livetestoldornew = testoldornew #For live file
        if testoldornew == "Old":
            testx = stimuli[1][test_order[currentTest]] #Gets x cord of the study image
            testy = stimuli[2][test_order[currentTest]] #Gets y cord of the study image
            testrad = stimuli[3][test_order[currentTest]] #Gets color of the study image
            livetestx = str(testx) #For live file
            livetesty = str(testy) #For live file
            livetestrad = str(testrad) #For live file
      End Routine:
        #NOTE: Some save code is in oldornew section of the experiment

        #Saves Stimuli name
        thisExp2.addData('StimuliName', stimuli[7][test_order[currentTest]])

        #Saves order of test, oldornew, and study, starting with 0
        thisExp2.addData('TestOrder', currentTest)
        #Very complicated function to find order
        testingNum = 0
        while oldornew_order[testingNum] != test_order[currentTest]:
            testingNum += 1
        thisExp2.addData('OldOrNewOrder', testingNum)
        testingNum = 0
        while study_order[testingNum] != test_order[currentTest]:
            testingNum += 1
        thisExp2.addData('StudyOrder', testingNum)

        #Saves user old or new
        thisExp2.addData('User_OldOrNew', stimuli[5][test_order[currentTest]])

        #MARK: User Save
        #save position (place var)
        x, y = place
        #Save user's position of the image
        thisExp2.addData('User_Image_x', round(x,5))
        thisExp2.addData('User_Image_y', round(y,5))
        liveuserx = str(round(x,5)) #For live data
        liveusery = str(round(y,5)) #For live data

        #MARK: Correct Save
        #Save Correct oldornew
        if not skipOldOrNew:
            thisExp2.addData('Correct_OldOrNew', testoldornew)
        else:
            thisExp2.addData('Correct_OldOrNew', 'N/A')

        #Save correct position of the image
        thisExp2.addData('Correct_Image_x', testx)
        thisExp2.addData('Correct_Image_y', testy)

        #MARK: Get distance from correct location/color
        #Location
        distx = abs(x-testx) #find the distance in x between correct and user
        disty = abs(y-testy) #find the distance in y between correct and user
        pythDist = math.sqrt((distx*distx)+(disty*disty)) #Uses pythagorean theorem to find distance
        pythDist = round(pythDist,5) #Round to prevent errors
        thisExp2.addData('locationDist', pythDist) #saves distance

        #MARK: Gets reaction time
        thisExp2.addData('OldOrNew_RT', stimuli[6][test_order[currentTest]]) #saves time from oldornew section
        now = datetime.datetime.now() #Gets time now
        diff = now-then #Gets the difference
        testrt = round(diff.total_seconds(),2) #Puts it in testrt and rounds to 2 decimal places
        thisExp2.addData('Test_RT', testrt) #adds data
        livetestrt = str(testrt) #Live file data

        thisExp2.addData('StudyStartTime', stimuli[8][test_order[currentTest]]) #adds data
        thisExp2.addData('OldOrNewStartTime', stimuli[9][test_order[currentTest]]) #adds data
        thisExp2.addData('TestStartTime', nowtime) #adds start time of stimulis on screen

        thisExp2.addData('StudyOnset', stimuli[10][test_order[currentTest]]) #adds data
        thisExp2.addData('OldOrNewOnset', stimuli[11][test_order[currentTest]]) #adds data
        thisExp2.addData('TestOnset', round((then-testOnset).total_seconds(),2)) #adds start time of stimulis on screen

        currentTest += 1 #Goes to next test stimuli

        #Next Entry of experiment
        thisExp2.nextEntry()
    CodeComponent ExitCode
      Code Type = Py
      Begin Experiment:
        #Max degrees and speed for color help
        colorMaxDeg = 270 #1 to any real number, must be at least twice as much as speed for smooth animation
        colorSpeed = 50 #1 to any real number, do not recomend setting this above 50

        #Color text setup
        ColorText = visual.TextStim(win=win, name='ColorText',
            text='Please select a color from the color wheel',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #Drag text setup
        DragText = visual.TextStim(win=win, name='DragText',
            text='Please Drag and Drop the object to a location on the screen',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #Define images
        arrowUp = visual.ImageStim(
            win=win, name='arrowUp',
            image='sin', mask=None,
            ori=0, pos=(0, .15), size=(0.03, 0.03),
            color=[1,0,1], colorSpace='hsv', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        arrowDown = visual.ImageStim(
            win=win, name='arrowDown',
            image='sin', mask=None,
            ori=0, pos=(0, -.15), size=(0.03, 0.03),
            color=[1,0,1], colorSpace='hsv', opacity=1,
            flipHoriz=False, flipVert=True,
            texRes=128, interpolate=True, depth=0.0)

        arrowRight = visual.ImageStim(
            win=win, name='arrowRight',
            image='sin', mask=None,
            ori=0, pos=(.15, 0), size=(0.03, 0.03),
            color=[1,0,1], colorSpace='hsv', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        arrowLeft = visual.ImageStim(
            win=win, name='arrowLeft',
            image='sin', mask=None,
            ori=0, pos=(-.15, 0), size=(0.03, 0.03),
            color=[1,0,1], colorSpace='hsv', opacity=1,
            flipHoriz=True, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        #Set images
        arrowUp.setImage(thisdir + '/LO/arrowUp.png')
        arrowDown.setImage(thisdir + '/LO/arrowUp.png')
        arrowRight.setImage(thisdir + '/LO/arrowRight.png')
        arrowLeft.setImage(thisdir + '/LO/arrowRight.png')
      Begin Routine:
        mouse1.setPos(newPos=(0, 0.005)) #resets position of mouse, has to be offset slightly or else it will select a color for some reason
        win.mouseVisible = True #Show mouse only if it is supposed to continue routine

        #These two vars give the person help with knowing how to drag/color live
        helpDrag = False

        opacOfArrows = 0.0 #Opacity of the arrows
        opacUp = True #If Opacity is rising or falling

        colorDeg = 0 #Degrees of slider for colorHelp
        colorDegUp = True #Degrees of the slider going up or down
        colorOpac = 0 #Opacity of the slider
      Each Frame:
        if theseKeys == 'space':  #if space is pressed
            #a response ends the routine
            helpDrag = True #If they have not dragged yet and try to end routine
            if hasDragged: #Stops routine if they have colored and moved the stimuli
                continueRoutine = False

        #Help animations
        if helpDrag == True and hasDragged == False:
            #Makes a nice animation
            if opacOfArrows >= 1.0: #changes direction of opacity
                opacUp = False
            elif opacOfArrows <= 0.0:
                opacUp = True
            if opacUp == True:
                opacOfArrows += 0.01 #Changes opacity, change this var to make animation faster or slower
            else:
                opacOfArrows -= 0.01
            #Draws aroows and text
            arrowUp.opacity = opacOfArrows
            arrowDown.opacity = opacOfArrows
            arrowRight.opacity = opacOfArrows
            arrowLeft.opacity = opacOfArrows
            arrowUp.draw()
            arrowDown.draw()
            arrowRight.draw()
            arrowLeft.draw()
            DragText.draw() #Tells user what to do
      End Routine:
        win.mouseVisible = False #Hide mouse
    ImageComponent Image
      color = $[1,-1.000,1.000]
      colorSpace = hsv
      image [set every repeat] = $testPath
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    CodeComponent liveCode15
      Code Type = Py
      Begin Experiment:
        #Each variable for the live is separate from the actual data saving variables and they are all in string form

        livetestPath = 'N/A'
        livetestoldornew = 'N/A'
        livetestx = 'N/A'
        livetesty = 'N/A'
        livetestrad = 'N/A'

        liveuseroldornew = 'N/A'
        liveuserx = 'N/A'
        liveusery = 'N/A'
        liveuserrad = 'N/A'

        liveoldornewrt = 'N/A'
        livetestrt = 'N/A'
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Test,Stimuli,' + str(currentTest+1) + ',' + str(num_study) + ',' + str(currentTest+2) + ',' + str(num_study+1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',' + stimuli[7][test_order[currentTest]] + ',' + livetestx + ',' + livetesty + ',' + livetestrad + ',' + stimuli[5][test_order[currentTest]] + ',' + liveuserx + ',' + liveusery + ',' + liveuserrad + ',' + str(stimuli[6][test_order[currentTest]]) + ',' + livetestrt)
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine header
    CodeComponent saveCode
      Code Type = Py
      Begin Experiment:
        import random, xlrd, math #For randomization of stimuli
        command = False #For exiting experiment

        thisdir = os.path.abspath(os.path.join(os.path.dirname(_thisDir),'.'))

        #randomize the seed
        random.seed(int(expInfo['participant'])) #Put in subject number

        #Version Number (Update this when you make changes to the experiment, it will go in the readme file in each participant's folder, see bottom of begin experiment tab)
        versionNumber = '0.1.6'

        #number of study items
        num_study = 50 #50

        #number of OLD OR NEW items they'll be tested on
        num_test = 75 #75

        #Skip the Old Or New Section
        skipOldOrNew = False

        #Skip Practice Section
        skipPractice = False

        #number of total items (stimuli)
        num_items = 243



        if skipOldOrNew:
            num_oldornew = 0
            num_practoldornew = 0
            numberofpractice = 0
        else:
            num_oldornew = num_test
            num_practoldornew = 4
            numberofpractice = 5
        if skipPractice:
            num_practstudy = 0
            num_practoldornew = 0
            numberofpractice = 0
        else:
            num_practstudy = 2

        #MARK: Generate coordinates
        #This will create the x and y coordiantes for use, change num_study variable and this will adapt by itself
        #Maximum coordinates (Right Top of screen) (You probably don't want this to go all the way to the end of the screen)
        screenx = 0.78 #Maximum x point on Psychopy screen you want the stimuli to go to
        screeny = 0.39 #Maximum y point on Psychopy screen you want the stimuli to go to

        #screen is approx 2 by 1, so below numbers should reflect that
        divx = 4 #How many points there can be accross the x axis minimum
        divy = 2 #How many points there can be accross the y axis minimum

        numberofcords = 0 #Number of actual cords when excluding center ones

        while numberofcords < num_study:
          if divy*2 == divx or divy*2 == divx+1:
            divx += 1
          else:
            divy += 1
          howmanyall = divx*divy #How many
          numberofcords = 0
          xcords = [] #array of cords for x
          ycords = [] #array of cords for y
          ix = 0
          while ix <= divx:
            if ix == 0:
              xmult = 0
            else:
              xmult = ix/divx
            iy = 0
            while iy <= divy:
              if iy == 0:
                ymult = 0
              else:
                ymult = iy/divy
              #print(" ")
              #print(xmult, ymult) #For debugging
              xcord = ((screenx*2)*xmult)-screenx
              ycord = ((screeny*2)*ymult)-screeny
              if not xcord < 0.15 or not xcord > -0.15 or not ycord < 0.15 or not ycord > -0.15: #Exclusion points, change these to choose which points are excluded bc they are too close to the center
                #print("Cordinates:")
                numberofcords += 1
                #print(xcord) #Uncomment these to get the raw x and y coordinates on separate lines
                #print(ycord)
                #print("(" + str(xcord) + "," + str(ycord) + ")") #Uncomment to print coordinates as (x,y), you can use this for testing out points on desmos graph?
                xcords.append(round(xcord, 5))
                ycords.append(round(ycord, 5))
              iy += 1
            ix += 1
        #You want this to equal as close to the number of possible coordinates you want as possible (In my case I want it to be close to 70)
        print(" ")
        #print(xcords)
        #print(ycords)
        print("Number of Coordinates: " + str(numberofcords))
        print("There are " + str(divx + 1) + " x coordinates and " + str(divy + 1) + " y coordinates")

        #MARK: Randomize coordinates
        cordNums= [] #These numbers direct the final cords to the correct place in cords
        #Final coordinates that are randomized
        finalxcords = []
        finalycords = []

        for i in range(numberofcords): #Randomizes cordNums to be used as pickers for the final cords, randomizing with numberofcords makes sure any coordinates the above function generates can be used
            cordNums.append(i)
        random.shuffle(cordNums) #Randomizes items in cordnums
        for i in range(num_study): #Randomizes x and y cords together so they don't get all mixed up
            finalxcords.append(xcords[cordNums[i]])
            finalycords.append(ycords[cordNums[i]])
        #print(cordNums)

        #MARK: Generate And Randomize Stimulis Filenames
        filenameNums = []
        filenames = []
        filenameNumbers = []
        for i in range(num_items-1): #Randomizes cordNums to be used as pickers for the final cords, randomizing with numberofcords makes sure any coordinates the above function generates can be used
            filenameNums.append(i + 1)
        random.shuffle(filenameNums) #Randomizes items in cordnums
        for i in range(num_test): #Randomizes x and y cords together so they don't get all mixed up
            filenames.append(thisdir + "/Stimuli/" + str(filenameNums[i]) + ".png")
            filenameNumbers.append(str(filenameNums[i]))
        #print(filenames)

        #MARK: Randomize Rad#s For Color
        radColors = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            radColors.append("N/A")

        #MARK: Generate Old Or New Status
        oldornewStatus = []
        for i in range(num_study):
            oldornewStatus.append("Old")
        for i in range(num_test-num_study):
            oldornewStatus.append("New")
        #print(oldornewStatus)

        blankArray = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray.append("N/A")

        blankArray2 = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray2.append("N/A")

        blankArray3 = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray3.append("N/A")

        blankArray4 = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray4.append("N/A")

        blankArray5 = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray5.append("N/A")

        blankArray6 = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray6.append("N/A")

        #MARK: Create Stimuli np.Array With All Other Factors
        stimuli = np.array([filenames, finalxcords, finalycords, radColors, oldornewStatus, blankArray, blankArray2, filenameNumbers, blankArray3, blankArray4, blankArray5, blankArray6])
        print(stimuli)

        #MARK: Randomize Order For Each Task
        study_order = []
        for i in range(num_study):
            study_order.append(i)
        random.shuffle(study_order)

        oldornew_order = []
        for i in range(num_test):
            oldornew_order.append(i)
        random.shuffle(oldornew_order)

        test_order = []
        for i in range(num_study):
            test_order.append(i)
        random.shuffle(test_order)
      Begin Routine:
        win.mouseVisible = False #Hide mouse

        #Save data files in begin routine so that if the participant already exists and the user clicks cancel, it won't save any data
        if not skipOldOrNew:
            #Save Old or New data file
            filename4 = _thisDir + os.sep + u'data/%s/sub_%s_%s_OldOrNew' % (expInfo['participant'], expInfo['participant'], expName)
            thisExp4 = data.ExperimentHandler(name=expName, version='',
                extraInfo=expInfo, runtimeInfo=None,
                originPath= thisdir + '/LOCO/PACOLOCO.py',
                savePickle=False, saveWideText=True,
                dataFileName=filename4)

        #Save Normal Data File
        filename2 = _thisDir + os.sep + u'data/%s/sub_%s_%s_test' % (expInfo['participant'], expInfo['participant'], expName)
        thisExp2 = data.ExperimentHandler(name=expName, version='',
            extraInfo=expInfo, runtimeInfo=None,
            originPath= thisdir + '/LOCO/PACOLOCO.py',
            savePickle=False, saveWideText=True,
            dataFileName=filename2)

        #Save Live Update File
        liveFileName = _thisDir + os.sep + u'live/%s/live' % (expInfo['participant'])
        liveNum = 1

        #Save Abort Data File, these kind of saves with 'thisExp' in them save no matter what when you quit the program
        thisExp3 = data.ExperimentHandler(name=expName, version='',
            extraInfo=expInfo, runtimeInfo=None,
            originPath= thisdir + '/LOCO/PACOLOCO.py',
            savePickle=False, saveWideText=True,
            dataFileName=liveFileName + 'live')

        #Create readme
        rmFile = open(_thisDir + os.sep + u'data/%s/README.txt' % (expInfo['participant']), 'w')
        rmFile.write('VERSION ' + versionNumber + '\n\nIf this experiment was fully and successfully completed by the participant, you only need you use the test data file, it contains all the data you need.\nIf something went wrong during the experiment, or it was aborted before it was finished, you can use the oldornew data file to recover the user\'s responses for each old or new trail.' +
            '\nThe columns for the test data file are ordered by the order that they are presented at test (Only the old stimuli), and then are ordered by the order they were presented at Old Or New (Only new stimuli).' +
            '\n\nHow to use data in the test file:\nThe stimuli name corresponds to each stimuli in the stimuli folder (located in the main LOCO folder).\nUse the test order, oldorneworder, and study order to sort each data row. To do this, create an empty array and use a for loop to append the lowest to highest number of the order column, starting at 0.' +
            '\nUser vs Correct is self explanatory, with old or new being added as N/A if it was skipped in the header file.\nThe X and Y are coordinates on the screen (0.5 is the highest y value, while 0.9? is the highest x value).' +
            '\nLocation distance is calculated using the pythagorean theorem, where a and b are the x and y coordinates.\nOldOrNew rt and Test rt are reaction times of the user.' +
            '\nStart times are the start times of each trail, with hour, minute, second.\nOnset time counts the amount of seconds when each stimuli was shown since the first reset (Fixation Cross) of that section (for example, the beginning of study) came on the screen\nDate is the date and time that the experiment started, and is not updated every trail.\nPsychopy running version should be at least 3.1.5.\n\nThanks for reading! Have any more questions? Contact me at ipoogleduck@gmail.com')
        rmFile.close()
      End Experiment:
        thisExp2.saveAsWideText(filename2+'.csv')
        thisExp2.abort()  # or data files will save again on exit

        thisExp3.saveAsWideText(liveFileName+'live.csv')
        thisExp3.abort()  # or data files will save again on exi
  Routine reset
    CodeComponent onsetCode
      Code Type = Py
      Begin Routine:
        if studyOnset == 0:
            studyOnset = datetime.datetime.now()

        if oldornewOnset == 0:
            oldornewOnset = datetime.datetime.now()

        if testOnset == 0:
            testOnset = datetime.datetime.now()
    TextComponent resettext
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent liveCode13
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine oldornew
    TextComponent oldornewText
      letterHeight = 0.05
      pos = (0, -.45)
      startVal [time (s)] = 0
      text = 1 - Old        2 - New
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    CodeComponent oldornewCode
      Code Type = Py
      Begin Experiment:
        currentOldornew = 0
        oldornewrad = 0 #Requires it to be defined at the beginning for some reason

        oldornewOnset = -1
      Begin Routine:
        win.mouseVisible = False #Hide mouse
        then = datetime.datetime.now() #Gets time
        nowtime = datetime.datetime.now().time() #Saves time they begun the section
        stimuli[9][oldornew_order[currentOldornew]] = nowtime

        #Live stuff reset to N/A in case there is no correct location/color
        liveoldornewx = 'N/A'
        liveoldornewy = 'N/A'
        liveoldornewrad = 'N/A'

        oldornewx = "N/A"
        oldornewy = "N/A"
        oldornewrad = 0
        oldornewPath = stimuli[0][oldornew_order[currentOldornew]] #Gets path of the study image
        oldornewoldornew = stimuli[4][oldornew_order[currentOldornew]] #Gets color of the study image
        liveoldornewoldornew = oldornewoldornew #For live file
        if oldornewoldornew == "Old":
            oldornewx = stimuli[1][oldornew_order[currentOldornew]] #Gets x cord of the study image
            oldornewy = stimuli[2][oldornew_order[currentOldornew]] #Gets y cord of the study image
            oldornewrad = stimuli[3][oldornew_order[currentOldornew]] #Gets color of the study image
            liveoldornewx = str(oldornewx) #For live file
            liveoldornewy = str(oldornewy) #For live file
            liveoldornewrad = str(oldornewrad) #For live file

        stimuli[11][oldornew_order[currentOldornew]] = round((datetime.datetime.now()-oldornewOnset).total_seconds(),2)
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if '1' in key or '2' in key: #t is a var for time psychopy automatically creates
                if key == '1':
                    stimuli[5][oldornew_order[currentOldornew]] = 'Old'
                    liveuseroldornew = 'Old'
                elif key == '2':
                    stimuli[5][oldornew_order[currentOldornew]] = 'New'
                    liveuseroldornew = 'New'
                now = datetime.datetime.now()
                diff = now-then
                oldornewrt = round(diff.total_seconds(),2)
                liveoldornewrt = str(oldornewrt)
                stimuli[6][oldornew_order[currentOldornew]] = oldornewrt
                continueRoutine = False
      End Routine:
        #Saves Stimuli name
        thisExp4.addData('StimuliName', stimuli[7][oldornew_order[currentOldornew]])

        #Saves user old or new
        thisExp4.addData('User_OldOrNew', stimuli[5][oldornew_order[currentOldornew]])

        #Save Correct oldornew
        thisExp4.addData('Correct_OldOrNew', oldornewoldornew)
        if oldornewoldornew == 'Old':
            #Save correct position of the image
            thisExp4.addData('Correct_Image_x', oldornewx)
            thisExp4.addData('Correct_Image_y', oldornewy)
        else:
            thisExp4.addData('Correct_Image_x', 'N/A')
            thisExp4.addData('Correct_Image_y', 'N/A')

        thisExp4.addData('OldOrNew_RT', oldornewrt) #saves time from oldornew section

        thisExp4.addData('StudyStartTime', stimuli[8][oldornew_order[currentOldornew]]) #adds data
        thisExp4.addData('OldOrNewStartTime', stimuli[9][oldornew_order[currentOldornew]]) #adds data

        #Next Entry of experiment
        thisExp4.nextEntry()

        currentOldornew += 1
    ImageComponent oldornewImage
      image [set every repeat] = $oldornewPath
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    CodeComponent liveCode9
      Code Type = Py
      Begin Experiment:
        #Each variable for the live is separate from the actual data saving variables and they are all in string form

        liveoldornewoldornew = 'N/A'
        liveoldornewx = 'N/A'
        liveoldornewy = 'N/A'
        liveoldornewrad = 'N/A'

        liveoldornewrt = 'N/A'
        liveuseroldornew = 'N/A'
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Old/New,Stimuli,' + str(currentOldornew+1) + ',' + str(num_test) + ',' + str(currentOldornew+2) + ',' + str(num_test+1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',' + stimuli[7][oldornew_order[currentOldornew]] + ',' + liveoldornewoldornew + ',' + liveoldornewx + ',' + liveoldornewy + ',' + liveoldornewrad + ',' + liveoldornewrt + ',' + liveuseroldornew)
        liveFile.close()
        liveNum += 1
      Each Frame:
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine study
    CodeComponent Code
      Code Type = Py
      Begin Experiment:
        currentStudy = 0
        studyrad = 0 #Requires it to be defined at the beginning for some reason
        studyOnset = -1
      Begin Routine:
        studyPath = stimuli[0][study_order[currentStudy]] #Gets path of the study image
        studyx = stimuli[1][study_order[currentStudy]] #Gets x cord of the study image
        studyy = stimuli[2][study_order[currentStudy]] #Gets y cord of the study image
        studyrad = stimuli[3][study_order[currentStudy]] #Gets color of the study image

        nowtime = datetime.datetime.now().time() #Saves time they begun the section
        stimuli[8][study_order[currentStudy]] = nowtime

        stimuli[10][study_order[currentStudy]] = round((datetime.datetime.now()-studyOnset).total_seconds(),2)
      End Routine:
        currentStudy += 1
    ImageComponent studyImage
      color [set every repeat] = $[0,0,1]
      colorSpace = hsv
      image [set every repeat] = $studyPath
      pos [set every repeat] = (studyx, studyy)
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    CodeComponent liveCode7
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Study,Stimuli,' + str(currentStudy+1) + ',' + str(num_study) + ',' + str(currentStudy+2) + ',' + str(num_study+1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',' + stimuli[7][study_order[currentStudy]] + ',' + str(studyx) + ',' + str(studyy) + ',' + str(studyrad))
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine studyInstr
    CodeComponent onsetCode2
      Code Type = Py
      End Routine:
        studyOnset = 0
    TextComponent studyText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Now for the actual experiment
        You will now study a larger number of images. For each image, try to remember the shape and location.


        Press Space To Start
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent liveCode6
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        skipPractStr = ''
        if skipPractice:
            skipPractStr = ',' + str(num_study) + ',' + str(num_test) + ',' + str(skipOldOrNew)
        liveFile.write('Study,Instruction,1,1,1,' + str(num_study+1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + skipPractStr)
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine allInstr
    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will now be presented with different images.
        Each image will have a particular shape, color and location on the screen.
        Try to remember each image.

        Press Space To Continue
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liveCode
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Practice,Instruction,1,2,3,11,' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second)) #Only done once to tell the programm the total amount
        liveFile.close()
        liveNum += 1
      Each Frame:
        if defaultKeyboard.getKeys(keyList=["escape"]):
            liveliveFile = open(liveFileName+'live.csv', 'w')
            liveliveFile.write('Abort,Abort,1,1,1,1,')
            liveliveFile.close()
            endExpNow = True
  Routine End
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
                    You have finished
        Thank you for your participation
            Please get the experimenter
    CodeComponent code
      Code Type = Py
      Begin Routine:
        StartEnd = False #Lets the screen update normally before quiting

        if not skipOldOrNew:
            currentStimuliTest = num_study
            testingNums = []
            for i in range(num_test-num_study):
                testingNum = 0
                while oldornew_order[testingNum] != currentStimuliTest:
                    testingNum += 1
                testingNums.append(testingNum)
                currentStimuliTest += 1

            print(testingNums)

            currentStimuli = 0
            for i in range(num_test-num_study):
                while not currentStimuli in testingNums:
                    currentStimuli += 1
                print(currentStimuli)
                thisExp2.addData('StimuliName', stimuli[7][oldornew_order[currentStimuli]])
                thisExp2.addData('TestOrder', 'N/A')

                thisExp2.addData('OldOrNewOrder', currentStimuli)
                thisExp2.addData('StudyOrder', 'N/A')

                thisExp2.addData('User_OldOrNew', stimuli[5][oldornew_order[currentStimuli]])

                thisExp2.addData('User_Image_x', 'N/A')
                thisExp2.addData('User_Image_y', 'N/A')

                thisExp2.addData('Correct_OldOrNew', 'New')

                thisExp2.addData('Correct_Image_x', 'N/A')
                thisExp2.addData('Correct_Image_y', 'N/A')

                thisExp2.addData('locationDist', 'N/A')

                thisExp2.addData('OldOrNew_RT', stimuli[6][oldornew_order[currentStimuli]])
                thisExp2.addData('Test_RT', 'N/A')

                thisExp2.addData('StudyStartTime', 'N/A') #adds data
                thisExp2.addData('OldOrNewStartTime', stimuli[9][oldornew_order[currentStimuli]]) #adds data
                thisExp2.addData('TestStartTime', 'N/A') #adds start time of stimulis on screen

                thisExp2.addData('StudyOnset', 'N/A') #adds data
                thisExp2.addData('OldOrNewOnset', stimuli[11][oldornew_order[currentStimuli]]) #adds data
                thisExp2.addData('TestOnset', 'N/A') #adds start time of stimulis on screen

                thisExp2.nextEntry()
                currentStimuli += 1
      Each Frame:
        if StartEnd:
            win.flip()
            time.sleep(4) #Waits three seconds
            text.setText('Saving Data\n\nPlease Wait') #Changes text
            win.flip()
            core.quit()
        StartEnd += 0.1 #For some reason it takes 11 frames/flips to update?
    CodeComponent liveCode10
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Done,Done,1,1,1,1,' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',N/A,N/A,N/A,N/A,N/A,' + liveuseroldornew + ',' + liveuserx + ',' + liveusery + ',' + liveuserrad + ',N/A,' + livetestrt) #To get the last one the user did
        liveFile.close()
        liveNum += 1
  Routine practiceStudy
    CodeComponent ImageCode
      Code Type = Py
      Begin Experiment:
        #This array defines the practice stimuli
        practiceStim = np.array([[thisdir + "/Stimuli/test7.png", thisdir + "/Stimuli/test3.png", thisdir + "/Stimuli/test4.png", thisdir + "/Stimuli/test5.png"],
            [-0.64514, .72917],
            [.012639, .33681],
            [13, 77]])

        #Current trial used to select stimuli
        practicestudytrail = 0
      Begin Routine:
        practicestudyPath = practiceStim[0][practicestudytrail] #Gets path of the study image
        practicestudyx = practiceStim[1][practicestudytrail] #Gets x cord of the study image
        practicestudyy = practiceStim[2][practicestudytrail] #Gets y cord of the study image
        practicestudyrad = practiceStim[3][practicestudytrail] #Gets color of the study image
      End Routine:
        practicestudytrail += 1 #Next trail
    ImageComponent practicestudyimage
      color [set every repeat] = $[1,1,1]
      image [set every repeat] = $practicestudyPath
      pos [set every repeat] = (practicestudyx, practicestudyy)
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    CodeComponent liveCode3
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Practice,Study,' + str(practicestudytrail+1) + ',2,' + str(practicestudytrail+4) + ',' + str(numberofpractice + 8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceTestInstr
    CodeComponent skipCode6
      Code Type = Py
      Begin Routine:
        if skipPractice:
            continueRoutine = False
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextComponent testText
      letterHeight = 0.028
      startVal [time (s)] = 0
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      text:
        You will now be tested on the location of the images you studied.
        Use the mouse to drag the image to its original location.
        During this practice, you will be given feedback on how close you are to the correct location

        Press Space To Start
    CodeComponent liveCode4
      Code Type = Py
      Begin Routine:
        if not skipPractice:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Practice,Instruction,1,1,' + str(numberofpractice + 6) + ',' + str(numberofpractice + 8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceTest
    MouseComponent mouse2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent dragCode
      Code Type = Py
      Begin Experiment:
        #Looking for code in Begin Experiment?
        #All code and var definitions for begin experiment are in the test section
      Begin Routine:
        isDragging = False #Lets other parts of experiment know that the user is dragging the stimuli
        didFinishDrag = False #Lets some aspects of the experiment only do something once after a drag has finished
        hasDragged = False #For preventing the user from going on until dragged
        place = (0,0) #Place of object (Image)
        Image2.setPos(place) #Sets image to (0,0)
        noClickShape.setPos(place) #Sets noClickShape to (0,0), see Begin Experiment for more about noClickShape
        mousePlace = (0,0) #Place of mouse when clicked
        mousex = 0.0 #Offset of mouse x
        mousey = 0.0 #Offset of mouse y
        firstDrag = True #For updating positions of mousex and mousey
      Each Frame:
        #This whole complicated thing makes sure that the stimuli always stays on the mouse if they click on the stimuli first
        if mouse2.isPressedIn(screenRect2) and didFinishDrag == False:#ScreenRect is used to detect if mouse is pressed anywhere on screen
            if mouse2.isPressedIn(noClickShape): #Checks when mouse is pressed down, see Begin Experiment for more about noClickShape
                #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                mousePlace = mouse2.getPos()
                if firstDrag == True: #Only updates offset once when starting the drag
                    mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                    mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                    firstDrag = False #Disables first drag
                place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                Image2.setPos(place) #Sets position of the image equal to the position of the mouse
                noClickShape.setPos(place) #Set position
                isDragging = True #Sets is dragging to true when the mouse starts on the object (noClickShape in this case)
                hasDragged = True #For preventing the user from going on until dragged
                win.mouseVisible = False #Hide mouse when dragging
            elif isDragging == True: #If the mouse started on noClickShape but isnt there right now (and still pressed down) it will update position anyway
                #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                mousePlace = mouse2.getPos()
                if firstDrag == True: #Only updates offset once when starting the drag
                        mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                        mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                        firstDrag = False #Disables first drag
                place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                Image2.setPos(place) #Sets position of the image equal to the position of the mouse
                noClickShape.setPos(place) #Set position
        elif didFinishDrag == True and isDragging == True: #Disables didFinishDrag for good
            didFinishDrag = False
        elif isDragging == True: #This is an elif statement so will only play if others above are false
            didFinishDrag = True #Makes var true so it only is true for one frame
            isDragging = False #It is no longer dragging
            win.mouseVisible = True #Show mouse once your done dragging
            firstDrag = True #re-enables first drag again so when the first if statement plays it will update position of offset
        else:
            didFinishDrag = False #Disables didFinishDrag for good

        noClickShape.draw() #Draws no click shape
    PolygonComponent screenRect2
      fillColor = $[-1.000,-1.000,-1.000]
      opacity = 0
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent feedbackCode
      Code Type = Py
      Begin Experiment:
        #Feedback text setup, tells you how close you are
        FeedbackText = visual.TextStim(win=win, name='FeedbackText',
            text='',
            font='Arial',
            pos=(0, 0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #This text makes you select the correct color and location
        ContinueText = visual.TextStim(win=win, name='ColorText',
            text='',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
      Begin Routine:
        then = datetime.datetime.now() #Saves time they begun the section
        colorText = ''
        posText = ''
        degrees = 0 #Resests degrees so that if it saves with an exit the degrees will be 0 and not some random number
        Image2.setColor([0,0,1])#sets Image hsv color
        FeedbackText.setText('')
        ContinueText.setText('')
        colorIsCorrect = False #If they are on the correct color
        locationIsCorrect = False #If they are on the correct location
      Each Frame:
        if isDragging: #When you are dragging the image
            locationIsCorrect = False #resets location is correct bool
            xpos, ypos = place
            distx = abs(xpos-practicetestx) #find the distance in x between correct and user
            disty = abs(ypos-practicetesty) #find the distance in y between correct and user
            pythDist = math.sqrt((distx*distx)+(disty*disty)) #Uses pythagorean theorem to find distance
            pythDist = round(pythDist,5) #Round to prevent errors
            if pythDist > 0.15:
                posText = '    The location is incorrect    '
            elif pythDist > 0.05:
                posText = 'The location is nearly correct'
            elif pythDist < 0.05:
                posText = '     The location is spot on!     '
                locationIsCorrect = True
            FeedbackText.setText(posText)
        FeedbackText.draw()
        if isDragging and not locationIsCorrect: #If you try to continue it will wave a finger at you a say no oh, choose a correct location
                ContinueText.setText('Please select a valid loaction')
        if not mouse2.isPressedIn(screenRect2) and locationIsCorrect:
            ContinueText.setText('Press Space To Continue') #When they finally are correct tell them you can press the space bar to continue
            ContinueText.autoDraw = True #Draw the text
        elif locationIsCorrect: #This will only call if they are dragging
            ContinueText.setText('') #Sets the text to nothing
      End Routine:
        ContinueText.autoDraw = False #Stop drawing the text
    CodeComponent exitCode
      Code Type = Py
      Begin Experiment:
        practicetesttrail = 0 #Current trail user is on
        practiceTestOrder = [0, 1] #order of the practice test, different then study order
        practicetestPath = 'None'
      Begin Routine:
        mouse2.setPos(newPos=(0, 0.001)) #resets position of mouse, has to be offset slightly or else it will select a color for some reason
        win.mouseVisible = True #Show mouse only if it is supposed to continue routine

        #These two vars give the person help with knowing how to drag/color live
        helpDrag = False

        opacOfArrows = 0.0 #Opacity of the arrows
        opacUp = True #If Opacity is rising or falling

        colorDeg = 0 #Degrees of slider for colorHelp
        colorDegUp = True #Degrees of the slider going up or down
        colorOpac = 0 #Opacity of the slider

        practicetestPath = practiceStim[0][practiceTestOrder[practicetesttrail]] #Gets path of the study image
        practicetestx = practiceStim[1][practiceTestOrder[practicetesttrail]] #Gets x cord of the study image
        practicetesty = practiceStim[2][practiceTestOrder[practicetesttrail]] #Gets y cord of the study image
        practicetestrad = practiceStim[3][practiceTestOrder[practicetesttrail]] #Gets color of the study image
      Each Frame:
        if theseKeys == 'space':  # if space is pressed
            #a response ends the routine
            helpDrag = True #If they have not dragged yet and try to end routine
            if hasDragged: #Stops routine if they have colored and moved the stimuli
                if locationIsCorrect:
                    continueRoutine = False
                else:
                    ContinueText.autoDraw = True

        #Help animations
        if helpDrag == True and hasDragged == False:
            #Makes a nice animation
            if opacOfArrows >= 1.0: #changes direction of opacity
                opacUp = False
            elif opacOfArrows <= 0.0:
                opacUp = True
            if opacUp == True:
                opacOfArrows += 0.01 #Changes opacity, change this var to make animation faster or slower
            else:
                opacOfArrows -= 0.01
            #Draws aroows and text
            arrowUp.opacity = opacOfArrows
            arrowDown.opacity = opacOfArrows
            arrowRight.opacity = opacOfArrows
            arrowLeft.opacity = opacOfArrows
            arrowUp.draw()
            arrowDown.draw()
            arrowRight.draw()
            arrowLeft.draw()
            DragText.draw() #Tells user what to do
      End Routine:
        win.mouseVisible = False #Hide mouse
        practicetesttrail += 1
    ImageComponent Image2
      color = $[1,1,1]
      colorSpace = hsv
      image [set every repeat] = $practicetestPath
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    CodeComponent liveCode14
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Practice,Test,' + str(practicetesttrail+1) + ',2,' + str(numberofpractice + practicetesttrail + 7) +',' + str(numberofpractice + 8) +',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine testInstr
    CodeComponent onsetCode3
      Code Type = Py
      End Routine:
        testOnset = 0
    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will now be tested on the location of the images you studied.
        Use the mouse to drag the image to its original location.
        Once you're done press the spacebar to continue.

        You will NOT be given feedback on how close you are.

        Press Space To Start
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liveCode8
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Test,Instruction,1,1,1,' + str(num_study+1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',' + liveoldornewrt + ',' + liveuseroldornew) #Gets stuff from last trail
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceStudyInstr
    CodeComponent SkipCode5
      Code Type = Py
      Begin Routine:
        if skipPractice:
            continueRoutine = False
    TextComponent text_5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Lets start with some practice.

        You will now be shown two objects. Memorize their shape and location.
        Each object will stay on the screen for three seconds.

        Press Space To Continue
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liveCode2
      Code Type = Py
      Begin Routine:
        if not skipPractice:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Practice,Instruction,1,1,3,' + str(numberofpractice + 8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceOldornew
    TextComponent oldornewText2
      letterHeight = 0.05
      pos = (0, -.45)
      startVal [time (s)] = 0
      text [set every repeat] = 1 - Old        2 - New
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    CodeComponent olornewCode2
      Code Type = Py
      Begin Experiment:
        import time
        practiceoldornewtrail = 0 #Current trail user is on
        practiceOldornewOrder = [3, 1, 2, 0] #order of the practice test, different then study order
      Begin Routine:
        theseKeys = '' #Gets key press
        win.mouseVisible = False #Hide mouse
        ttime = 1 #Lets user respond immediatly

        practiceoldornewPath = ''

        practiceoldornewPath = practiceStim[0][practiceOldornewOrder[practiceoldornewtrail]] #Gets path of the study image

        ttime = 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if key == '1' and ttime >= 1: #if user selected old
                if practiceOldornewOrder[practiceoldornewtrail] == 0 or practiceOldornewOrder[practiceoldornewtrail] == 1:
                    continueRoutine = False #If they are correct, go on to next routine
                else:
                    oldornewText2.setText('Wrong, the image is new') #If they are not correct, tell them they are wrong
                    #win.flip() #Updates screen
                    #time.sleep(1) #Waits for one second
                    ttime = 0
            elif key == '2' and ttime >= 1: #If user selected new
                if practiceOldornewOrder[practiceoldornewtrail] == 2 or practiceOldornewOrder[practiceoldornewtrail] == 3:
                    continueRoutine = False #If they are correct, go on to next routine
                else:
                    oldornewText2.setText('Wrong, the image is old') #If they are not correct, tell them they are wrong
                    #win.flip() #Updates screen
                    #time.sleep(1) #Waits for one second
                    ttime = 0

        if ttime >= 1:
            oldornewText2.setText('1 - Old        2 - New') #Re-displays old text
        else:
            ttime += 0.01
      End Routine:
        practiceoldornewtrail += 1
    ImageComponent oldornewImage2
      image [set every repeat] = $practiceoldornewPath
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    CodeComponent liveCode5
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Practice,Old/New,' + str(practiceoldornewtrail+1) + ',4,' + str(practiceoldornewtrail+7) +',' + str(numberofpractice + 8) +',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
        liveFile.close()
        liveNum += 1
      Each Frame:
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceExampleInstr
    CodeComponent SkipCode3
      Code Type = Py
      Begin Routine:
        if skipPractice:
            continueRoutine = False
    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be presented with different images.
        Your task will be to remember each shape and its location on the screen.

        To respond, you will need to use the mouse to drag an image to a place on the screen.

        Press space to see an example and try it out
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liveCode11
      Code Type = Py
      Begin Routine:
        if not skipPractice:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Practice,Instruction,1,1,1,' + str(numberofpractice+8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',' + str(num_study) + ',' + str(num_test) + ',' + str(skipOldOrNew))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceExample
    CodeComponent SkipCode4
      Code Type = Py
      Begin Routine:
        if skipPractice:
            continueRoutine = False
    ImageComponent Image3
      color = $[1,0,1]
      colorSpace = hsv
      image = $thisdir + '/Stimuli/test6.png'
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    MouseComponent mouse3
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent DragCode3
      Code Type = Py
      Begin Experiment:
        #Looking for code in Begin Experiment?
        #All code and var definitions for begin experiment are in the test section
      Begin Routine:
        isDragging = False #Lets other parts of experiment know that the user is dragging the stimuli
        didFinishDrag = False #Lets some aspects of the experiment only do something once after a drag has finished
        hasDragged = False #For preventing the user from going on until dragged
        place = (0,0) #Place of object (Image)
        Image3.setPos(place) #Sets image to (0,0)
        noClickShape.setPos(place) #Sets noClickShape to (0,0), see Begin Experiment for more about noClickShape
        mousePlace = (0,0) #Place of mouse when clicked
        mousex = 0.0 #Offset of mouse x
        mousey = 0.0 #Offset of mouse y
        firstDrag = True #For updating positions of mousex and mousey
      Each Frame:
        #This whole complicated thing makes sure that the stimuli always stays on the mouse if they click on the stimuli first
        if mouse3.isPressedIn(screenRect3) and didFinishDrag == False:#ScreenRect is used to detect if mouse is pressed anywhere on screen
            if mouse3.isPressedIn(noClickShape): #Checks when mouse is pressed down, see Begin Experiment for more about noClickShape
                #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                mousePlace = mouse3.getPos()
                if firstDrag == True: #Only updates offset once when starting the drag
                    mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                    mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                    firstDrag = False #Disables first drag
                place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                Image3.setPos(place) #Sets position of the image equal to the position of the mouse
                noClickShape.setPos(place) #Set position
                isDragging = True #Sets is dragging to true when the mouse starts on the object (noClickShape in this case)
                hasDragged = True #For preventing the user from going on until dragged
                win.mouseVisible = False #Hide mouse when dragging
            elif isDragging == True: #If the mouse started on noClickShape but isnt there right now (and still pressed down) it will update position anyway
                #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                mousePlace = mouse3.getPos()
                if firstDrag == True: #Only updates offset once when starting the drag
                        mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                        mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                        firstDrag = False #Disables first drag
                place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                Image3.setPos(place) #Sets position of the image equal to the position of the mouse
                noClickShape.setPos(place) #Set position
        elif didFinishDrag == True and isDragging == True: #Disables didFinishDrag for good
            didFinishDrag = False
        elif isDragging == True: #This is an elif statement so will only play if others above are false
            didFinishDrag = True #Makes var true so it only is true for one frame
            isDragging = False #It is no longer dragging
            win.mouseVisible = True #Show mouse once your done dragging
            firstDrag = True #re-enables first drag again so when the first if statement plays it will update position of offset
        else:
            didFinishDrag = False #Disables didFinishDrag for good

        noClickShape.draw() #Draws no click shape
    PolygonComponent screenRect3
      fillColor = $[1,1,1]
      opacity = 0
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent AnimationCode
      Code Type = Py
      Begin Experiment:
        #Color text 2 setup, keep this so it's reused for telling the user to continue
        ColorText2 = visual.TextStim(win=win, name='ColorText',
            text='',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #Drag text 2 setup, tells user to select a place
        DragText2 = visual.TextStim(win=win, name='DragText',
            text='Drag and Drop the object to a location on the screen',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
      Begin Routine:
        win.mouseVisible = True #Show mouse at start
        mouse2.setPos(newPos=(0, 0.001)) #resets position of mouse, has to be offset slightly or else it will select a color for some reason

        #These two vars give the person help with knowing how to drag/color live
        helpColor = False

        opacOfArrows = 0.0 #Opacity of the arrows
        opacUp = True #If Opacity is rising or falling

        colorDeg = 0 #Degrees of slider for colorHelp
        colorDegUp = True #Degrees of the slider going up or down
        colorOpac = 0 #Opacity of the slider
      Each Frame:
        if not hasDragged:
            helpDrag = True #Tells the user to drag if they have already colored
        elif not isDragging: #Tells user they can continue once they've colored and placed, re-uses colortext2 text
            ColorText2.setText('Great! Whenever you\'re ready to continue, click the spacebar')
            ColorText2.draw()

        if theseKeys == 'space':  # if space is pressed
            #a response ends the routine
            if hasDragged: #Stops routine if they have colored and moved the stimuli
                continueRoutine = False

        #Help animations
        if helpDrag == True and hasDragged == False:
            #Makes a nice animation
            if opacOfArrows >= 1.0: #changes direction of opacity
                opacUp = False
            elif opacOfArrows <= 0.0:
                opacUp = True
            if opacUp == True:
                opacOfArrows += 0.01 #Changes opacity, change this var to make animation faster or slower
            else:
                opacOfArrows -= 0.01
            #Draws aroows and text
            arrowUp.opacity = opacOfArrows
            arrowDown.opacity = opacOfArrows
            arrowRight.opacity = opacOfArrows
            arrowLeft.opacity = opacOfArrows
            arrowUp.draw()
            arrowDown.draw()
            arrowRight.draw()
            arrowLeft.draw()
            DragText2.draw() #Tells user what to do
      End Routine:
        win.mouseVisible = False #Hide mouse at end
    CodeComponent liveCode12
      Code Type = Py
      Begin Routine:
        if not skipPractice:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Practice,Example,1,1,2,' + str(numberofpractice + 8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine checkForOverwrite
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import shutil #To delete folders
        #To check if files exist already
        isData = False
        isLive = False
      Begin Routine:
        if os.path.exists(_thisDir + os.sep + u'data/%s/sub_%s_%s_test.csv' % (expInfo['participant'], expInfo['participant'], expName)):
            isData = True #If the data folder exists
            print('isData')
            #Sets text to only say data folder
            text_6.setText('Participant ' + expInfo['participant'] + ' already exists in the data folder.\nWould you like too clear and OVERWRITE all data or CANCEL experiment?\nYou can also CONTINUE to create a new file (ex: data1) in the data folder.\nThis is not recommended as some live functionality may be lost.')
        if os.path.exists(_thisDir + os.sep + u'live/'+ expInfo['participant'] + '/live1' + '.csv'):
            isLive = True #If the live folder exists
            print('isLive')
            #Sets text to only say live folder
            text_6.setText('Participant ' + expInfo['participant'] +' already exists in the live folder.\nWould you like too clear and OVERWRITE all data or CANCEL experiment?\nYou can also CONTINUE to create a new file (ex: data1) in the data folder.\nThis is not recommended as some live functionality may be lost.')

        if isLive and isData:
            #Sets text to say both data and live folder
            text_6.setText('Participant ' + expInfo['participant'] +' already exists in both the live and data folder.\nWould you like too clear and OVERWRITE all data or CANCEL experiment?\nYou can also CONTINUE to create a new file (ex: data1) in the data folder.\nThis is not recommended as some live functionality may be lost.')
        elif not isLive and not isData:
            #If the participant # is new, move on without giving a prompt
            continueRoutine = False
      Each Frame:
        if mouse.isPressedIn(text_7):
            #Delete all data from folders
            shutil.rmtree(_thisDir + os.sep + u'data/%s' % (expInfo['participant']), ignore_errors=True)
            shutil.rmtree(_thisDir + os.sep + u'live/%s' % (expInfo['participant']), ignore_errors=True)
            continueRoutine = False #Move on to the next routine
        elif mouse.isPressedIn(text_8):
            core.quit() #If the user clicks cancel, quit the experiment
        elif mouse.isPressedIn(text_9):
            continueRoutine = False #If the user clicks continue anyway, go onto the next routine without doing anything else

        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                core.quit()
    TextComponent text_6
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        This participant already exists in both the live and data folder.
        Would you like too clear and OVERWRITE all data or CANCEL experiment?
        You can also CONTINUE to create a new file (ex: data1) in the data folder.
        This is not recommended as some live functionality may be lost.
    TextComponent text_7
      color = red
      letterHeight = 0.05
      pos = (0.15, 0)
      startVal [time (s)] = 0.0
      text = Overwrite
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    TextComponent text_8
      letterHeight = 0.05
      pos = (-0.15, 0)
      startVal [time (s)] = 0.0
      text = Cancel
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    TextComponent text_9
      letterHeight = 0.03
      pos = (0.55, -0.46)
      startVal [time (s)] = 0.0
      text = Continue Anyway (Not Recommended)
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine oldornewInstr
    CodeComponent SkipCode
      Code Type = Py
      Begin Routine:
        if skipOldOrNew:
            continueRoutine = False
      End Routine:
        oldornewOnset = 0
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liveCode17
      Code Type = Py
      Begin Routine:
        if not skipOldOrNew:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Old/New,Instruction,1,1,1,' + str(num_test + 1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
    TextComponent text_11
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        We will now test you on how well you remember the shapes you just saw.
        Just like in the practice, decide if you have seen each shape during the study, irrespective of its location.
        If you have seen it during the study, press 1 for OLD. If you have not seen it, press 2 for NEW.
        You will not be given feedback.

        Press Space To Start
  Routine practiceOldornewInstr
    CodeComponent SkipCode2
      Code Type = Py
      Begin Routine:
        if skipOldOrNew or skipPractice:
            continueRoutine = False
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liveCode16
      Code Type = Py
      Begin Routine:
        if not skipPractice and not skipOldOrNew:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Practice,Instruction,1,1,6,' + str(numberofpractice + 8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
    TextComponent text_10
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You'll now be shown multiple shapes.
        For each shape, decide if you have seen the shape during the study, irrespective of its location.
        If you have seen it during study, press 1 for OLD. If you have not seen it, press 2 for NEW.

        Press Space To Start
Flow
  Routine checkForOverwrite
  Routine header
  Routine practiceExampleInstr
  Routine practiceExample
  Routine practiceStudyInstr
  LoopInitiator practicestudys loopType="TrialHandler"
    loopType = sequential
    nReps = $num_practstudy
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    Routine reset
    Routine practiceStudy
  LoopTerminator practicestudys
  Routine practiceOldornewInstr
  LoopInitiator practiceoldornews loopType="TrialHandler"
    loopType = random
    nReps = num_practoldornew
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    Routine reset
    Routine practiceOldornew
  LoopTerminator practiceoldornews
  Routine practiceTestInstr
  LoopInitiator practiceTests loopType="TrialHandler"
    loopType = sequential
    nReps = $num_practstudy
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    Routine reset
    Routine practiceTest
  LoopTerminator practiceTests
  Routine studyInstr
  LoopInitiator studys loopType="TrialHandler"
    loopType = random
    nReps = $num_study
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    Routine reset
    Routine study
  LoopTerminator studys
  Routine oldornewInstr
  LoopInitiator oldornews loopType="TrialHandler"
    loopType = random
    nReps = $num_oldornew
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    Routine reset
    Routine oldornew
  LoopTerminator oldornews
  Routine testInstr
  LoopInitiator tests loopType="TrialHandler"
    loopType = random
    nReps = $num_study
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    Routine reset
    Routine test
  LoopTerminator tests
  Routine End
