PsychoPy2experiment version="3.1.5"
Settings
  Data filename = u'data/Logs/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Enable Escape = False
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.000,-1.000,-1.000]
  expName = PACOLOCO
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Routines
  Routine test
    MouseComponent mouse1
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent DragCode
      Code Type = Py
      Begin Experiment:
        #To prevent user from clicking inside the color wheel and selecting a color, noClickShape surrounds entire image, set opacity to one to see for yourself ;)
        noClickShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,0,1], pos=(0,0), size=(0.25,0.25), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 0)
      Begin Routine:
        isDragging = False #Lets other parts of experiment know that the user is dragging the stimuli
        didFinishDrag = False #Lets some aspects of the experiment only do something once after a drag has finished
        hasDragged = False #For preventing the user from going on until dragged
        place = (0,0) #Place of object (Image)
        Image.setPos(place) #Sets image to (0,0)
        noClickShape.setPos(place) #Sets noClickShape to (0,0), see Begin Experiment for more about noClickShape
        mousePlace = (0,0) #Place of mouse when clicked
        mousex = 0.0 #Offset of mouse x
        mousey = 0.0 #Offset of mouse y
        firstDrag = True #For updating positions of mousex and mousey
      Each Frame:
        #This whole complicated thing makes sure that the stimuli always stays on the mouse if they click on the stimuli first
        if mouse1.isPressedIn(screenRect) and didFinishDrag == False:#ScreenRect is used to detect if mouse is pressed anywhere on screen
            if mouse1.isPressedIn(noClickShape): #Checks when mouse is pressed down, see Begin Experiment for more about noClickShape
                if isOnColor == False: #Makes sure it didn't start on the color wheel
                    #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                    mousePlace = mouse1.getPos()
                    if firstDrag == True: #Only updates offset once when starting the drag
                        mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                        mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                        firstDrag = False #Disables first drag
                    place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                    Image.setPos(place) #Sets position of the image equal to the position of the mouse
                    noClickShape.setPos(place) #Set position
                    isDragging = True #Sets is dragging to true when the mouse starts on the object (noClickShape in this case)
                    hasDragged = True #For preventing the user from going on until dragged
                    win.mouseVisible = False #Hide mouse when dragging
            elif isDragging == True: #If the mouse started on noClickShape but isnt there right now (and still pressed down) it will update position anyway
                #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                mousePlace = mouse1.getPos()
                if firstDrag == True: #Only updates offset once when starting the drag
                        mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                        mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                        firstDrag = False #Disables first drag
                place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                Image.setPos(place) #Sets position of the image equal to the position of the mouse
                noClickShape.setPos(place) #Set position
        elif didFinishDrag == True and isDragging == True: #Disables didFinishDrag for good
            didFinishDrag = False
        elif isDragging == True: #This is an elif statement so will only play if others above are false
            didFinishDrag = True #Makes var true so it only is true for one frame
            isDragging = False #It is no longer dragging
            win.mouseVisible = True #Show mouse once your done dragging
            firstDrag = True #re-enables first drag again so when the first if statement plays it will update position of offset
        else:
            didFinishDrag = False #Disables didFinishDrag for good

        noClickShape.draw() #Draws no click shape
    CodeComponent ColorCode
      Code Type = Py
      Begin Experiment:
        from psychopy import misc #needed for color wheel

        #Creates color wheel object
        textureRes = 64

        hsv = np.ones([textureRes,textureRes,3], dtype=float)
        hsv[:,:,0] = np.linspace(0,360,textureRes, endpoint=False)
        hsv[:,:,1] = 1
        hsv[:,:,2] = 1
        rgb = misc.hsv2rgb(hsv)

        #mask gives the fraction of the that is visible
        mask = np.zeros([100,1])
        mask[-10:] = 1  # 10% of the radius is 1 (visible)
        # annoyingly with interpolate=True the mask outer edge can
        # get blended with innermost pixel

        #texture defines colors, mask makes it have a hole in the center, angular cycles defines how many times each color will be shown, interpolate makes the colors blend together
        stim = visual.RadialStim(win, tex=rgb, mask = mask, angularRes=256, angularCycles=1, interpolate=True, size=(.3,.3))
      Begin Routine:
        isOnColor = False #If the mouse is currently on a color
        hasColored = False #For hiding the selectShape until you start coloring
        stim.setPos(place)
      Each Frame:
        if didFinishDrag == True: #Only updates position once after you finish dragging, otherwise experiment will lag a lot
            stim.setPos(place)
            stim.draw()
        elif isDragging == False: #If your not dragging it won't redifine the position
            stim.draw()

        if mouse1.isPressedIn(screenRect):#ScreenRect is used to detect if mouse is pressed anywhere on screen
            if mouse1.isPressedIn(stim) and not mouse1.isPressedIn(noClickShape):#Has to be initially pressed on wheel to set to true
                if isDragging == False: #Also cannot be dragging
                    hasColored = True #For hiding the selectShape until you start coloring
                    isOnColor = True #Then will set is on color to true
        else:
            isOnColor = False #If mouse is not pressed down it is not on color
    CodeComponent SegmentCode
      Code Type = Py
      Begin Experiment:
        #This creates each segment of the circle that can be used and clicked on later in the experiment
        opac = 0 #changes opacity of segments, 0 is invisible, 1 is visible, change to 0.5? to debug
        orimult = 3.6 #origin value is multiplied by this amount
        visWed = (0.0, 4) #visible portion of the wedge
        segpos = (0,0) #Position of segments
        segSize = (4,4) #size of segments, goes along with color wheel size
        degrees = 0 #Degrees the selectshape should be, don't change this var
        #If you change the amount of possible segments make sure to update randomization amount in the header file as well

        #Visual wedge is set to 4 but in reality it only covers about 3.6
        #So the origin of each segment are multiples of 3.6, 360/3.6 is 100 segments
      Begin Routine:
        segpos = (0,0) #resets position of segments

        #Defines each segment
        rad0 = visual.RadialStim( win=win, name='rad0', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*0, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad1 = visual.RadialStim( win=win, name='rad1', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*1, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad2 = visual.RadialStim( win=win, name='rad2', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*2, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad3 = visual.RadialStim( win=win, name='rad3', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*3, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad4 = visual.RadialStim( win=win, name='rad4', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*4, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad5 = visual.RadialStim( win=win, name='rad5', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*5, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad6 = visual.RadialStim( win=win, name='rad6', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*6, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad7 = visual.RadialStim( win=win, name='rad7', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*7, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad8 = visual.RadialStim( win=win, name='rad8', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*8, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad9 = visual.RadialStim( win=win, name='rad9', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*9, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad10 = visual.RadialStim( win=win, name='rad10', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*10, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad11 = visual.RadialStim( win=win, name='rad11', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*11, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad12 = visual.RadialStim( win=win, name='rad12', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*12, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad13 = visual.RadialStim( win=win, name='rad13', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*13, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad14 = visual.RadialStim( win=win, name='rad14', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*14, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad15 = visual.RadialStim( win=win, name='rad15', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*15, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad16 = visual.RadialStim( win=win, name='rad16', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*16, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad17 = visual.RadialStim( win=win, name='rad17', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*17, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad18 = visual.RadialStim( win=win, name='rad18', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*18, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad19 = visual.RadialStim( win=win, name='rad19', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*19, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad20 = visual.RadialStim( win=win, name='rad20', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*20, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad21 = visual.RadialStim( win=win, name='rad21', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*21, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad22 = visual.RadialStim( win=win, name='rad22', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*22, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad23 = visual.RadialStim( win=win, name='rad23', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*23, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad24 = visual.RadialStim( win=win, name='rad24', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*24, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad25 = visual.RadialStim( win=win, name='rad25', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*25, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad26 = visual.RadialStim( win=win, name='rad26', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*26, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad27 = visual.RadialStim( win=win, name='rad27', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*27, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad28 = visual.RadialStim( win=win, name='rad28', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*28, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad29 = visual.RadialStim( win=win, name='rad29', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*29, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad30 = visual.RadialStim( win=win, name='rad30', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*30, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad31 = visual.RadialStim( win=win, name='rad31', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*31, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad32 = visual.RadialStim( win=win, name='rad32', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*32, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad33 = visual.RadialStim( win=win, name='rad33', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*33, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad34 = visual.RadialStim( win=win, name='rad34', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*34, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad35 = visual.RadialStim( win=win, name='rad35', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*35, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad36 = visual.RadialStim( win=win, name='rad36', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*36, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad37 = visual.RadialStim( win=win, name='rad37', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*37, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad38 = visual.RadialStim( win=win, name='rad38', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*38, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad39 = visual.RadialStim( win=win, name='rad39', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*39, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad40 = visual.RadialStim( win=win, name='rad40', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*40, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad41 = visual.RadialStim( win=win, name='rad41', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*41, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad42 = visual.RadialStim( win=win, name='rad42', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*42, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad43 = visual.RadialStim( win=win, name='rad43', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*43, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad44 = visual.RadialStim( win=win, name='rad44', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*44, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad45 = visual.RadialStim( win=win, name='rad45', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*45, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad46 = visual.RadialStim( win=win, name='rad46', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*46, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad47 = visual.RadialStim( win=win, name='rad47', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*47, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad48 = visual.RadialStim( win=win, name='rad48', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*48, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad49 = visual.RadialStim( win=win, name='rad49', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*49, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad50 = visual.RadialStim( win=win, name='rad50', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*50, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad51 = visual.RadialStim( win=win, name='rad51', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*51, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad52 = visual.RadialStim( win=win, name='rad52', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*52, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad53 = visual.RadialStim( win=win, name='rad53', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*53, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad54 = visual.RadialStim( win=win, name='rad54', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*54, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad55 = visual.RadialStim( win=win, name='rad55', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*55, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad56 = visual.RadialStim( win=win, name='rad56', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*56, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad57 = visual.RadialStim( win=win, name='rad57', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*57, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad58 = visual.RadialStim( win=win, name='rad58', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*58, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad59 = visual.RadialStim( win=win, name='rad59', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*59, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad60 = visual.RadialStim( win=win, name='rad60', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*60, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad61 = visual.RadialStim( win=win, name='rad61', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*61, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad62 = visual.RadialStim( win=win, name='rad62', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*62, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad63 = visual.RadialStim( win=win, name='rad63', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*63, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad64 = visual.RadialStim( win=win, name='rad64', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*64, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad65 = visual.RadialStim( win=win, name='rad65', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*65, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad66 = visual.RadialStim( win=win, name='rad66', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*66, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad67 = visual.RadialStim( win=win, name='rad67', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*67, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad68 = visual.RadialStim( win=win, name='rad68', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*68, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad69 = visual.RadialStim( win=win, name='rad69', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*69, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad70 = visual.RadialStim( win=win, name='rad70', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*70, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad71 = visual.RadialStim( win=win, name='rad71', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*71, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad72 = visual.RadialStim( win=win, name='rad72', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*72, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad73 = visual.RadialStim( win=win, name='rad73', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*73, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad74 = visual.RadialStim( win=win, name='rad74', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*74, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad75 = visual.RadialStim( win=win, name='rad75', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*75, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad76 = visual.RadialStim( win=win, name='rad76', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*76, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad77 = visual.RadialStim( win=win, name='rad77', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*77, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad78 = visual.RadialStim( win=win, name='rad78', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*78, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad79 = visual.RadialStim( win=win, name='rad79', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*79, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad80 = visual.RadialStim( win=win, name='rad80', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*80, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad81 = visual.RadialStim( win=win, name='rad81', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*81, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad82 = visual.RadialStim( win=win, name='rad82', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*82, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad83 = visual.RadialStim( win=win, name='rad83', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*83, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad84 = visual.RadialStim( win=win, name='rad84', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*84, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad85 = visual.RadialStim( win=win, name='rad85', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*85, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad86 = visual.RadialStim( win=win, name='rad86', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*86, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad87 = visual.RadialStim( win=win, name='rad87', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*87, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad88 = visual.RadialStim( win=win, name='rad88', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*88, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad89 = visual.RadialStim( win=win, name='rad89', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*89, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad90 = visual.RadialStim( win=win, name='rad90', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*90, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad91 = visual.RadialStim( win=win, name='rad91', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*91, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad92 = visual.RadialStim( win=win, name='rad92', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*92, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad93 = visual.RadialStim( win=win, name='rad93', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*93, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad94 = visual.RadialStim( win=win, name='rad94', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*94, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad95 = visual.RadialStim( win=win, name='rad95', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*95, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad96 = visual.RadialStim( win=win, name='rad96', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*96, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad97 = visual.RadialStim( win=win, name='rad97', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*97, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad98 = visual.RadialStim( win=win, name='rad98', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*98, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad99 = visual.RadialStim( win=win, name='rad99', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*99, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )
      Each Frame:
        #MARK: Detect Mouse Press On Segment
        #Takes the multiplier (How many segments) and multiplies it by rad number
        #Then adds half of the multiplier (to make color average)
        if isDragging == False and isOnColor == True: #If its on a segment it will update the color of the image
            if mouse1.isPressedIn(rad0): #Will not set color if dragging image
                degrees = (orimult*0)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad1):
                degrees = (orimult*1)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad2):
                degrees = (orimult*2)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad3):
                degrees = (orimult*3)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad4):
                degrees = (orimult*4)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad5):
                degrees = (orimult*5)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad6):
                degrees = (orimult*6)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad7):
                degrees = (orimult*7)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad8):
                degrees = (orimult*8)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad9):
                degrees = (orimult*9)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad10):
                degrees = (orimult*10)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad11):
                degrees = (orimult*11)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad12):
                degrees = (orimult*12)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad13):
                degrees = (orimult*13)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad14):
                degrees = (orimult*14)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad15):
                degrees = (orimult*15)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad16):
                degrees = (orimult*16)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad17):
                degrees = (orimult*17)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad18):
                degrees = (orimult*18)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad19):
                degrees = (orimult*19)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad20):
                degrees = (orimult*20)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad21):
                degrees = (orimult*21)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad22):
                degrees = (orimult*22)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad23):
                degrees = (orimult*23)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad24):
                degrees = (orimult*24)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad25):
                degrees = (orimult*25)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad26):
                degrees = (orimult*26)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad27):
                degrees = (orimult*27)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad28):
                degrees = (orimult*28)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad29):
                degrees = (orimult*29)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad30):
                degrees = (orimult*30)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad31):
                degrees = (orimult*31)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad32):
                degrees = (orimult*32)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad33):
                degrees = (orimult*33)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad34):
                degrees = (orimult*34)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad35):
                degrees = (orimult*35)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad36):
                degrees = (orimult*36)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad37):
                degrees = (orimult*37)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad38):
                degrees = (orimult*38)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad39):
                degrees = (orimult*39)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad40):
                degrees = (orimult*40)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad41):
                degrees = (orimult*41)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad42):
                degrees = (orimult*42)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad43):
                degrees = (orimult*43)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad44):
                degrees = (orimult*44)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad45):
                degrees = (orimult*45)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad46):
                degrees = (orimult*46)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad47):
                degrees = (orimult*47)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad48):
                degrees = (orimult*48)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad49):
                degrees = (orimult*49)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad50):
                degrees = (orimult*50)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad51):
                degrees = (orimult*51)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad52):
                degrees = (orimult*52)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad53):
                degrees = (orimult*53)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad54):
                degrees = (orimult*54)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad55):
                degrees = (orimult*55)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad56):
                degrees = (orimult*56)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad57):
                degrees = (orimult*57)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad58):
                degrees = (orimult*58)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad59):
                degrees = (orimult*59)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad60):
                degrees = (orimult*60)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad61):
                degrees = (orimult*61)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad62):
                degrees = (orimult*62)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad63):
                degrees = (orimult*63)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad64):
                degrees = (orimult*64)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad65):
                degrees = (orimult*65)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad66):
                degrees = (orimult*66)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad67):
                degrees = (orimult*67)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad68):
                degrees = (orimult*68)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad69):
                degrees = (orimult*69)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad70):
                degrees = (orimult*70)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad71):
                degrees = (orimult*71)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad72):
                degrees = (orimult*72)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad73):
                degrees = (orimult*73)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad74):
                degrees = (orimult*74)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad75):
                degrees = (orimult*75)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad76):
                degrees = (orimult*76)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad77):
                degrees = (orimult*77)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad78):
                degrees = (orimult*78)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad79):
                degrees = (orimult*79)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad80):
                degrees = (orimult*80)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad81):
                degrees = (orimult*81)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad82):
                degrees = (orimult*82)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad83):
                degrees = (orimult*83)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad84):
                degrees = (orimult*84)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad85):
                degrees = (orimult*85)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad86):
                degrees = (orimult*86)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad87):
                degrees = (orimult*87)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad88):
                degrees = (orimult*88)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad89):
                degrees = (orimult*89)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad90):
                degrees = (orimult*90)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad91):
                degrees = (orimult*91)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad92):
                degrees = (orimult*92)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad93):
                degrees = (orimult*93)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad94):
                degrees = (orimult*94)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad95):
                degrees = (orimult*95)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad96):
                degrees = (orimult*96)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad97):
                degrees = (orimult*97)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad98):
                degrees = (orimult*98)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color
            elif mouse1.isPressedIn(rad99):
                degrees = (orimult*99)+(orimult/2)
                Image.setColor([degrees,1,1])#sets Image hsv color

        #MARK: Update Segment Positions And Draw Them
        if didFinishDrag == True: #This is to prevent slowness when picking up ubject to drag
            segpos = (place)#When it appears sets the pos equal to the current place of the object
            #Sets each segment position
            rad0.setPos(segpos)
            rad1.setPos(segpos)
            rad2.setPos(segpos)
            rad3.setPos(segpos)
            rad4.setPos(segpos)
            rad5.setPos(segpos)
            rad6.setPos(segpos)
            rad7.setPos(segpos)
            rad8.setPos(segpos)
            rad9.setPos(segpos)
            rad10.setPos(segpos)
            rad11.setPos(segpos)
            rad12.setPos(segpos)
            rad13.setPos(segpos)
            rad14.setPos(segpos)
            rad15.setPos(segpos)
            rad16.setPos(segpos)
            rad17.setPos(segpos)
            rad18.setPos(segpos)
            rad19.setPos(segpos)
            rad20.setPos(segpos)
            rad21.setPos(segpos)
            rad22.setPos(segpos)
            rad23.setPos(segpos)
            rad24.setPos(segpos)
            rad25.setPos(segpos)
            rad26.setPos(segpos)
            rad27.setPos(segpos)
            rad28.setPos(segpos)
            rad29.setPos(segpos)
            rad30.setPos(segpos)
            rad31.setPos(segpos)
            rad32.setPos(segpos)
            rad33.setPos(segpos)
            rad34.setPos(segpos)
            rad35.setPos(segpos)
            rad36.setPos(segpos)
            rad37.setPos(segpos)
            rad38.setPos(segpos)
            rad39.setPos(segpos)
            rad40.setPos(segpos)
            rad41.setPos(segpos)
            rad42.setPos(segpos)
            rad43.setPos(segpos)
            rad44.setPos(segpos)
            rad45.setPos(segpos)
            rad46.setPos(segpos)
            rad47.setPos(segpos)
            rad48.setPos(segpos)
            rad49.setPos(segpos)
            rad50.setPos(segpos)
            rad51.setPos(segpos)
            rad52.setPos(segpos)
            rad53.setPos(segpos)
            rad54.setPos(segpos)
            rad55.setPos(segpos)
            rad56.setPos(segpos)
            rad57.setPos(segpos)
            rad58.setPos(segpos)
            rad59.setPos(segpos)
            rad60.setPos(segpos)
            rad61.setPos(segpos)
            rad62.setPos(segpos)
            rad63.setPos(segpos)
            rad64.setPos(segpos)
            rad65.setPos(segpos)
            rad66.setPos(segpos)
            rad67.setPos(segpos)
            rad68.setPos(segpos)
            rad69.setPos(segpos)
            rad70.setPos(segpos)
            rad71.setPos(segpos)
            rad72.setPos(segpos)
            rad73.setPos(segpos)
            rad74.setPos(segpos)
            rad75.setPos(segpos)
            rad76.setPos(segpos)
            rad77.setPos(segpos)
            rad78.setPos(segpos)
            rad79.setPos(segpos)
            rad80.setPos(segpos)
            rad81.setPos(segpos)
            rad82.setPos(segpos)
            rad83.setPos(segpos)
            rad84.setPos(segpos)
            rad85.setPos(segpos)
            rad86.setPos(segpos)
            rad87.setPos(segpos)
            rad88.setPos(segpos)
            rad89.setPos(segpos)
            rad90.setPos(segpos)
            rad91.setPos(segpos)
            rad92.setPos(segpos)
            rad93.setPos(segpos)
            rad94.setPos(segpos)
            rad95.setPos(segpos)
            rad96.setPos(segpos)
            rad97.setPos(segpos)
            rad98.setPos(segpos)
            rad99.setPos(segpos)
        elif isDragging == False and isOnColor == True: #When dragging it will dispear
            #Draws each segment
            rad0.draw()
            rad1.draw()
            rad2.draw()
            rad3.draw()
            rad4.draw()
            rad5.draw()
            rad6.draw()
            rad7.draw()
            rad8.draw()
            rad9.draw()
            rad10.draw()
            rad11.draw()
            rad12.draw()
            rad13.draw()
            rad14.draw()
            rad15.draw()
            rad16.draw()
            rad17.draw()
            rad18.draw()
            rad19.draw()
            rad20.draw()
            rad21.draw()
            rad22.draw()
            rad23.draw()
            rad24.draw()
            rad25.draw()
            rad26.draw()
            rad27.draw()
            rad28.draw()
            rad29.draw()
            rad30.draw()
            rad31.draw()
            rad32.draw()
            rad33.draw()
            rad34.draw()
            rad35.draw()
            rad36.draw()
            rad37.draw()
            rad38.draw()
            rad39.draw()
            rad40.draw()
            rad41.draw()
            rad42.draw()
            rad43.draw()
            rad44.draw()
            rad45.draw()
            rad46.draw()
            rad47.draw()
            rad48.draw()
            rad49.draw()
            rad50.draw()
            rad51.draw()
            rad52.draw()
            rad53.draw()
            rad54.draw()
            rad55.draw()
            rad56.draw()
            rad57.draw()
            rad58.draw()
            rad59.draw()
            rad60.draw()
            rad61.draw()
            rad62.draw()
            rad63.draw()
            rad64.draw()
            rad65.draw()
            rad66.draw()
            rad67.draw()
            rad68.draw()
            rad69.draw()
            rad70.draw()
            rad71.draw()
            rad72.draw()
            rad73.draw()
            rad74.draw()
            rad75.draw()
            rad76.draw()
            rad77.draw()
            rad78.draw()
            rad79.draw()
            rad80.draw()
            rad81.draw()
            rad82.draw()
            rad83.draw()
            rad84.draw()
            rad85.draw()
            rad86.draw()
            rad87.draw()
            rad88.draw()
            rad89.draw()
            rad90.draw()
            rad91.draw()
            rad92.draw()
            rad93.draw()
            rad94.draw()
            rad95.draw()
            rad96.draw()
            rad97.draw()
            rad98.draw()
            rad99.draw()
    PolygonComponent screenRect
      fillColor = $[-0.851,1.000,-1.000]
      opacity = 0
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent SelectShape
      Code Type = Py
      Begin Experiment:
        import math #Needed for cos and sin
      Begin Routine:
        #Select shape is the selector circle that is white and behind the colored one
        selectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,1,1], pos=(0,0), size=(0.1,0.1), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 0)
        #Inner select shape is on top of select shape and updates it's color to the color of the part of the color wheel it is on
        innerSelectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,1,1], pos=(0,0), size=(0.1,0.1), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 0)
      Each Frame:
        if isDragging == False and hasColored == True: #Hides until you actually start selecting a color, this is separate from colorHelp in ExitCode so no interference ever occors
            #Explanation: Color is just hsv set to white, position on circle is calculated by, X:= origin of stimuli x position + cos of the angle in radians (cos funtion only takes radians) * the radius (circumference/2) and then subtracting a fourth of the radius of the color picker circle to make it in the middle of the color wheel
            selectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,0,1], pos=(place[0]+(math.cos(math.radians(-degrees+90))*(.15-(0.03/4))), place[1]+(math.sin(math.radians(-degrees+90))*(.15-(0.03/4)))), size=(0.03,0.03), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 1)
            #Explanation: Same as above except the color is set to the color wheel segment, and to get it centered I devided by 3.4 because for some reason 4 didn't center it correctly, but 3.4 centers it fine so just leaving it like that is ok
            innerSelectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[degrees,1,1], pos=(place[0]+(math.cos(math.radians(-degrees+90))*(.15-(0.025/3.4))), place[1]+(math.sin(math.radians(-degrees+90))*(.15-(0.025/3.4)))), size=(0.025,0.025), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 1)
            #Draws both shapes
            selectShape.draw()
            innerSelectShape.draw()
    CodeComponent SaveCode
      Code Type = Py
      Begin Experiment:
        import datetime #For saving raction times

        currentTest = 0
        testrad = 0 #Requires it to be defined at the beginning for some reason

        testOnset = -1

        def aproxColor(num): #1 = red, 2 = orange, 3 = yellow, 4 = green, 5 = aqua, 6 = blue, 7 = purple, and 8 = pink. 2 diget numbers are a combo of both
            word = []
            if num >= 93 or num <= 5:
                word.append('Red')
            if num >= 98 or num <= 8:
                word.append('Orange')
            if num >= 6 and num <= 20:
                word.append('Yellow')
            if num >= 16 and num <= 45:
                word.append('Green')
            if num >= 37 and num <= 62:
                word.append('Aqua')
            if num >= 50 and num <= 74:
                word.append('Blue')
            if num >= 72 and num <= 81:
                word.append('Purple')
            if num >= 77 and num <= 96:
                word.append('Pink')
            return word
      Begin Routine:
        then = datetime.datetime.now() #Saves time they begun the section
        nowtime = datetime.datetime.now().time() #Saves time they begun the section

        degrees = 0 #Resests degrees so that if it saves with an exit the degrees will be 0 and not some random number
        Image.setColor([0,0,1])#sets Image hsv color



        #Live stuff reset to N/A in case there is no correct location/color
        livetestx = 'N/A'
        livetesty = 'N/A'
        livetestrad = 'N/A'

        testPath = 'N/A'
        testx = "N/A"
        testy = "N/A"
        testrad = 0
        testPath = stimuli[0][test_order[currentTest]] #Gets path of the study image
        testoldornew = stimuli[4][test_order[currentTest]] #Gets color of the study image
        livetestPath = testPath #For live file
        livetestoldornew = testoldornew #For live file
        if testoldornew == "Old":
            testx = stimuli[1][test_order[currentTest]] #Gets x cord of the study image
            testy = stimuli[2][test_order[currentTest]] #Gets y cord of the study image
            testrad = stimuli[3][test_order[currentTest]] #Gets color of the study image
            livetestx = str(testx) #For live file
            livetesty = str(testy) #For live file
            livetestrad = str(testrad) #For live file
      End Routine:
        #NOTE: Some save code is in oldornew section of the experiment

        #Saves Stimuli name
        thisExp2.addData('StimuliName', stimuli[7][test_order[currentTest]])

        #Saves order of test, oldornew, and study, starting with 0
        thisExp2.addData('TestOrder', currentTest)
        #Very complicated function to find order
        testingNum = 0
        while oldornew_order[testingNum] != test_order[currentTest]:
            testingNum += 1
        thisExp2.addData('OldOrNewOrder', testingNum)
        testingNum = 0
        while study_order[testingNum] != test_order[currentTest]:
            testingNum += 1
        thisExp2.addData('StudyOrder', testingNum)

        #Saves user old or new
        thisExp2.addData('User_OldOrNew', stimuli[5][test_order[currentTest]])

        #MARK: User Save
        #save position (place var)
        x, y = place
        #Save user's position of the image
        thisExp2.addData('User_Image_x', round(x,5))
        thisExp2.addData('User_Image_y', round(y,5))
        liveuserx = str(round(x,5)) #For live data
        liveusery = str(round(y,5)) #For live data
        #Save color and rad #
        degrees = round(degrees, 1) #Round because it should only go to one place w/ mult of 3.6
        thisExp2.addData('User_Color', degrees)
        #degrees = (orimult*0)+(orimult/2) original eq
        radNum = (degrees-(orimult/2))/orimult #Changes degrees back into rad #s
        radNum = round(radNum) #Round to prevent errors
        thisExp2.addData('User_Rad#', radNum)
        liveuserrad = str(radNum) #For live data
        #Save approx color name
        thisExp2.addData('User_AproxColor', aproxColor(radNum)) #AproxColor func is in Begin Experiment

        #MARK: Correct Save
        #Save Correct oldornew
        if not skipOldOrNew:
            thisExp2.addData('Correct_OldOrNew', testoldornew)
        else:
            thisExp2.addData('Correct_OldOrNew', 'N/A')

        #Save correct position of the image
        thisExp2.addData('Correct_Image_x', testx)
        thisExp2.addData('Correct_Image_y', testy)
        #Save color and rad #
        degrees = (orimult*testrad)+(orimult/2)
        degrees = round(degrees, 1) #Round because it should only go to one place w/ mult of 3.6
        thisExp2.addData('Correct_Color', degrees)
        thisExp2.addData('Correct_Rad#', testrad)
        #Save approx color name
        thisExp2.addData('Correct_AproxColor', aproxColor(testrad)) #AproxColor func is in Begin Experiment

        #MARK: Get distance from correct location/color
        #Location
        distx = abs(x-testx) #find the distance in x between correct and user
        disty = abs(y-testy) #find the distance in y between correct and user
        pythDist = math.sqrt((distx*distx)+(disty*disty)) #Uses pythagorean theorem to find distance
        pythDist = round(pythDist,5) #Round to prevent errors
        thisExp2.addData('locationDist', pythDist) #saves distance
        #Color
        if abs(testrad-radNum) > amountofsegments/2:
            if testrad>radNum:
                colorDist = amountofsegments-testrad+radNum
            else:
                colorDist = amountofsegments-radNum+testrad
        else:
            colorDist = abs(testrad-radNum)
        round(colorDist)
        thisExp2.addData('radColorDist', colorDist) #saves color distance

        #MARK: Gets reaction time
        thisExp2.addData('OldOrNew_RT', stimuli[6][test_order[currentTest]]) #saves time from oldornew section
        now = datetime.datetime.now() #Gets time now
        diff = now-then #Gets the difference
        testrt = round(diff.total_seconds(),2) #Puts it in testrt and rounds to 2 decimal places
        thisExp2.addData('Test_RT', testrt) #adds data
        livetestrt = str(testrt) #Live file data

        thisExp2.addData('StudyStartTime', stimuli[8][test_order[currentTest]]) #adds data
        thisExp2.addData('OldOrNewStartTime', stimuli[9][test_order[currentTest]]) #adds data
        thisExp2.addData('TestStartTime', nowtime) #adds start time of stimulis on screen

        thisExp2.addData('StudyOnset', stimuli[10][test_order[currentTest]]) #adds data
        thisExp2.addData('OldOrNewOnset', stimuli[11][test_order[currentTest]]) #adds data
        thisExp2.addData('TestOnset', round((then-testOnset).total_seconds(),2)) #adds start time of stimulis on screen

        currentTest += 1 #Goes to next test stimuli

        #Next Entry of experiment
        thisExp2.nextEntry()
    CodeComponent ExitCode
      Code Type = Py
      Begin Experiment:
        #Max degrees and speed for color help
        colorMaxDeg = 270 #1 to any real number, must be at least twice as much as speed for smooth animation
        colorSpeed = 50 #1 to any real number, do not recomend setting this above 50

        #Color text setup
        ColorText = visual.TextStim(win=win, name='ColorText',
            text='Please select a color from the color wheel',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #Drag text setup
        DragText = visual.TextStim(win=win, name='DragText',
            text='Please Drag and Drop the object to a location on the screen',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #Define images
        arrowUp = visual.ImageStim(
            win=win, name='arrowUp',
            image='sin', mask=None,
            ori=0, pos=(0, .2), size=(0.03, 0.03),
            color=[1,0,1], colorSpace='hsv', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        arrowDown = visual.ImageStim(
            win=win, name='arrowDown',
            image='sin', mask=None,
            ori=0, pos=(0, -.2), size=(0.03, 0.03),
            color=[1,0,1], colorSpace='hsv', opacity=1,
            flipHoriz=False, flipVert=True,
            texRes=128, interpolate=True, depth=0.0)

        arrowRight = visual.ImageStim(
            win=win, name='arrowRight',
            image='sin', mask=None,
            ori=0, pos=(.2, 0), size=(0.03, 0.03),
            color=[1,0,1], colorSpace='hsv', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        arrowLeft = visual.ImageStim(
            win=win, name='arrowLeft',
            image='sin', mask=None,
            ori=0, pos=(-.2, 0), size=(0.03, 0.03),
            color=[1,0,1], colorSpace='hsv', opacity=1,
            flipHoriz=True, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        #Set images
        arrowUp.setImage(thisdir + '/LOCO/arrowUp.png')
        arrowDown.setImage(thisdir + '/LOCO/arrowUp.png')
        arrowRight.setImage(thisdir + '/LOCO/arrowRight.png')
        arrowLeft.setImage(thisdir + '/LOCO/arrowRight.png')
      Begin Routine:
        mouse1.setPos(newPos=(0, 0.005)) #resets position of mouse, has to be offset slightly or else it will select a color for some reason
        win.mouseVisible = True #Show mouse only if it is supposed to continue routine

        #These two vars give the person help with knowing how to drag/color live
        helpDrag = False
        helpColor = False

        opacOfArrows = 0.0 #Opacity of the arrows
        opacUp = True #If Opacity is rising or falling

        colorDeg = 0 #Degrees of slider for colorHelp
        colorDegUp = True #Degrees of the slider going up or down
        colorOpac = 0 #Opacity of the slider
      Each Frame:
        if theseKeys == 'space':  #if space is pressed
            #a response ends the routine
            helpDrag = True #If they have not dragged yet and try to end routine
            helpColor = True #If they have not colored yet and try to end routine
            if hasColored == True and hasDragged == True: #Stops routine if they have colored and moved the stimuli
                continueRoutine = False

        #Help animations
        if helpColor == True and hasColored == False and isDragging == False: #If they need help coloring and they are not currently dragging the image
            helpDrag = False #Disables other option
            if colorOpac < 1.0:
                colorOpac += 0.01 #How fast opacity of slider increases
            if colorDeg < 1 and colorDegUp == True and colorOpac >= 0.75: #The last var is at what opacity to start sliding
                colorDeg += 0.1
            elif colorDeg < colorSpeed and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += 0.1*colorDeg
            elif colorDeg < colorMaxDeg-colorSpeed and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += colorSpeed/10 #Speed devided by 0.1 which is how much it increases by
            elif colorDeg < colorMaxDeg-1 and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += 0.1*((-colorDeg)+colorMaxDeg)
            elif colorDeg < colorMaxDeg and colorDegUp == True and colorOpac >= 0.75:
                colorDegUp = False #Changes direction
            elif colorDeg > colorMaxDeg-colorSpeed and colorDegUp == False: #Starts going back down degrees here
                colorDeg -= 0.1*((-colorDeg)+colorMaxDeg)
            elif colorDeg > colorSpeed and colorDegUp == False:
                colorDeg -= colorSpeed/10
            elif colorDeg > 1 and colorDegUp == False:
                colorDeg -= 0.1*colorDeg
            elif colorDeg > 0 and colorDegUp == False:
                colorDeg -= 0.05
            elif colorOpac >= 0.75:
                colorDegUp = True #Resets the direction so degrees are going back up again
                colorDeg += 0.05
            #Sets postion of selct shapes
            selectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,0,1], pos=(place[0]+(math.cos(math.radians(-colorDeg+90))*(.15-(0.03/4))), place[1]+(math.sin(math.radians(-colorDeg+90))*(.15-(0.03/4)))), size=(0.03,0.03), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = colorOpac)
            innerSelectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[colorDeg,1,1], pos=(place[0]+(math.cos(math.radians(-colorDeg+90))*(.15-(0.025/3.4))), place[1]+(math.sin(math.radians(-colorDeg+90))*(.15-(0.025/3.4)))), size=(0.025,0.025), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = colorOpac)
            #Draws each object
            selectShape.draw()
            innerSelectShape.draw()
            ColorText.draw()
        elif helpDrag == True and hasDragged == False:
            helpColor = False #Disables other option
            #Makes a nice animation
            if opacOfArrows >= 1.0: #changes direction of opacity
                opacUp = False
            elif opacOfArrows <= 0.0:
                opacUp = True
            if opacUp == True:
                opacOfArrows += 0.01 #Changes opacity, change this var to make animation faster or slower
            else:
                opacOfArrows -= 0.01
            #Draws aroows and text
            arrowUp.opacity = opacOfArrows
            arrowDown.opacity = opacOfArrows
            arrowRight.opacity = opacOfArrows
            arrowLeft.opacity = opacOfArrows
            arrowUp.draw()
            arrowDown.draw()
            arrowRight.draw()
            arrowLeft.draw()
            DragText.draw() #Tells user what to do
      End Routine:
        win.mouseVisible = False #Hide mouse
    ImageComponent Image
      color = $[1,-1.000,1.000]
      colorSpace = hsv
      image [set every repeat] = $testPath
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    CodeComponent liveCode15
      Code Type = Py
      Begin Experiment:
        #Each variable for the live is separate from the actual data saving variables and they are all in string form

        livetestPath = 'N/A'
        livetestoldornew = 'N/A'
        livetestx = 'N/A'
        livetesty = 'N/A'
        livetestrad = 'N/A'

        liveuseroldornew = 'N/A'
        liveuserx = 'N/A'
        liveusery = 'N/A'
        liveuserrad = 'N/A'

        liveoldornewrt = 'N/A'
        livetestrt = 'N/A'
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Test,Stimuli,' + str(currentTest+1) + ',' + str(num_study) + ',' + str(currentTest+2) + ',' + str(num_study+1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',' + stimuli[7][test_order[currentTest]] + ',' + livetestx + ',' + livetesty + ',' + livetestrad + ',' + stimuli[5][test_order[currentTest]] + ',' + liveuserx + ',' + liveusery + ',' + liveuserrad + ',' + str(stimuli[6][test_order[currentTest]]) + ',' + livetestrt)
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine header
    CodeComponent saveCode
      Code Type = Py
      Begin Experiment:
        import random, xlrd #For randomization of stimuli
        command = False #For exiting experiment

        thisdir = os.path.abspath(os.path.join(os.path.dirname(_thisDir),'.'))

        #randomize the seed
        random.seed(int(expInfo['participant'])) #Put in subject number

        #Version Number (Update this when you make changes to the experiment, it will go in the readme file in each participant's folder, see bottom of begin experiment tab)
        versionNumber = '0.1.6'

        #number of study items
        num_study = 50 #50

        #number of OLD + NEW items they'll be tested on
        num_test = 75 #75

        #Skip the Old Or New Section
        skipOldOrNew = False

        #Skip Practice Section
        skipPractice = False

        #number of total items (stimuli)
        num_items = 243



        if skipOldOrNew:
            num_oldornew = 0
            num_practoldornew = 0
            numberofpractice = 0
        else:
            num_oldornew = num_test
            num_practoldornew = 4
            numberofpractice = 5
        if skipPractice:
            num_practstudy = 0
            num_practoldornew = 0
            numberofpractice = 0
        else:
            num_practstudy = 2

        #MARK: Generate coordinates
        #This will create the x and y coordiantes for use, change num_study variable and this will adapt by itself
        #Maximum coordinates (Right Top of screen) (You probably don't want this to go all the way to the end of the screen)
        screenx = 0.78 #Maximum x point on Psychopy screen you want the stimuli to go to
        screeny = 0.39 #Maximum y point on Psychopy screen you want the stimuli to go to

        #screen is approx 2 by 1, so below numbers should reflect that
        divx = 4 #How many points there can be accross the x axis minimum
        divy = 2 #How many points there can be accross the y axis minimum

        numberofcords = 0 #Number of actual cords when excluding center ones

        while numberofcords < num_study:
          if divy*2 == divx or divy*2 == divx+1:
            divx += 1
          else:
            divy += 1
          howmanyall = divx*divy #How many
          numberofcords = 0
          xcords = [] #array of cords for x
          ycords = [] #array of cords for y
          ix = 0
          while ix <= divx:
            if ix == 0:
              xmult = 0
            else:
              xmult = ix/divx
            iy = 0
            while iy <= divy:
              if iy == 0:
                ymult = 0
              else:
                ymult = iy/divy
              #print(" ")
              #print(xmult, ymult) #For debugging
              xcord = ((screenx*2)*xmult)-screenx
              ycord = ((screeny*2)*ymult)-screeny
              if not xcord < 0.15 or not xcord > -0.15 or not ycord < 0.15 or not ycord > -0.15: #Exclusion points, change these to choose which points are excluded bc they are too close to the center
                #print("Cordinates:")
                numberofcords += 1
                #print(xcord) #Uncomment these to get the raw x and y coordinates on separate lines
                #print(ycord)
                #print("(" + str(xcord) + "," + str(ycord) + ")") #Uncomment to print coordinates as (x,y), you can use this for testing out points on desmos graph?
                xcords.append(round(xcord, 5))
                ycords.append(round(ycord, 5))
              iy += 1
            ix += 1
        #You want this to equal as close to the number of possible coordinates you want as possible (In my case I want it to be close to 70)
        print(" ")
        #print(xcords)
        #print(ycords)
        print("Number of Coordinates: " + str(numberofcords))
        print("There are " + str(divx + 1) + " x coordinates and " + str(divy + 1) + " y coordinates")

        #MARK: Randomize coordinates
        cordNums= [] #These numbers direct the final cords to the correct place in cords
        #Final coordinates that are randomized
        finalxcords = []
        finalycords = []

        for i in range(numberofcords): #Randomizes cordNums to be used as pickers for the final cords, randomizing with numberofcords makes sure any coordinates the above function generates can be used
            cordNums.append(i)
        random.shuffle(cordNums) #Randomizes items in cordnums
        for i in range(num_study): #Randomizes x and y cords together so they don't get all mixed up
            finalxcords.append(xcords[cordNums[i]])
            finalycords.append(ycords[cordNums[i]])
        #print(cordNums)

        #MARK: Generate And Randomize Stimulis Filenames
        filenameNums = []
        filenames = []
        filenameNumbers = []
        for i in range(num_items-1): #Randomizes cordNums to be used as pickers for the final cords, randomizing with numberofcords makes sure any coordinates the above function generates can be used
            filenameNums.append(i + 1)
        random.shuffle(filenameNums) #Randomizes items in cordnums
        for i in range(num_test): #Randomizes x and y cords together so they don't get all mixed up
            filenames.append(thisdir + "/Stimuli/" + str(filenameNums[i]) + ".png")
            filenameNumbers.append(str(filenameNums[i]))
        #print(filenames)

        #MARK: Randomize Rad#s For Color
        amountofsegments = 100 #This number is only used for the header and save files but will help if you are trying to change the number of total segments
        radNums = []
        radColors = []
        for i in range(amountofsegments): #There are 100 segments so that is the max randimizing amount
            radNums.append(i)
        random.shuffle(radNums) #Randomizes items in radnums
        if num_study > amountofsegments and num_study < amountofsegments*2:
            #WARNING: This has not been tested yet, please test when increasing num_study more than the number of segments but less than 2 times the number of segments, if more than 2 times make another if statement!!
            print("Warning: See code in header segment under MARK: Randomize Rad#s For Color")
            radNums2 = []
            for i in range(amountofsegments):
                radNums2.append(i)
            random.shuffle(radNums2) #Randomizes items in radnums
            radNums = radNums + radNums2
        elif num_study > amountofsegments:
            print("Error: too many num_studys, see WARNING in above (header) code for more info")
        for i in range(num_study):
            radColors.append(radNums[i])
        #print(radNums) #For debugging
        #print(radColors)

        #MARK: Generate Old Or New Status
        oldornewStatus = []
        for i in range(num_study):
            oldornewStatus.append("Old")
        for i in range(num_test-num_study):
            oldornewStatus.append("New")
        #print(oldornewStatus)

        blankArray = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray.append("N/A")

        blankArray2 = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray2.append("N/A")

        blankArray3 = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray3.append("N/A")

        blankArray4 = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray4.append("N/A")

        blankArray5 = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray5.append("N/A")

        blankArray6 = [] #Blank array is so that later it is possible to put new values into the np stimuli array, like the oldornew status and rt
        for i in range(num_test):
            blankArray6.append("N/A")

        #MARK: Create Stimuli np.Array With All Other Factors
        stimuli = np.array([filenames, finalxcords, finalycords, radColors, oldornewStatus, blankArray, blankArray2, filenameNumbers, blankArray3, blankArray4, blankArray5, blankArray6])
        print(stimuli)

        #MARK: Randomize Order For Each Task
        study_order = []
        for i in range(num_study):
            study_order.append(i)
        random.shuffle(study_order)

        oldornew_order = []
        for i in range(num_test):
            oldornew_order.append(i)
        random.shuffle(oldornew_order)

        test_order = []
        for i in range(num_study):
            test_order.append(i)
        random.shuffle(test_order)
      Begin Routine:
        win.mouseVisible = False #Hide mouse

        #Save data files in begin routine so that if the participant already exists and the user clicks cancel, it won't save any data
        if not skipOldOrNew:
            #Save Old or New data file
            filename4 = _thisDir + os.sep + u'data/%s/sub_%s_%s_OldOrNew' % (expInfo['participant'], expInfo['participant'], expName)
            thisExp4 = data.ExperimentHandler(name=expName, version='',
                extraInfo=expInfo, runtimeInfo=None,
                originPath= thisdir + '/LOCO/PACOLOCO.py',
                savePickle=False, saveWideText=True,
                dataFileName=filename4)

        #Save Normal Data File
        filename2 = _thisDir + os.sep + u'data/%s/sub_%s_%s_test' % (expInfo['participant'], expInfo['participant'], expName)
        thisExp2 = data.ExperimentHandler(name=expName, version='',
            extraInfo=expInfo, runtimeInfo=None,
            originPath= thisdir + '/LOCO/PACOLOCO.py',
            savePickle=False, saveWideText=True,
            dataFileName=filename2)

        #Save Live Update File
        liveFileName = _thisDir + os.sep + u'live/%s/live' % (expInfo['participant'])
        liveNum = 1

        #Save Abort Data File, these kind of saves with 'thisExp' in them save no matter what when you quit the program
        thisExp3 = data.ExperimentHandler(name=expName, version='',
            extraInfo=expInfo, runtimeInfo=None,
            originPath= thisdir + '/LOCO/PACOLOCO.py',
            savePickle=False, saveWideText=True,
            dataFileName=liveFileName + 'live')

        #Create readme
        rmFile = open(_thisDir + os.sep + u'data/%s/README.txt' % (expInfo['participant']), 'w')
        rmFile.write('VERSION ' + versionNumber + '\n\nIf this experiment was fully and successfully completed by the participant, you only need you use the test data file, it contains all the data you need.\nIf something went wrong during the experiment, or it was aborted before it was finished, you can use the oldornew data file to recover the user\'s responses for each old or new trail.' +
            '\nThe columns for the test data file are ordered by the order that they are presented at test (Only the old stimuli), and then are ordered by the order they were presented at Old Or New (Only new stimuli).' +
            '\n\nHow to use data in the test file:\nThe stimuli name corresponds to each stimuli in the stimuli folder (located in the main LOCO folder).\nUse the test order, oldorneworder, and study order to sort each data row. To do this, create an empty array and use a for loop to append the lowest to highest number of the order column, starting at 0.' +
            '\nUser vs Correct is self explanatory, with old or new being added as N/A if it was skipped in the header file.\nThe X and Y are coordinates on the screen (0.5 is the highest y value, while 0.9? is the highest x value), color is out of 360, and rad# is out of 100 (most usefull because there are only 100 possible color options).' +
            '\nAproxColor is usefull for seeing if the participant was in the correct range, use it only for if one of the users color is in the correct colors, they are in range, and if not, they are out of range. Don\'t use this for any more accuracy than what was previously described. It is calculated by the maximum possible color that could possibly be in each category, and is subject to some human error.' +
            '\nLocation distance is calculated using the pythagorean theorem, where a and b are the x and y coordinates.\nradColorDist is calculated by the distance off they are from the correct color out of the 100 possible options (50 is the max number this can be).\nOldOrNew rt and Test rt are reaction times of the user.' +
            '\nStart times are the start times of each trail, with hour, minute, second.\nOnset time counts the amount of seconds when each stimuli was shown since the first reset (Fixation Cross) of that section (for example, the beginning of study) came on the screen\nDate is the date and time that the experiment started, and is not updated every trail.\nPsychopy running version should be at least 3.1.5.\n\nThanks for reading! Have any more questions? Contact me at ipoogleduck@gmail.com')
        rmFile.close()
      End Experiment:
        thisExp2.saveAsWideText(filename2+'.csv')
        thisExp2.abort()  # or data files will save again on exit

        thisExp3.saveAsWideText(liveFileName+'live.csv')
        thisExp3.abort()  # or data files will save again on exi
  Routine reset
    CodeComponent onsetCode
      Code Type = Py
      Begin Routine:
        if studyOnset == 0:
            studyOnset = datetime.datetime.now()

        if oldornewOnset == 0:
            oldornewOnset = datetime.datetime.now()

        if testOnset == 0:
            testOnset = datetime.datetime.now()
    TextComponent resettext
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent liveCode13
      Code Type = Py
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine oldornew
    TextComponent oldornewText
      letterHeight = 0.05
      pos = (0, -.45)
      startVal [time (s)] = 0
      text = 1 - Old        2 - New
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    CodeComponent oldornewCode
      Code Type = Py
      Begin Experiment:
        currentOldornew = 0
        oldornewrad = 0 #Requires it to be defined at the beginning for some reason

        oldornewOnset = -1
      Begin Routine:
        win.mouseVisible = False #Hide mouse
        then = datetime.datetime.now() #Gets time
        nowtime = datetime.datetime.now().time() #Saves time they begun the section
        stimuli[9][oldornew_order[currentOldornew]] = nowtime

        #Live stuff reset to N/A in case there is no correct location/color
        liveoldornewx = 'N/A'
        liveoldornewy = 'N/A'
        liveoldornewrad = 'N/A'

        oldornewx = "N/A"
        oldornewy = "N/A"
        oldornewrad = 0
        oldornewPath = stimuli[0][oldornew_order[currentOldornew]] #Gets path of the study image
        oldornewoldornew = stimuli[4][oldornew_order[currentOldornew]] #Gets color of the study image
        liveoldornewoldornew = oldornewoldornew #For live file
        if oldornewoldornew == "Old":
            oldornewx = stimuli[1][oldornew_order[currentOldornew]] #Gets x cord of the study image
            oldornewy = stimuli[2][oldornew_order[currentOldornew]] #Gets y cord of the study image
            oldornewrad = stimuli[3][oldornew_order[currentOldornew]] #Gets color of the study image
            liveoldornewx = str(oldornewx) #For live file
            liveoldornewy = str(oldornewy) #For live file
            liveoldornewrad = str(oldornewrad) #For live file

        stimuli[11][oldornew_order[currentOldornew]] = round((datetime.datetime.now()-oldornewOnset).total_seconds(),2)
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if '1' in key or '2' in key: #t is a var for time psychopy automatically creates
                if key == '1':
                    stimuli[5][oldornew_order[currentOldornew]] = 'Old'
                    liveuseroldornew = 'Old'
                elif key == '2':
                    stimuli[5][oldornew_order[currentOldornew]] = 'New'
                    liveuseroldornew = 'New'
                now = datetime.datetime.now()
                diff = now-then
                oldornewrt = round(diff.total_seconds(),2)
                liveoldornewrt = str(oldornewrt)
                stimuli[6][oldornew_order[currentOldornew]] = oldornewrt
                continueRoutine = False
      End Routine:
        #Saves Stimuli name
        thisExp4.addData('StimuliName', stimuli[7][oldornew_order[currentOldornew]])

        #Saves user old or new
        thisExp4.addData('User_OldOrNew', stimuli[5][oldornew_order[currentOldornew]])

        #Save Correct oldornew
        thisExp4.addData('Correct_OldOrNew', oldornewoldornew)
        if oldornewoldornew == 'Old':
            #Save correct position of the image
            thisExp4.addData('Correct_Image_x', oldornewx)
            thisExp4.addData('Correct_Image_y', oldornewy)
            #Save color and rad #
            degrees = (orimult*oldornewrad)+(orimult/2)
            degrees = round(degrees, 1) #Round because it should only go to one place w/ mult of 3.6
            thisExp4.addData('Correct_Color', degrees)
            thisExp4.addData('Correct_Rad#', oldornewrad)
            #Save approx color name
            thisExp4.addData('Correct_AproxColor', aproxColor(oldornewrad)) #AproxColor func is in Begin Experiment of test
        else:
            thisExp4.addData('Correct_Image_x', 'N/A')
            thisExp4.addData('Correct_Image_y', 'N/A')
            thisExp4.addData('Correct_Color', 'N/A')
            thisExp4.addData('Correct_Rad#', 'N/A')
            thisExp4.addData('Correct_AproxColor', 'N/A')

        thisExp4.addData('OldOrNew_RT', oldornewrt) #saves time from oldornew section

        thisExp4.addData('StudyStartTime', stimuli[8][oldornew_order[currentOldornew]]) #adds data
        thisExp4.addData('OldOrNewStartTime', stimuli[9][oldornew_order[currentOldornew]]) #adds data

        #Next Entry of experiment
        thisExp4.nextEntry()

        currentOldornew += 1
    ImageComponent oldornewImage
      image [set every repeat] = $oldornewPath
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    CodeComponent liveCode9
      Code Type = Py
      Begin Experiment:
        #Each variable for the live is separate from the actual data saving variables and they are all in string form

        liveoldornewoldornew = 'N/A'
        liveoldornewx = 'N/A'
        liveoldornewy = 'N/A'
        liveoldornewrad = 'N/A'

        liveoldornewrt = 'N/A'
        liveuseroldornew = 'N/A'
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Old/New,Stimuli,' + str(currentOldornew+1) + ',' + str(num_test) + ',' + str(currentOldornew+2) + ',' + str(num_test+1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',' + stimuli[7][oldornew_order[currentOldornew]] + ',' + liveoldornewoldornew + ',' + liveoldornewx + ',' + liveoldornewy + ',' + liveoldornewrad + ',' + liveoldornewrt + ',' + liveuseroldornew)
        liveFile.close()
        liveNum += 1
      Each Frame:
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine study
    CodeComponent Code
      Code Type = Py
      Begin Experiment:
        currentStudy = 0
        studyrad = 0 #Requires it to be defined at the beginning for some reason
        studyOnset = -1
      Begin Routine:
        studyPath = stimuli[0][study_order[currentStudy]] #Gets path of the study image
        studyx = stimuli[1][study_order[currentStudy]] #Gets x cord of the study image
        studyy = stimuli[2][study_order[currentStudy]] #Gets y cord of the study image
        studyrad = stimuli[3][study_order[currentStudy]] #Gets color of the study image

        nowtime = datetime.datetime.now().time() #Saves time they begun the section
        stimuli[8][study_order[currentStudy]] = nowtime

        stimuli[10][study_order[currentStudy]] = round((datetime.datetime.now()-studyOnset).total_seconds(),2)
      End Routine:
        currentStudy += 1
    ImageComponent studyImage
      color [set every repeat] = $[$(studyrad*orimult)+(orimult/2),1,1]
      colorSpace = hsv
      image [set every repeat] = $studyPath
      pos [set every repeat] = (studyx, studyy)
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    CodeComponent liveCode7
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Study,Stimuli,' + str(currentStudy+1) + ',' + str(num_study) + ',' + str(currentStudy+2) + ',' + str(num_study+1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',' + stimuli[7][study_order[currentStudy]] + ',' + str(studyx) + ',' + str(studyy) + ',' + str(studyrad))
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine studyInstr
    CodeComponent onsetCode2
      Code Type = Py
      End Routine:
        studyOnset = 0
    TextComponent studyText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Now for the actual experiment
        You will now study a larger number of images. For each image, try to remember the shape, location and color.


        Press Space To Start
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent liveCode6
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        skipPractStr = ''
        if skipPractice:
            skipPractStr = ',' + str(num_study) + ',' + str(num_test) + ',' + str(skipOldOrNew)
        liveFile.write('Study,Instruction,1,1,1,' + str(num_study+1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + skipPractStr)
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
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  Routine End
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
                    You have finished
        Thank you for your participation
            Please get the experimenter
    CodeComponent code
      Code Type = Py
      Begin Routine:
        StartEnd = False #Lets the screen update normally before quiting

        if not skipOldOrNew:
            currentStimuliTest = num_study
            testingNums = []
            for i in range(num_test-num_study):
                testingNum = 0
                while oldornew_order[testingNum] != currentStimuliTest:
                    testingNum += 1
                testingNums.append(testingNum)
                currentStimuliTest += 1

            print(testingNums)

            currentStimuli = 0
            for i in range(num_test-num_study):
                while not currentStimuli in testingNums:
                    currentStimuli += 1
                print(currentStimuli)
                thisExp2.addData('StimuliName', stimuli[7][oldornew_order[currentStimuli]])
                thisExp2.addData('TestOrder', 'N/A')

                thisExp2.addData('OldOrNewOrder', currentStimuli)
                thisExp2.addData('StudyOrder', 'N/A')

                thisExp2.addData('User_OldOrNew', stimuli[5][oldornew_order[currentStimuli]])

                thisExp2.addData('User_Image_x', 'N/A')
                thisExp2.addData('User_Image_y', 'N/A')
                thisExp2.addData('User_Color', 'N/A')
                thisExp2.addData('User_Rad#', 'N/A')
                thisExp2.addData('User_AproxColor', 'N/A')

                thisExp2.addData('Correct_OldOrNew', 'New')

                thisExp2.addData('Correct_Image_x', 'N/A')
                thisExp2.addData('Correct_Image_y', 'N/A')
                thisExp2.addData('Correct_Color', 'N/A')
                thisExp2.addData('Correct_Rad#', 'N/A')
                thisExp2.addData('Correct_AproxColor', 'N/A')

                thisExp2.addData('locationDist', 'N/A')
                thisExp2.addData('radColorDist', 'N/A')

                thisExp2.addData('OldOrNew_RT', stimuli[6][oldornew_order[currentStimuli]])
                thisExp2.addData('Test_RT', 'N/A')

                thisExp2.addData('StudyStartTime', 'N/A') #adds data
                thisExp2.addData('OldOrNewStartTime', stimuli[9][oldornew_order[currentStimuli]]) #adds data
                thisExp2.addData('TestStartTime', 'N/A') #adds start time of stimulis on screen

                thisExp2.addData('StudyOnset', 'N/A') #adds data
                thisExp2.addData('OldOrNewOnset', stimuli[11][oldornew_order[currentStimuli]]) #adds data
                thisExp2.addData('TestOnset', 'N/A') #adds start time of stimulis on screen

                thisExp2.nextEntry()
                currentStimuli += 1
      Each Frame:
        if StartEnd:
            win.flip()
            time.sleep(4) #Waits three seconds
            text.setText('Saving Data\n\nPlease Wait') #Changes text
            win.flip()
            core.quit()
        StartEnd += 0.1 #For some reason it takes 11 frames/flips to update?
    CodeComponent liveCode10
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Done,Done,1,1,1,1,' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',N/A,N/A,N/A,N/A,N/A,' + liveuseroldornew + ',' + liveuserx + ',' + liveusery + ',' + liveuserrad + ',N/A,' + livetestrt) #To get the last one the user did
        liveFile.close()
        liveNum += 1
  Routine practiceStudy
    CodeComponent ImageCode
      Code Type = Py
      Begin Experiment:
        #This array defines the practice stimuli
        practiceStim = np.array([[thisdir + "/Stimuli/test7.png", thisdir + "/Stimuli/test3.png", thisdir + "/Stimuli/test4.png", thisdir + "/Stimuli/test5.png"],
            [-0.64514, .72917],
            [.012639, .33681],
            [13, 77]])

        #Current trial used to select stimuli
        practicestudytrail = 0
      Begin Routine:
        practicestudyPath = practiceStim[0][practicestudytrail] #Gets path of the study image
        practicestudyx = practiceStim[1][practicestudytrail] #Gets x cord of the study image
        practicestudyy = practiceStim[2][practicestudytrail] #Gets y cord of the study image
        practicestudyrad = practiceStim[3][practicestudytrail] #Gets color of the study image
      End Routine:
        practicestudytrail += 1 #Next trail
    ImageComponent practicestudyimage
      color [set every repeat] = $[$(float(practicestudyrad)*orimult)+(orimult/2),1,1]
      colorSpace = hsv
      image [set every repeat] = $practicestudyPath
      pos [set every repeat] = (practicestudyx, practicestudyy)
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    CodeComponent liveCode3
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Practice,Study,' + str(practicestudytrail+1) + ',2,' + str(practicestudytrail+4) + ',' + str(numberofpractice + 8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceTestInstr
    CodeComponent skipCode6
      Code Type = Py
      Begin Routine:
        if skipPractice:
            continueRoutine = False
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextComponent testText
      letterHeight = 0.028
      startVal [time (s)] = 0
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      text:
        You will now be tested on the color and location of the images you studied.
        Use the mouse to select the color and drag the image to its original location.
        During this practice, you will be given feedback on how close you are to the correct color and location

        Press Space To Start
    CodeComponent liveCode4
      Code Type = Py
      Begin Routine:
        if not skipPractice:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Practice,Instruction,1,1,' + str(numberofpractice + 6) + ',' + str(numberofpractice + 8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceTest
    MouseComponent mouse2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent dragCode
      Code Type = Py
      Begin Experiment:
        #Looking for code in Begin Experiment?
        #All code and var definitions for begin experiment are in the test section
      Begin Routine:
        isDragging = False #Lets other parts of experiment know that the user is dragging the stimuli
        didFinishDrag = False #Lets some aspects of the experiment only do something once after a drag has finished
        hasDragged = False #For preventing the user from going on until dragged
        place = (0,0) #Place of object (Image)
        Image2.setPos(place) #Sets image to (0,0)
        noClickShape.setPos(place) #Sets noClickShape to (0,0), see Begin Experiment for more about noClickShape
        mousePlace = (0,0) #Place of mouse when clicked
        mousex = 0.0 #Offset of mouse x
        mousey = 0.0 #Offset of mouse y
        firstDrag = True #For updating positions of mousex and mousey
      Each Frame:
        #This whole complicated thing makes sure that the stimuli always stays on the mouse if they click on the stimuli first
        if mouse2.isPressedIn(screenRect2) and didFinishDrag == False:#ScreenRect is used to detect if mouse is pressed anywhere on screen
            if mouse2.isPressedIn(noClickShape): #Checks when mouse is pressed down, see Begin Experiment for more about noClickShape
                if isOnColor == False: #Makes sure it didn't start on the color wheel
                    #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                    mousePlace = mouse2.getPos()
                    if firstDrag == True: #Only updates offset once when starting the drag
                        mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                        mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                        firstDrag = False #Disables first drag
                    place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                    Image2.setPos(place) #Sets position of the image equal to the position of the mouse
                    noClickShape.setPos(place) #Set position
                    isDragging = True #Sets is dragging to true when the mouse starts on the object (noClickShape in this case)
                    hasDragged = True #For preventing the user from going on until dragged
                    win.mouseVisible = False #Hide mouse when dragging
            elif isDragging == True: #If the mouse started on noClickShape but isnt there right now (and still pressed down) it will update position anyway
                #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                mousePlace = mouse2.getPos()
                if firstDrag == True: #Only updates offset once when starting the drag
                        mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                        mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                        firstDrag = False #Disables first drag
                place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                Image2.setPos(place) #Sets position of the image equal to the position of the mouse
                noClickShape.setPos(place) #Set position
        elif didFinishDrag == True and isDragging == True: #Disables didFinishDrag for good
            didFinishDrag = False
        elif isDragging == True: #This is an elif statement so will only play if others above are false
            didFinishDrag = True #Makes var true so it only is true for one frame
            isDragging = False #It is no longer dragging
            win.mouseVisible = True #Show mouse once your done dragging
            firstDrag = True #re-enables first drag again so when the first if statement plays it will update position of offset
        else:
            didFinishDrag = False #Disables didFinishDrag for good

        noClickShape.draw() #Draws no click shape
    CodeComponent colorCode
      Code Type = Py
      Begin Experiment:
        #Looking for code in Begin Experiment?
        #All code and var definitions for begin experiment are in the test section
      Begin Routine:
        isOnColor = False #If the mouse is currently on a color
        hasColored = False #For hiding the selectShape until you start coloring
        stim.setPos(place)
      Each Frame:
        if didFinishDrag == True: #Only updates position once after you finish dragging, otherwise experiment will lag a lot
            stim.setPos(place)
            stim.draw()
        elif isDragging == False: #If your not dragging it won't redifine the position
            stim.draw()

        if mouse2.isPressedIn(screenRect2):#ScreenRect is used to detect if mouse is pressed anywhere on screen
            if mouse2.isPressedIn(stim) and not mouse2.isPressedIn(noClickShape):#Has to be initially pressed on wheel to set to true
                if isDragging == False: #Also cannot be dragging
                    hasColored = True #For hiding the selectShape until you start coloring
                    isOnColor = True #Then will set is on color to true
        else:
            isOnColor = False #If mouse is not pressed down it is not on color
    CodeComponent segmentCode
      Code Type = Py
      Begin Experiment:
        #Looking for code in Begin Experiment?
        #All code and var definitions for begin experiment are in the test section
      Begin Routine:
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      Each Frame:
        #MARK: Detect Mouse Press On Segment
        #Takes the multiplier (How many segments) and multiplies it by rad number
        #Then adds half of the multiplier (to make color average)
        if isDragging == False and isOnColor == True: #If its on a segment it will update the color of the Image2
            if mouse2.isPressedIn(rad0): #Will not set color if dragging Image2
                degrees = (orimult*0)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad1):
                degrees = (orimult*1)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad2):
                degrees = (orimult*2)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad3):
                degrees = (orimult*3)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad4):
                degrees = (orimult*4)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad5):
                degrees = (orimult*5)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad6):
                degrees = (orimult*6)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad7):
                degrees = (orimult*7)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad8):
                degrees = (orimult*8)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad9):
                degrees = (orimult*9)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad10):
                degrees = (orimult*10)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad11):
                degrees = (orimult*11)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad12):
                degrees = (orimult*12)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad13):
                degrees = (orimult*13)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad14):
                degrees = (orimult*14)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad15):
                degrees = (orimult*15)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad16):
                degrees = (orimult*16)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad17):
                degrees = (orimult*17)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad18):
                degrees = (orimult*18)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad19):
                degrees = (orimult*19)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad20):
                degrees = (orimult*20)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad21):
                degrees = (orimult*21)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad22):
                degrees = (orimult*22)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad23):
                degrees = (orimult*23)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad24):
                degrees = (orimult*24)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad25):
                degrees = (orimult*25)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad26):
                degrees = (orimult*26)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad27):
                degrees = (orimult*27)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad28):
                degrees = (orimult*28)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad29):
                degrees = (orimult*29)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad30):
                degrees = (orimult*30)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad31):
                degrees = (orimult*31)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad32):
                degrees = (orimult*32)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad33):
                degrees = (orimult*33)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad34):
                degrees = (orimult*34)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad35):
                degrees = (orimult*35)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad36):
                degrees = (orimult*36)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad37):
                degrees = (orimult*37)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad38):
                degrees = (orimult*38)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad39):
                degrees = (orimult*39)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad40):
                degrees = (orimult*40)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad41):
                degrees = (orimult*41)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad42):
                degrees = (orimult*42)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad43):
                degrees = (orimult*43)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad44):
                degrees = (orimult*44)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad45):
                degrees = (orimult*45)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad46):
                degrees = (orimult*46)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad47):
                degrees = (orimult*47)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad48):
                degrees = (orimult*48)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad49):
                degrees = (orimult*49)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad50):
                degrees = (orimult*50)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad51):
                degrees = (orimult*51)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad52):
                degrees = (orimult*52)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad53):
                degrees = (orimult*53)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad54):
                degrees = (orimult*54)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad55):
                degrees = (orimult*55)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad56):
                degrees = (orimult*56)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad57):
                degrees = (orimult*57)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad58):
                degrees = (orimult*58)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad59):
                degrees = (orimult*59)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad60):
                degrees = (orimult*60)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad61):
                degrees = (orimult*61)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad62):
                degrees = (orimult*62)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad63):
                degrees = (orimult*63)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad64):
                degrees = (orimult*64)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad65):
                degrees = (orimult*65)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad66):
                degrees = (orimult*66)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad67):
                degrees = (orimult*67)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad68):
                degrees = (orimult*68)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad69):
                degrees = (orimult*69)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad70):
                degrees = (orimult*70)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad71):
                degrees = (orimult*71)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad72):
                degrees = (orimult*72)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad73):
                degrees = (orimult*73)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad74):
                degrees = (orimult*74)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad75):
                degrees = (orimult*75)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad76):
                degrees = (orimult*76)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad77):
                degrees = (orimult*77)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad78):
                degrees = (orimult*78)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad79):
                degrees = (orimult*79)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad80):
                degrees = (orimult*80)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad81):
                degrees = (orimult*81)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad82):
                degrees = (orimult*82)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad83):
                degrees = (orimult*83)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad84):
                degrees = (orimult*84)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad85):
                degrees = (orimult*85)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad86):
                degrees = (orimult*86)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad87):
                degrees = (orimult*87)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad88):
                degrees = (orimult*88)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad89):
                degrees = (orimult*89)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad90):
                degrees = (orimult*90)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad91):
                degrees = (orimult*91)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad92):
                degrees = (orimult*92)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad93):
                degrees = (orimult*93)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad94):
                degrees = (orimult*94)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad95):
                degrees = (orimult*95)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad96):
                degrees = (orimult*96)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad97):
                degrees = (orimult*97)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad98):
                degrees = (orimult*98)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color
            elif mouse2.isPressedIn(rad99):
                degrees = (orimult*99)+(orimult/2)
                Image2.setColor([degrees,1,1])#sets Image2 hsv color

        #MARK: Update Segment Positions And Draw Them
        if didFinishDrag == True: #This is to prevent slowness when picking up ubject to drag
            segpos = (place)#When it appears sets the pos equal to the current place of the object
            #Sets each segment position
            rad0.setPos(segpos)
            rad1.setPos(segpos)
            rad2.setPos(segpos)
            rad3.setPos(segpos)
            rad4.setPos(segpos)
            rad5.setPos(segpos)
            rad6.setPos(segpos)
            rad7.setPos(segpos)
            rad8.setPos(segpos)
            rad9.setPos(segpos)
            rad10.setPos(segpos)
            rad11.setPos(segpos)
            rad12.setPos(segpos)
            rad13.setPos(segpos)
            rad14.setPos(segpos)
            rad15.setPos(segpos)
            rad16.setPos(segpos)
            rad17.setPos(segpos)
            rad18.setPos(segpos)
            rad19.setPos(segpos)
            rad20.setPos(segpos)
            rad21.setPos(segpos)
            rad22.setPos(segpos)
            rad23.setPos(segpos)
            rad24.setPos(segpos)
            rad25.setPos(segpos)
            rad26.setPos(segpos)
            rad27.setPos(segpos)
            rad28.setPos(segpos)
            rad29.setPos(segpos)
            rad30.setPos(segpos)
            rad31.setPos(segpos)
            rad32.setPos(segpos)
            rad33.setPos(segpos)
            rad34.setPos(segpos)
            rad35.setPos(segpos)
            rad36.setPos(segpos)
            rad37.setPos(segpos)
            rad38.setPos(segpos)
            rad39.setPos(segpos)
            rad40.setPos(segpos)
            rad41.setPos(segpos)
            rad42.setPos(segpos)
            rad43.setPos(segpos)
            rad44.setPos(segpos)
            rad45.setPos(segpos)
            rad46.setPos(segpos)
            rad47.setPos(segpos)
            rad48.setPos(segpos)
            rad49.setPos(segpos)
            rad50.setPos(segpos)
            rad51.setPos(segpos)
            rad52.setPos(segpos)
            rad53.setPos(segpos)
            rad54.setPos(segpos)
            rad55.setPos(segpos)
            rad56.setPos(segpos)
            rad57.setPos(segpos)
            rad58.setPos(segpos)
            rad59.setPos(segpos)
            rad60.setPos(segpos)
            rad61.setPos(segpos)
            rad62.setPos(segpos)
            rad63.setPos(segpos)
            rad64.setPos(segpos)
            rad65.setPos(segpos)
            rad66.setPos(segpos)
            rad67.setPos(segpos)
            rad68.setPos(segpos)
            rad69.setPos(segpos)
            rad70.setPos(segpos)
            rad71.setPos(segpos)
            rad72.setPos(segpos)
            rad73.setPos(segpos)
            rad74.setPos(segpos)
            rad75.setPos(segpos)
            rad76.setPos(segpos)
            rad77.setPos(segpos)
            rad78.setPos(segpos)
            rad79.setPos(segpos)
            rad80.setPos(segpos)
            rad81.setPos(segpos)
            rad82.setPos(segpos)
            rad83.setPos(segpos)
            rad84.setPos(segpos)
            rad85.setPos(segpos)
            rad86.setPos(segpos)
            rad87.setPos(segpos)
            rad88.setPos(segpos)
            rad89.setPos(segpos)
            rad90.setPos(segpos)
            rad91.setPos(segpos)
            rad92.setPos(segpos)
            rad93.setPos(segpos)
            rad94.setPos(segpos)
            rad95.setPos(segpos)
            rad96.setPos(segpos)
            rad97.setPos(segpos)
            rad98.setPos(segpos)
            rad99.setPos(segpos)
        elif isDragging == False and isOnColor == True: #When dragging it will dispear
            #Draws each segment
            rad0.draw()
            rad1.draw()
            rad2.draw()
            rad3.draw()
            rad4.draw()
            rad5.draw()
            rad6.draw()
            rad7.draw()
            rad8.draw()
            rad9.draw()
            rad10.draw()
            rad11.draw()
            rad12.draw()
            rad13.draw()
            rad14.draw()
            rad15.draw()
            rad16.draw()
            rad17.draw()
            rad18.draw()
            rad19.draw()
            rad20.draw()
            rad21.draw()
            rad22.draw()
            rad23.draw()
            rad24.draw()
            rad25.draw()
            rad26.draw()
            rad27.draw()
            rad28.draw()
            rad29.draw()
            rad30.draw()
            rad31.draw()
            rad32.draw()
            rad33.draw()
            rad34.draw()
            rad35.draw()
            rad36.draw()
            rad37.draw()
            rad38.draw()
            rad39.draw()
            rad40.draw()
            rad41.draw()
            rad42.draw()
            rad43.draw()
            rad44.draw()
            rad45.draw()
            rad46.draw()
            rad47.draw()
            rad48.draw()
            rad49.draw()
            rad50.draw()
            rad51.draw()
            rad52.draw()
            rad53.draw()
            rad54.draw()
            rad55.draw()
            rad56.draw()
            rad57.draw()
            rad58.draw()
            rad59.draw()
            rad60.draw()
            rad61.draw()
            rad62.draw()
            rad63.draw()
            rad64.draw()
            rad65.draw()
            rad66.draw()
            rad67.draw()
            rad68.draw()
            rad69.draw()
            rad70.draw()
            rad71.draw()
            rad72.draw()
            rad73.draw()
            rad74.draw()
            rad75.draw()
            rad76.draw()
            rad77.draw()
            rad78.draw()
            rad79.draw()
            rad80.draw()
            rad81.draw()
            rad82.draw()
            rad83.draw()
            rad84.draw()
            rad85.draw()
            rad86.draw()
            rad87.draw()
            rad88.draw()
            rad89.draw()
            rad90.draw()
            rad91.draw()
            rad92.draw()
            rad93.draw()
            rad94.draw()
            rad95.draw()
            rad96.draw()
            rad97.draw()
            rad98.draw()
            rad99.draw()
    PolygonComponent screenRect2
      fillColor = $[-1.000,-1.000,-1.000]
      opacity = 0
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent selectShape
      Code Type = Py
      Begin Experiment:
        #Looking for code in Begin Experiment?
        #All code and var definitions for begin experiment are in the test section
      Begin Routine:
        #Select shape is the selector circle that is white and behind the colored one
        selectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,1,1], pos=(0,0), size=(0.1,0.1), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 0)
        #Inner select shape is on top of select shape and updates it's color to the color of the part of the color wheel it is on
        innerSelectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,1,1], pos=(0,0), size=(0.1,0.1), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 0)
      Each Frame:
        if isDragging == False and hasColored == True: #Hides until you actually start selecting a color, this is separate from colorHelp in ExitCode so no interference ever occors
            #Explanation: Color is just hsv set to white, position on circle is calculated by, X:= origin of stimuli x position + cos of the angle in radians (cos funtion only takes radians) * the radius (circumference/2) and then subtracting a fourth of the radius of the color picker circle to make it in the middle of the color wheel
            selectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,0,1], pos=(place[0]+(math.cos(math.radians(-degrees+90))*(.15-(0.03/4))), place[1]+(math.sin(math.radians(-degrees+90))*(.15-(0.03/4)))), size=(0.03,0.03), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 1)
            #Explanation: Same as above except the color is set to the color wheel segment, and to get it centered I devided by 3.4 because for some reason 4 didn't center it correctly, but 3.4 centers it fine so just leaving it like that is ok
            innerSelectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[degrees,1,1], pos=(place[0]+(math.cos(math.radians(-degrees+90))*(.15-(0.025/3.4))), place[1]+(math.sin(math.radians(-degrees+90))*(.15-(0.025/3.4)))), size=(0.025,0.025), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 1)
            #Draws both shapes
            selectShape.draw()
            innerSelectShape.draw()
    CodeComponent feedbackCode
      Code Type = Py
      Begin Experiment:
        #Feedback text setup, tells you how close you are
        FeedbackText = visual.TextStim(win=win, name='FeedbackText',
            text='',
            font='Arial',
            pos=(0, 0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #This text makes you select the correct color and location
        ContinueText = visual.TextStim(win=win, name='ColorText',
            text='',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
      Begin Routine:
        then = datetime.datetime.now() #Saves time they begun the section
        colorText = ''
        posText = ''
        degrees = 0 #Resests degrees so that if it saves with an exit the degrees will be 0 and not some random number
        Image2.setColor([0,0,1])#sets Image hsv color
        FeedbackText.setText('')
        ContinueText.setText('')
        colorIsCorrect = False #If they are on the correct color
        locationIsCorrect = False #If they are on the correct location
      Each Frame:
        if isOnColor: #When you are in the prosses of selecting a color
            #Updates text with how close you are to the correct color
            colorIsCorrect = False #resets color is correct bool
            segNum = (degrees-(orimult/2))/orimult #Changes degrees back into rad #s
            segNum = round(segNum) #Round to prevent errors
            if abs(practicetestrad-segNum) > amountofsegments/2:
                if practicetestrad>segNum:
                    colorDist = amountofsegments-practicetestrad+segNum
                else:
                    colorDist = amountofsegments-segNum+practicetestrad
            else:
                colorDist = abs(practicetestrad-segNum)
            round(colorDist)
            if colorDist < 2:
                colorText = '        The color is perfect        '
                colorIsCorrect = True
            elif colorDist < 4:
                colorText = '     The color is very close     '
            elif colorDist < 8:
                colorText = '         The color is close         '
            else:
                colorText = '       The color is incorrect       '
            FeedbackText.setText(colorText + '\n' + posText)
        if isDragging: #When you are dragging the image
            locationIsCorrect = False #resets location is correct bool
            xpos, ypos = place
            distx = abs(xpos-practicetestx) #find the distance in x between correct and user
            disty = abs(ypos-practicetesty) #find the distance in y between correct and user
            pythDist = math.sqrt((distx*distx)+(disty*disty)) #Uses pythagorean theorem to find distance
            pythDist = round(pythDist,5) #Round to prevent errors
            if pythDist > 0.15:
                posText = '    The location is incorrect    '
            elif pythDist > 0.05:
                posText = 'The location is nearly correct'
            elif pythDist < 0.05:
                posText = '     The location is spot on!     '
                locationIsCorrect = True
            FeedbackText.setText(colorText + '\n' + posText)
        FeedbackText.draw()
        if isOnColor or isDragging:
            if colorIsCorrect and not locationIsCorrect: #If you try to continue it will wave a finger at you a say no oh, choose a correct location
                ContinueText.setText('Please select a valid loaction')
            elif locationIsCorrect and not colorIsCorrect: #Same as above but for color
                ContinueText.setText('Please select a valid color')
            elif not locationIsCorrect and not colorIsCorrect: #Same as above except both together
                ContinueText.setText('Please select a valid color and location')
        if not mouse2.isPressedIn(screenRect2) and locationIsCorrect and colorIsCorrect:
            ContinueText.setText('Press Space To Continue') #When they finally are correct tell them you can press the space bar to continue
            ContinueText.autoDraw = True #Draw the text
        elif locationIsCorrect and colorIsCorrect: #This will only call if they are dragging
            ContinueText.setText('') #Sets the text to nothing
      End Routine:
        ContinueText.autoDraw = False #Stop drawing the text
    CodeComponent exitCode
      Code Type = Py
      Begin Experiment:
        practicetesttrail = 0 #Current trail user is on
        practiceTestOrder = [0, 1] #order of the practice test, different then study order
        practicetestPath = 'None'
      Begin Routine:
        mouse2.setPos(newPos=(0, 0.001)) #resets position of mouse, has to be offset slightly or else it will select a color for some reason
        win.mouseVisible = True #Show mouse only if it is supposed to continue routine

        #These two vars give the person help with knowing how to drag/color live
        helpDrag = False
        helpColor = False

        opacOfArrows = 0.0 #Opacity of the arrows
        opacUp = True #If Opacity is rising or falling

        colorDeg = 0 #Degrees of slider for colorHelp
        colorDegUp = True #Degrees of the slider going up or down
        colorOpac = 0 #Opacity of the slider

        practicetestPath = practiceStim[0][practiceTestOrder[practicetesttrail]] #Gets path of the study image
        practicetestx = practiceStim[1][practiceTestOrder[practicetesttrail]] #Gets x cord of the study image
        practicetesty = practiceStim[2][practiceTestOrder[practicetesttrail]] #Gets y cord of the study image
        practicetestrad = practiceStim[3][practiceTestOrder[practicetesttrail]] #Gets color of the study image
      Each Frame:
        if theseKeys == 'space':  # if space is pressed
            #a response ends the routine
            helpDrag = True #If they have not dragged yet and try to end routine
            helpColor = True #If they have not colored yet and try to end routine
            if hasColored and hasDragged: #Stops routine if they have colored and moved the stimuli
                if colorIsCorrect and locationIsCorrect:
                    continueRoutine = False
                else:
                    ContinueText.autoDraw = True

        #Help animations
        if helpColor == True and hasColored == False and isDragging == False: #If they need help coloring and they are not currently dragging the image
            helpDrag = False #Disables other option
            if colorOpac < 1.0:
                colorOpac += 0.01 #How fast opacity of slider increases
            if colorDeg < 1 and colorDegUp == True and colorOpac >= 0.75: #The last var is at what opacity to start sliding
                colorDeg += 0.1
            elif colorDeg < colorSpeed and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += 0.1*colorDeg
            elif colorDeg < colorMaxDeg-colorSpeed and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += colorSpeed/10 #Speed devided by 0.1 which is how much it increases by
            elif colorDeg < colorMaxDeg-1 and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += 0.1*((-colorDeg)+colorMaxDeg)
            elif colorDeg < colorMaxDeg and colorDegUp == True and colorOpac >= 0.75:
                colorDegUp = False #Changes direction
            elif colorDeg > colorMaxDeg-colorSpeed and colorDegUp == False: #Starts going back down degrees here
                colorDeg -= 0.1*((-colorDeg)+colorMaxDeg)
            elif colorDeg > colorSpeed and colorDegUp == False:
                colorDeg -= colorSpeed/10
            elif colorDeg > 1 and colorDegUp == False:
                colorDeg -= 0.1*colorDeg
            elif colorDeg > 0 and colorDegUp == False:
                colorDeg -= 0.05
            elif colorOpac >= 0.75:
                colorDegUp = True #Resets the direction so degrees are going back up again
                colorDeg += 0.05
            #Sets postion of select shapes
            selectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,0,1], pos=(place[0]+(math.cos(math.radians(-colorDeg+90))*(.15-(0.03/4))), place[1]+(math.sin(math.radians(-colorDeg+90))*(.15-(0.03/4)))), size=(0.03,0.03), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = colorOpac)
            innerSelectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[colorDeg,1,1], pos=(place[0]+(math.cos(math.radians(-colorDeg+90))*(.15-(0.025/3.4))), place[1]+(math.sin(math.radians(-colorDeg+90))*(.15-(0.025/3.4)))), size=(0.025,0.025), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = colorOpac)
            #Draws each object
            selectShape.draw()
            innerSelectShape.draw()
            ColorText.draw()
        elif helpDrag == True and hasDragged == False:
            helpColor = False #Disables other option
            #Makes a nice animation
            if opacOfArrows >= 1.0: #changes direction of opacity
                opacUp = False
            elif opacOfArrows <= 0.0:
                opacUp = True
            if opacUp == True:
                opacOfArrows += 0.01 #Changes opacity, change this var to make animation faster or slower
            else:
                opacOfArrows -= 0.01
            #Draws aroows and text
            arrowUp.opacity = opacOfArrows
            arrowDown.opacity = opacOfArrows
            arrowRight.opacity = opacOfArrows
            arrowLeft.opacity = opacOfArrows
            arrowUp.draw()
            arrowDown.draw()
            arrowRight.draw()
            arrowLeft.draw()
            DragText.draw() #Tells user what to do
      End Routine:
        win.mouseVisible = False #Hide mouse
        practicetesttrail += 1
    ImageComponent Image2
      color = $[1,1,1]
      colorSpace = hsv
      image [set every repeat] = $practicetestPath
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    CodeComponent liveCode14
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Practice,Test,' + str(practicetesttrail+1) + ',2,' + str(numberofpractice + practicetesttrail + 7) +',' + str(numberofpractice + 8) +',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine testInstr
    CodeComponent onsetCode3
      Code Type = Py
      End Routine:
        testOnset = 0
    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will now be tested on the color and location of the images you studied.
        Use the mouse to select the color and drag the image to its original location.
        Once you're done press the spacebar to continue.

        You will NOT be given feedback on how close you are.

        Press Space To Start
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liveCode8
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Test,Instruction,1,1,1,' + str(num_study+1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',' + liveoldornewrt + ',' + liveuseroldornew) #Gets stuff from last trail
        liveFile.close()
        liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceStudyInstr
    CodeComponent SkipCode5
      Code Type = Py
      Begin Routine:
        if skipPractice:
            continueRoutine = False
    TextComponent text_5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Lets start with some practice.

        You will now be shown two objects. Memorize their shape, location and color.
        Each object will stay on the screen for three seconds.

        Press Space To Continue
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liveCode2
      Code Type = Py
      Begin Routine:
        if not skipPractice:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Practice,Instruction,1,1,3,' + str(numberofpractice + 8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceOldornew
    TextComponent oldornewText2
      letterHeight = 0.05
      pos = (0, -.45)
      startVal [time (s)] = 0
      text [set every repeat] = 1 - Old        2 - New
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    CodeComponent olornewCode2
      Code Type = Py
      Begin Experiment:
        import time
        practiceoldornewtrail = 0 #Current trail user is on
        practiceOldornewOrder = [3, 1, 2, 0] #order of the practice test, different then study order
      Begin Routine:
        theseKeys = '' #Gets key press
        win.mouseVisible = False #Hide mouse
        ttime = 1 #Lets user respond immediatly

        practiceoldornewPath = ''

        practiceoldornewPath = practiceStim[0][practiceOldornewOrder[practiceoldornewtrail]] #Gets path of the study image

        ttime = 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if key == '1' and ttime >= 1: #if user selected old
                if practiceOldornewOrder[practiceoldornewtrail] == 0 or practiceOldornewOrder[practiceoldornewtrail] == 1:
                    continueRoutine = False #If they are correct, go on to next routine
                else:
                    oldornewText2.setText('Wrong, the image is new') #If they are not correct, tell them they are wrong
                    #win.flip() #Updates screen
                    #time.sleep(1) #Waits for one second
                    ttime = 0
            elif key == '2' and ttime >= 1: #If user selected new
                if practiceOldornewOrder[practiceoldornewtrail] == 2 or practiceOldornewOrder[practiceoldornewtrail] == 3:
                    continueRoutine = False #If they are correct, go on to next routine
                else:
                    oldornewText2.setText('Wrong, the image is old') #If they are not correct, tell them they are wrong
                    #win.flip() #Updates screen
                    #time.sleep(1) #Waits for one second
                    ttime = 0

        if ttime >= 1:
            oldornewText2.setText('1 - Old        2 - New') #Re-displays old text
        else:
            ttime += 0.01
      End Routine:
        practiceoldornewtrail += 1
    ImageComponent oldornewImage2
      image [set every repeat] = $practiceoldornewPath
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    CodeComponent liveCode5
      Code Type = Py
      Begin Routine:
        currentTime = datetime.datetime.now()
        liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
        liveFile.write('Practice,Old/New,' + str(practiceoldornewtrail+1) + ',4,' + str(practiceoldornewtrail+7) +',' + str(numberofpractice + 8) +',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
        liveFile.close()
        liveNum += 1
      Each Frame:
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceExampleInstr
    CodeComponent SkipCode3
      Code Type = Py
      Begin Routine:
        if skipPractice:
            continueRoutine = False
    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be presented with different images.
        Your task will be to remember each shape, its color and its location on the screen.

        To respond, you will need to use the mouse to drag an image to a place on the screen and choose a color.

        Press space to see an example and try it out
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liveCode11
      Code Type = Py
      Begin Routine:
        if not skipPractice:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Practice,Instruction,1,1,1,' + str(numberofpractice+8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second) + ',' + str(num_study) + ',' + str(num_test) + ',' + str(skipOldOrNew))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine practiceExample
    CodeComponent SkipCode4
      Code Type = Py
      Begin Routine:
        if skipPractice:
            continueRoutine = False
    ImageComponent Image3
      color = $[1,0,1]
      colorSpace = hsv
      image = $thisdir + '/Stimuli/test6.png'
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    MouseComponent mouse3
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent DragCode3
      Code Type = Py
      Begin Experiment:
        #Looking for code in Begin Experiment?
        #All code and var definitions for begin experiment are in the test section
      Begin Routine:
        isDragging = False #Lets other parts of experiment know that the user is dragging the stimuli
        didFinishDrag = False #Lets some aspects of the experiment only do something once after a drag has finished
        hasDragged = False #For preventing the user from going on until dragged
        place = (0,0) #Place of object (Image)
        Image3.setPos(place) #Sets image to (0,0)
        noClickShape.setPos(place) #Sets noClickShape to (0,0), see Begin Experiment for more about noClickShape
        mousePlace = (0,0) #Place of mouse when clicked
        mousex = 0.0 #Offset of mouse x
        mousey = 0.0 #Offset of mouse y
        firstDrag = True #For updating positions of mousex and mousey
      Each Frame:
        #This whole complicated thing makes sure that the stimuli always stays on the mouse if they click on the stimuli first
        if mouse3.isPressedIn(screenRect3) and didFinishDrag == False:#ScreenRect is used to detect if mouse is pressed anywhere on screen
            if mouse3.isPressedIn(noClickShape): #Checks when mouse is pressed down, see Begin Experiment for more about noClickShape
                if isOnColor == False: #Makes sure it didn't start on the color wheel
                    #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                    mousePlace = mouse3.getPos()
                    if firstDrag == True: #Only updates offset once when starting the drag
                        mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                        mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                        firstDrag = False #Disables first drag
                    place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                    Image3.setPos(place) #Sets position of the image equal to the position of the mouse
                    noClickShape.setPos(place) #Set position
                    isDragging = True #Sets is dragging to true when the mouse starts on the object (noClickShape in this case)
                    hasDragged = True #For preventing the user from going on until dragged
                    win.mouseVisible = False #Hide mouse when dragging
            elif isDragging == True: #If the mouse started on noClickShape but isnt there right now (and still pressed down) it will update position anyway
                #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                mousePlace = mouse3.getPos()
                if firstDrag == True: #Only updates offset once when starting the drag
                        mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                        mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                        firstDrag = False #Disables first drag
                place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                Image3.setPos(place) #Sets position of the image equal to the position of the mouse
                noClickShape.setPos(place) #Set position
        elif didFinishDrag == True and isDragging == True: #Disables didFinishDrag for good
            didFinishDrag = False
        elif isDragging == True: #This is an elif statement so will only play if others above are false
            didFinishDrag = True #Makes var true so it only is true for one frame
            isDragging = False #It is no longer dragging
            win.mouseVisible = True #Show mouse once your done dragging
            firstDrag = True #re-enables first drag again so when the first if statement plays it will update position of offset
        else:
            didFinishDrag = False #Disables didFinishDrag for good

        noClickShape.draw() #Draws no click shape
    CodeComponent ColorCode3
      Code Type = Py
      Begin Experiment:
        #Looking for code in Begin Experiment?
        #All code and var definitions for begin experiment are in the test section
      Begin Routine:
        isOnColor = False #If the mouse is currently on a color
        hasColored = False #For hiding the selectShape until you start coloring
        stim.setPos(place)
      Each Frame:
        if didFinishDrag == True: #Only updates position once after you finish dragging, otherwise experiment will lag a lot
            stim.setPos(place)
            stim.draw()
        elif isDragging == False: #If your not dragging it won't redifine the position
            stim.draw()

        if mouse3.isPressedIn(screenRect3):#ScreenRect is used to detect if mouse is pressed anywhere on screen
            if mouse3.isPressedIn(stim) and not mouse3.isPressedIn(noClickShape):#Has to be initially pressed on wheel to set to true
                if isDragging == False: #Also cannot be dragging
                    hasColored = True #For hiding the selectShape until you start coloring
                    isOnColor = True #Then will set is on color to true
        else:
            isOnColor = False #If mouse is not pressed down it is not on color
    CodeComponent SegmentCode3
      Code Type = Py
      Begin Experiment:
        #Looking for code in Begin Experiment?
        #All code and var definitions for begin experiment are in the test section
      Begin Routine:
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      Each Frame:
        #MARK: Detect Mouse Press On Segment
        #Takes the multiplier (How many segments) and multiplies it by rad number
        #Then adds half of the multiplier (to make color average)
        if isDragging == False and isOnColor == True: #If its on a segment it will update the color of the Image3
            if mouse3.isPressedIn(rad0): #Will not set color if dragging Image3
                degrees = (orimult*0)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad1):
                degrees = (orimult*1)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad2):
                degrees = (orimult*2)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad3):
                degrees = (orimult*3)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad4):
                degrees = (orimult*4)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad5):
                degrees = (orimult*5)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad6):
                degrees = (orimult*6)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad7):
                degrees = (orimult*7)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad8):
                degrees = (orimult*8)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad9):
                degrees = (orimult*9)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad10):
                degrees = (orimult*10)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad11):
                degrees = (orimult*11)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad12):
                degrees = (orimult*12)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad13):
                degrees = (orimult*13)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad14):
                degrees = (orimult*14)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad15):
                degrees = (orimult*15)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad16):
                degrees = (orimult*16)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad17):
                degrees = (orimult*17)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad18):
                degrees = (orimult*18)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad19):
                degrees = (orimult*19)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad20):
                degrees = (orimult*20)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad21):
                degrees = (orimult*21)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad22):
                degrees = (orimult*22)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad23):
                degrees = (orimult*23)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad24):
                degrees = (orimult*24)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad25):
                degrees = (orimult*25)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad26):
                degrees = (orimult*26)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad27):
                degrees = (orimult*27)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad28):
                degrees = (orimult*28)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad29):
                degrees = (orimult*29)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad30):
                degrees = (orimult*30)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad31):
                degrees = (orimult*31)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad32):
                degrees = (orimult*32)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad33):
                degrees = (orimult*33)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad34):
                degrees = (orimult*34)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad35):
                degrees = (orimult*35)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad36):
                degrees = (orimult*36)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad37):
                degrees = (orimult*37)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad38):
                degrees = (orimult*38)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad39):
                degrees = (orimult*39)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad40):
                degrees = (orimult*40)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad41):
                degrees = (orimult*41)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad42):
                degrees = (orimult*42)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad43):
                degrees = (orimult*43)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad44):
                degrees = (orimult*44)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad45):
                degrees = (orimult*45)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad46):
                degrees = (orimult*46)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad47):
                degrees = (orimult*47)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad48):
                degrees = (orimult*48)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad49):
                degrees = (orimult*49)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad50):
                degrees = (orimult*50)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad51):
                degrees = (orimult*51)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad52):
                degrees = (orimult*52)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad53):
                degrees = (orimult*53)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad54):
                degrees = (orimult*54)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad55):
                degrees = (orimult*55)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad56):
                degrees = (orimult*56)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad57):
                degrees = (orimult*57)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad58):
                degrees = (orimult*58)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad59):
                degrees = (orimult*59)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad60):
                degrees = (orimult*60)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad61):
                degrees = (orimult*61)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad62):
                degrees = (orimult*62)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad63):
                degrees = (orimult*63)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad64):
                degrees = (orimult*64)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad65):
                degrees = (orimult*65)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad66):
                degrees = (orimult*66)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad67):
                degrees = (orimult*67)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad68):
                degrees = (orimult*68)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad69):
                degrees = (orimult*69)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad70):
                degrees = (orimult*70)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad71):
                degrees = (orimult*71)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad72):
                degrees = (orimult*72)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad73):
                degrees = (orimult*73)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad74):
                degrees = (orimult*74)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad75):
                degrees = (orimult*75)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad76):
                degrees = (orimult*76)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad77):
                degrees = (orimult*77)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad78):
                degrees = (orimult*78)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad79):
                degrees = (orimult*79)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad80):
                degrees = (orimult*80)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad81):
                degrees = (orimult*81)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad82):
                degrees = (orimult*82)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad83):
                degrees = (orimult*83)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad84):
                degrees = (orimult*84)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad85):
                degrees = (orimult*85)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad86):
                degrees = (orimult*86)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad87):
                degrees = (orimult*87)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad88):
                degrees = (orimult*88)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad89):
                degrees = (orimult*89)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad90):
                degrees = (orimult*90)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad91):
                degrees = (orimult*91)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad92):
                degrees = (orimult*92)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad93):
                degrees = (orimult*93)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad94):
                degrees = (orimult*94)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad95):
                degrees = (orimult*95)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad96):
                degrees = (orimult*96)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad97):
                degrees = (orimult*97)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad98):
                degrees = (orimult*98)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad99):
                degrees = (orimult*99)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color

        #MARK: Update Segment Positions And Draw Them
        if didFinishDrag == True: #This is to prevent slowness when picking up ubject to drag
            segpos = (place)#When it appears sets the pos equal to the current place of the object
            #Sets each segment position
            rad0.setPos(segpos)
            rad1.setPos(segpos)
            rad2.setPos(segpos)
            rad3.setPos(segpos)
            rad4.setPos(segpos)
            rad5.setPos(segpos)
            rad6.setPos(segpos)
            rad7.setPos(segpos)
            rad8.setPos(segpos)
            rad9.setPos(segpos)
            rad10.setPos(segpos)
            rad11.setPos(segpos)
            rad12.setPos(segpos)
            rad13.setPos(segpos)
            rad14.setPos(segpos)
            rad15.setPos(segpos)
            rad16.setPos(segpos)
            rad17.setPos(segpos)
            rad18.setPos(segpos)
            rad19.setPos(segpos)
            rad20.setPos(segpos)
            rad21.setPos(segpos)
            rad22.setPos(segpos)
            rad23.setPos(segpos)
            rad24.setPos(segpos)
            rad25.setPos(segpos)
            rad26.setPos(segpos)
            rad27.setPos(segpos)
            rad28.setPos(segpos)
            rad29.setPos(segpos)
            rad30.setPos(segpos)
            rad31.setPos(segpos)
            rad32.setPos(segpos)
            rad33.setPos(segpos)
            rad34.setPos(segpos)
            rad35.setPos(segpos)
            rad36.setPos(segpos)
            rad37.setPos(segpos)
            rad38.setPos(segpos)
            rad39.setPos(segpos)
            rad40.setPos(segpos)
            rad41.setPos(segpos)
            rad42.setPos(segpos)
            rad43.setPos(segpos)
            rad44.setPos(segpos)
            rad45.setPos(segpos)
            rad46.setPos(segpos)
            rad47.setPos(segpos)
            rad48.setPos(segpos)
            rad49.setPos(segpos)
            rad50.setPos(segpos)
            rad51.setPos(segpos)
            rad52.setPos(segpos)
            rad53.setPos(segpos)
            rad54.setPos(segpos)
            rad55.setPos(segpos)
            rad56.setPos(segpos)
            rad57.setPos(segpos)
            rad58.setPos(segpos)
            rad59.setPos(segpos)
            rad60.setPos(segpos)
            rad61.setPos(segpos)
            rad62.setPos(segpos)
            rad63.setPos(segpos)
            rad64.setPos(segpos)
            rad65.setPos(segpos)
            rad66.setPos(segpos)
            rad67.setPos(segpos)
            rad68.setPos(segpos)
            rad69.setPos(segpos)
            rad70.setPos(segpos)
            rad71.setPos(segpos)
            rad72.setPos(segpos)
            rad73.setPos(segpos)
            rad74.setPos(segpos)
            rad75.setPos(segpos)
            rad76.setPos(segpos)
            rad77.setPos(segpos)
            rad78.setPos(segpos)
            rad79.setPos(segpos)
            rad80.setPos(segpos)
            rad81.setPos(segpos)
            rad82.setPos(segpos)
            rad83.setPos(segpos)
            rad84.setPos(segpos)
            rad85.setPos(segpos)
            rad86.setPos(segpos)
            rad87.setPos(segpos)
            rad88.setPos(segpos)
            rad89.setPos(segpos)
            rad90.setPos(segpos)
            rad91.setPos(segpos)
            rad92.setPos(segpos)
            rad93.setPos(segpos)
            rad94.setPos(segpos)
            rad95.setPos(segpos)
            rad96.setPos(segpos)
            rad97.setPos(segpos)
            rad98.setPos(segpos)
            rad99.setPos(segpos)
        elif isDragging == False and isOnColor == True: #When dragging it will dispear
            #Draws each segment
            rad0.draw()
            rad1.draw()
            rad2.draw()
            rad3.draw()
            rad4.draw()
            rad5.draw()
            rad6.draw()
            rad7.draw()
            rad8.draw()
            rad9.draw()
            rad10.draw()
            rad11.draw()
            rad12.draw()
            rad13.draw()
            rad14.draw()
            rad15.draw()
            rad16.draw()
            rad17.draw()
            rad18.draw()
            rad19.draw()
            rad20.draw()
            rad21.draw()
            rad22.draw()
            rad23.draw()
            rad24.draw()
            rad25.draw()
            rad26.draw()
            rad27.draw()
            rad28.draw()
            rad29.draw()
            rad30.draw()
            rad31.draw()
            rad32.draw()
            rad33.draw()
            rad34.draw()
            rad35.draw()
            rad36.draw()
            rad37.draw()
            rad38.draw()
            rad39.draw()
            rad40.draw()
            rad41.draw()
            rad42.draw()
            rad43.draw()
            rad44.draw()
            rad45.draw()
            rad46.draw()
            rad47.draw()
            rad48.draw()
            rad49.draw()
            rad50.draw()
            rad51.draw()
            rad52.draw()
            rad53.draw()
            rad54.draw()
            rad55.draw()
            rad56.draw()
            rad57.draw()
            rad58.draw()
            rad59.draw()
            rad60.draw()
            rad61.draw()
            rad62.draw()
            rad63.draw()
            rad64.draw()
            rad65.draw()
            rad66.draw()
            rad67.draw()
            rad68.draw()
            rad69.draw()
            rad70.draw()
            rad71.draw()
            rad72.draw()
            rad73.draw()
            rad74.draw()
            rad75.draw()
            rad76.draw()
            rad77.draw()
            rad78.draw()
            rad79.draw()
            rad80.draw()
            rad81.draw()
            rad82.draw()
            rad83.draw()
            rad84.draw()
            rad85.draw()
            rad86.draw()
            rad87.draw()
            rad88.draw()
            rad89.draw()
            rad90.draw()
            rad91.draw()
            rad92.draw()
            rad93.draw()
            rad94.draw()
            rad95.draw()
            rad96.draw()
            rad97.draw()
            rad98.draw()
            rad99.draw()
    PolygonComponent screenRect3
      fillColor = $[1,1,1]
      opacity = 0
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent SelectShape3
      Code Type = Py
      Begin Experiment:
        #Looking for code in Begin Experiment?
        #All code and var definitions for begin experiment are in the test section
      Begin Routine:
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      Each Frame:
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    CodeComponent AnimationCode
      Code Type = Py
      Begin Experiment:
        #Color text 2 setup, tells user to select a color
        ColorText2 = visual.TextStim(win=win, name='ColorText',
            text='                     Start by selecting a color from the color wheel\nYou can click or drag the mouse anywhere on the wheel to select a color',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #Drag text 2 setup, tells user to select a place
        DragText2 = visual.TextStim(win=win, name='DragText',
            text='Next, Drag and Drop the object to a location on the screen',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
      Begin Routine:
        win.mouseVisible = True #Show mouse at start
        mouse2.setPos(newPos=(0, 0.001)) #resets position of mouse, has to be offset slightly or else it will select a color for some reason

        #These two vars give the person help with knowing how to drag/color live
        helpDrag = False
        helpColor = False

        opacOfArrows = 0.0 #Opacity of the arrows
        opacUp = True #If Opacity is rising or falling

        colorDeg = 0 #Degrees of slider for colorHelp
        colorDegUp = True #Degrees of the slider going up or down
        colorOpac = 0 #Opacity of the slider
      Each Frame:
        if not hasColored:
            helpColor = True #This shows the popup to tell user to color right when they start the routine
        elif not hasDragged and not isOnColor:
            helpDrag = True #Tells the user to drag if they have already colored
        elif not isOnColor and not isDragging: #Tells user they can continue once they've colored and placed, re-uses colortext2 text
            ColorText2.setText('Great! Whenever you\'re ready to continue, click the spacebar')
            ColorText2.draw()

        if theseKeys == 'space':  # if space is pressed
            #a response ends the routine
            if hasColored and hasDragged: #Stops routine if they have colored and moved the stimuli
                continueRoutine = False

        #Help animations
        if helpColor == True and hasColored == False and isDragging == False: #If they need help coloring and they are not currently dragging the image
            helpDrag = False #Disables other option
            if colorOpac < 1.0:
                colorOpac += 0.01 #How fast opacity of slider increases
            if colorDeg < 1 and colorDegUp == True and colorOpac >= 0.75: #The last var is at what opacity to start sliding
                colorDeg += 0.1
            elif colorDeg < colorSpeed and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += 0.1*colorDeg
            elif colorDeg < colorMaxDeg-colorSpeed and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += colorSpeed/10 #Speed devided by 0.1 which is how much it increases by
            elif colorDeg < colorMaxDeg-1 and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += 0.1*((-colorDeg)+colorMaxDeg)
            elif colorDeg < colorMaxDeg and colorDegUp == True and colorOpac >= 0.75:
                colorDegUp = False #Changes direction
            elif colorDeg > colorMaxDeg-colorSpeed and colorDegUp == False: #Starts going back down degrees here
                colorDeg -= 0.1*((-colorDeg)+colorMaxDeg)
            elif colorDeg > colorSpeed and colorDegUp == False:
                colorDeg -= colorSpeed/10
            elif colorDeg > 1 and colorDegUp == False:
                colorDeg -= 0.1*colorDeg
            elif colorDeg > 0 and colorDegUp == False:
                colorDeg -= 0.05
            elif colorOpac >= 0.75:
                colorDegUp = True #Resets the direction so degrees are going back up again
                colorDeg += 0.05
            #Sets postion of select shapes
            selectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,0,1], pos=(place[0]+(math.cos(math.radians(-colorDeg+90))*(.15-(0.03/4))), place[1]+(math.sin(math.radians(-colorDeg+90))*(.15-(0.03/4)))), size=(0.03,0.03), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = colorOpac)
            innerSelectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[colorDeg,1,1], pos=(place[0]+(math.cos(math.radians(-colorDeg+90))*(.15-(0.025/3.4))), place[1]+(math.sin(math.radians(-colorDeg+90))*(.15-(0.025/3.4)))), size=(0.025,0.025), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = colorOpac)
            #Draws each object
            selectShape.draw()
            innerSelectShape.draw()
            ColorText2.draw()
        elif helpDrag == True and hasDragged == False:
            helpColor = False #Disables other option
            #Makes a nice animation
            if opacOfArrows >= 1.0: #changes direction of opacity
                opacUp = False
            elif opacOfArrows <= 0.0:
                opacUp = True
            if opacUp == True:
                opacOfArrows += 0.01 #Changes opacity, change this var to make animation faster or slower
            else:
                opacOfArrows -= 0.01
            #Draws aroows and text
            arrowUp.opacity = opacOfArrows
            arrowDown.opacity = opacOfArrows
            arrowRight.opacity = opacOfArrows
            arrowLeft.opacity = opacOfArrows
            arrowUp.draw()
            arrowDown.draw()
            arrowRight.draw()
            arrowLeft.draw()
            DragText2.draw() #Tells user what to do
      End Routine:
        win.mouseVisible = False #Hide mouse at end
    CodeComponent liveCode12
      Code Type = Py
      Begin Routine:
        if not skipPractice:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Practice,Example,1,1,2,' + str(numberofpractice + 8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
  Routine checkForOverwrite
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import shutil #To delete folders
        #To check if files exist already
        isData = False
        isLive = False
      Begin Routine:
        if os.path.exists(_thisDir + os.sep + u'data/%s/sub_%s_%s_test.csv' % (expInfo['participant'], expInfo['participant'], expName)):
            isData = True #If the data folder exists
            print('isData')
            #Sets text to only say data folder
            text_6.setText('Participant ' + expInfo['participant'] + ' already exists in the data folder.\nWould you like too clear and OVERWRITE all data or CANCEL experiment?\nYou can also CONTINUE to create a new file (ex: data1) in the data folder.\nThis is not recommended as some live functionality may be lost.')
        if os.path.exists(_thisDir + os.sep + u'live/'+ expInfo['participant'] + '/live1' + '.csv'):
            isLive = True #If the live folder exists
            print('isLive')
            #Sets text to only say live folder
            text_6.setText('Participant ' + expInfo['participant'] +' already exists in the live folder.\nWould you like too clear and OVERWRITE all data or CANCEL experiment?\nYou can also CONTINUE to create a new file (ex: data1) in the data folder.\nThis is not recommended as some live functionality may be lost.')

        if isLive and isData:
            #Sets text to say both data and live folder
            text_6.setText('Participant ' + expInfo['participant'] +' already exists in both the live and data folder.\nWould you like too clear and OVERWRITE all data or CANCEL experiment?\nYou can also CONTINUE to create a new file (ex: data1) in the data folder.\nThis is not recommended as some live functionality may be lost.')
        elif not isLive and not isData:
            #If the participant # is new, move on without giving a prompt
            continueRoutine = False
      Each Frame:
        if mouse.isPressedIn(text_7):
            #Delete all data from folders
            shutil.rmtree(_thisDir + os.sep + u'data/%s' % (expInfo['participant']), ignore_errors=True)
            shutil.rmtree(_thisDir + os.sep + u'live/%s' % (expInfo['participant']), ignore_errors=True)
            continueRoutine = False #Move on to the next routine
        elif mouse.isPressedIn(text_8):
            core.quit() #If the user clicks cancel, quit the experiment
        elif mouse.isPressedIn(text_9):
            continueRoutine = False #If the user clicks continue anyway, go onto the next routine without doing anything else

        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                core.quit()
    TextComponent text_6
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        This participant already exists in both the live and data folder.
        Would you like too clear and OVERWRITE all data or CANCEL experiment?
        You can also CONTINUE to create a new file (ex: data1) in the data folder.
        This is not recommended as some live functionality may be lost.
    TextComponent text_7
      color = red
      letterHeight = 0.05
      pos = (0.15, 0)
      startVal [time (s)] = 0.0
      text = Overwrite
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    TextComponent text_8
      letterHeight = 0.05
      pos = (-0.15, 0)
      startVal [time (s)] = 0.0
      text = Cancel
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    TextComponent text_9
      letterHeight = 0.03
      pos = (0.55, -0.46)
      startVal [time (s)] = 0.0
      text = Continue Anyway (Not Recommended)
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine oldornewInstr
    CodeComponent SkipCode
      Code Type = Py
      Begin Routine:
        if skipOldOrNew:
            continueRoutine = False
      End Routine:
        oldornewOnset = 0
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liveCode17
      Code Type = Py
      Begin Routine:
        if not skipOldOrNew:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Old/New,Instruction,1,1,1,' + str(num_test + 1) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
    TextComponent text_11
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        We will now test you on how well you remember the shapes you just saw.
        Just like in the practice, decide if you have seen each shape during the study, irrespective of its color or location.
        If you have seen it during the study, press 1 for OLD. If you have not seen it, press 2 for NEW.
        You will not be given feedback.

        Press Space To Start
  Routine practiceOldornewInstr
    CodeComponent SkipCode2
      Code Type = Py
      Begin Routine:
        if skipOldOrNew or skipPractice:
            continueRoutine = False
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent liveCode16
      Code Type = Py
      Begin Routine:
        if not skipPractice and not skipOldOrNew:
            currentTime = datetime.datetime.now()
            liveFile = open(liveFileName+str(liveNum)+'.csv', 'w')
            liveFile.write('Practice,Instruction,1,1,6,' + str(numberofpractice + 8) + ',' + str(currentTime.hour) + ',' + str(currentTime.minute) + ',' + str(currentTime.second))
            liveFile.close()
            liveNum += 1
      Each Frame:
        keys = event.getKeys()
        for key in keys:
            if 'command' in key:
                command = True
            if 'esc' in key and command:
                liveliveFile = open(liveFileName+'live.csv', 'w')
                liveliveFile.write('Abort,Abort,1,1,1,1,')
                liveliveFile.close()
                core.quit()
    TextComponent text_10
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You'll now be shown multiple shapes.
        For each shape, decide if you have seen the shape during the study, irrespective of its color or location.
        If you have seen it during study, press 1 for OLD. If you have not seen it, press 2 for NEW.

        Press Space To Start
Flow
  Routine checkForOverwrite
  Routine header
  Routine practiceExampleInstr
  Routine practiceExample
  Routine practiceStudyInstr
  LoopInitiator practicestudys loopType="TrialHandler"
    loopType = sequential
    nReps = $num_practstudy
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    Routine reset
    Routine practiceStudy
  LoopTerminator practicestudys
  Routine practiceOldornewInstr
  LoopInitiator practiceoldornews loopType="TrialHandler"
    loopType = random
    nReps = num_practoldornew
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    Routine reset
    Routine practiceOldornew
  LoopTerminator practiceoldornews
  Routine practiceTestInstr
  LoopInitiator practiceTests loopType="TrialHandler"
    loopType = sequential
    nReps = $num_practstudy
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    Routine reset
    Routine practiceTest
  LoopTerminator practiceTests
  Routine studyInstr
  LoopInitiator studys loopType="TrialHandler"
    loopType = random
    nReps = $num_study
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    Routine reset
    Routine study
  LoopTerminator studys
  Routine oldornewInstr
  LoopInitiator oldornews loopType="TrialHandler"
    loopType = random
    nReps = $num_oldornew
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    Routine reset
    Routine oldornew
  LoopTerminator oldornews
  Routine testInstr
  LoopInitiator tests loopType="TrialHandler"
    loopType = random
    nReps = $num_study
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    Routine reset
    Routine test
  LoopTerminator tests
  Routine End
