PsychoPy2experiment version="3.1.5"
Settings
  Data filename = u'data/Logs/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[1.000,1.000,1.000]
  expName = PACOExample
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Routines
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  Routine header
    CodeComponent saveCode
      Code Type = Py
      Begin Experiment:
        import random, xlrd #For randomization of stimuli
        command = False #For exiting experiment

        thisdir = os.path.abspath(os.path.join(os.path.dirname(_thisDir),'.'))

        imageName = '22' #Name of image to use
        color = 22 #Out of 360
  Routine reset
    TextComponent resettext
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False #Show mouse at start
  Routine oldornew
    TextComponent oldornewText
      color = black
      letterHeight = 0.05
      pos = (0, -.45)
      startVal [time (s)] = 0
      text = 1 - Old        2 - New
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    ImageComponent oldornewImage
      color = $[-1,-1,-1]
      image [set every repeat] = $thisdir + '/Stimuli/' + imageName + '.png'
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space', '1', '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine study
    ImageComponent studyImage
      color [set every frame] = $[color,1,0]
      colorSpace = hsv
      image [set every frame] = $thisdir + '/Stimuli/' + imageName + '.png'
      pos [set every repeat] = (0,0)
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_6
      color = black
      letterHeight = 0.03
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = Stimuli: 
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    TextComponent text_7
      color = black
      letterHeight = 0.03
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Color: 
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        setColor = False
        setImage = False
        win.mouseVisible = True #Show mouse at start
      Each Frame:
        if mouse0.isPressedIn(text_6):
            setImage = True
            setColor = False
            tempimageName = ''
            tempcolor = -1
        elif mouse0.isPressedIn(text_7):
            setColor = True
            setImage = False
            tempimageName = ''
            tempcolor = -1

        keys = event.getKeys()
        for key in keys:
            if key == '0' or key == '1' or key == '2' or key == '3' or key == '4' or key == '5' or key == '6' or key == '7' or key == '8' or key == '9':
                if setImage:
                    if tempimageName != '':
                        if int(tempimageName) < 243:
                            tempimageName = tempimageName + key
                    else:
                        tempimageName = key
                    imageName = tempimageName
                elif setColor:
                    if tempcolor == -1:
                        tempcolor = int(key)
                    else:
                        tempcolor = int(str(tempcolor) + key)
                    color = tempcolor

        text_6.setText('Image: ' + imageName)
        text_7.setText('Color: ' + str(color))
    MouseComponent mouse0
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine practiceExample
    ImageComponent Image3
      color = $[0,1,0]
      colorSpace = hsv
      image = $thisdir + '/Stimuli/' + imageName + '.png'
      size = (0.19, 0.19)
      startVal [time (s)] = 0.0
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    MouseComponent mouse3
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent DragCode3
      Code Type = Py
      Begin Experiment:
        #To prevent user from clicking inside the color wheel and selecting a color, noClickShape surrounds entire image, set opacity to one to see for yourself ;)
        noClickShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,0,1], pos=(0,0), size=(0.25,0.25), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 0)
      Begin Routine:
        isDragging = False #Lets other parts of experiment know that the user is dragging the stimuli
        didFinishDrag = False #Lets some aspects of the experiment only do something once after a drag has finished
        hasDragged = False #For preventing the user from going on until dragged
        place = (0,0) #Place of object (Image)
        Image3.setPos(place) #Sets image to (0,0)
        noClickShape.setPos(place) #Sets noClickShape to (0,0), see Begin Experiment for more about noClickShape
        mousePlace = (0,0) #Place of mouse when clicked
        mousex = 0.0 #Offset of mouse x
        mousey = 0.0 #Offset of mouse y
        firstDrag = True #For updating positions of mousex and mousey
      Each Frame:
        #This whole complicated thing makes sure that the stimuli always stays on the mouse if they click on the stimuli first
        if mouse3.isPressedIn(screenRect3) and didFinishDrag == False:#ScreenRect is used to detect if mouse is pressed anywhere on screen
            if mouse3.isPressedIn(noClickShape): #Checks when mouse is pressed down, see Begin Experiment for more about noClickShape
                if isOnColor == False: #Makes sure it didn't start on the color wheel
                    #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                    mousePlace = mouse3.getPos()
                    if firstDrag == True: #Only updates offset once when starting the drag
                        mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                        mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                        firstDrag = False #Disables first drag
                    place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                    Image3.setPos(place) #Sets position of the image equal to the position of the mouse
                    noClickShape.setPos(place) #Set position
                    isDragging = True #Sets is dragging to true when the mouse starts on the object (noClickShape in this case)
                    hasDragged = True #For preventing the user from going on until dragged
                    win.mouseVisible = False #Hide mouse when dragging
            elif isDragging == True: #If the mouse started on noClickShape but isnt there right now (and still pressed down) it will update position anyway
                #This calculates offset of mouse from center of object (Not needed but looks better in experiment)
                mousePlace = mouse3.getPos()
                if firstDrag == True: #Only updates offset once when starting the drag
                        mousex = mousePlace[0] - place[0] #Gets the difference between the Image place and the mouse place for x
                        mousey = mousePlace[1] - place[1] #Gets the difference between the Image place and the mouse place for y
                        firstDrag = False #Disables first drag
                place = mousePlace[0] - mousex, mousePlace[1] - mousey #Adds this onto the place of the image for more intuitive dragging
                Image3.setPos(place) #Sets position of the image equal to the position of the mouse
                noClickShape.setPos(place) #Set position
        elif didFinishDrag == True and isDragging == True: #Disables didFinishDrag for good
            didFinishDrag = False
        elif isDragging == True: #This is an elif statement so will only play if others above are false
            didFinishDrag = True #Makes var true so it only is true for one frame
            isDragging = False #It is no longer dragging
            win.mouseVisible = True #Show mouse once your done dragging
            firstDrag = True #re-enables first drag again so when the first if statement plays it will update position of offset
        else:
            didFinishDrag = False #Disables didFinishDrag for good

        noClickShape.draw() #Draws no click shape
    CodeComponent ColorCode3
      Code Type = Py
      Begin Experiment:
        from psychopy import misc #needed for color wheel

        #Creates color wheel object
        textureRes = 64

        hsv = np.ones([textureRes,textureRes,3], dtype=float)
        hsv[:,:,0] = np.linspace(0,360,textureRes, endpoint=False)
        hsv[:,:,1] = 1
        hsv[:,:,2] = 1
        rgb = misc.hsv2rgb(hsv)

        #mask gives the fraction of the that is visible
        mask = np.zeros([100,1])
        mask[-10:] = 1  # 10% of the radius is 1 (visible)
        # annoyingly with interpolate=True the mask outer edge can
        # get blended with innermost pixel

        #texture defines colors, mask makes it have a hole in the center, angular cycles defines how many times each color will be shown, interpolate makes the colors blend together
        stim = visual.RadialStim(win, tex=rgb, mask = mask, angularRes=256, angularCycles=1, interpolate=True, size=(.3,.3))
      Begin Routine:
        isOnColor = False #If the mouse is currently on a color
        hasColored = False #For hiding the selectShape until you start coloring
        stim.setPos(place)
      Each Frame:
        if didFinishDrag == True: #Only updates position once after you finish dragging, otherwise experiment will lag a lot
            stim.setPos(place)
            stim.draw()
        elif isDragging == False: #If your not dragging it won't redifine the position
            stim.draw()

        if mouse3.isPressedIn(screenRect3):#ScreenRect is used to detect if mouse is pressed anywhere on screen
            if mouse3.isPressedIn(stim) and not mouse3.isPressedIn(noClickShape):#Has to be initially pressed on wheel to set to true
                if isDragging == False: #Also cannot be dragging
                    hasColored = True #For hiding the selectShape until you start coloring
                    isOnColor = True #Then will set is on color to true
        else:
            isOnColor = False #If mouse is not pressed down it is not on color
    CodeComponent SegmentCode3
      Code Type = Py
      Begin Experiment:
        #This creates each segment of the circle that can be used and clicked on later in the experiment
        opac = 0 #changes opacity of segments, 0 is invisible, 1 is visible, change to 0.5? to debug
        orimult = 3.6 #origin value is multiplied by this amount
        visWed = (0.0, 4) #visible portion of the wedge
        segpos = (0,0) #Position of segments
        segSize = (4,4) #size of segments, goes along with color wheel size
        degrees = 0 #Degrees the selectshape should be, don't change this var
        #If you change the amount of possible segments make sure to update randomization amount in the header file as well

        #Visual wedge is set to 4 but in reality it only covers about 3.6
        #So the origin of each segment are multiples of 3.6, 360/3.6 is 100 segments
      Begin Routine:
        segpos = (0,0) #resets position of segments

        #Defines each segment
        rad0 = visual.RadialStim( win=win, name='rad0', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*0, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad1 = visual.RadialStim( win=win, name='rad1', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*1, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad2 = visual.RadialStim( win=win, name='rad2', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*2, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad3 = visual.RadialStim( win=win, name='rad3', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*3, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad4 = visual.RadialStim( win=win, name='rad4', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*4, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad5 = visual.RadialStim( win=win, name='rad5', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*5, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad6 = visual.RadialStim( win=win, name='rad6', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*6, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad7 = visual.RadialStim( win=win, name='rad7', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*7, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad8 = visual.RadialStim( win=win, name='rad8', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*8, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad9 = visual.RadialStim( win=win, name='rad9', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*9, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad10 = visual.RadialStim( win=win, name='rad10', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*10, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad11 = visual.RadialStim( win=win, name='rad11', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*11, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad12 = visual.RadialStim( win=win, name='rad12', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*12, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad13 = visual.RadialStim( win=win, name='rad13', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*13, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad14 = visual.RadialStim( win=win, name='rad14', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*14, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad15 = visual.RadialStim( win=win, name='rad15', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*15, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad16 = visual.RadialStim( win=win, name='rad16', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*16, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad17 = visual.RadialStim( win=win, name='rad17', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*17, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad18 = visual.RadialStim( win=win, name='rad18', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*18, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad19 = visual.RadialStim( win=win, name='rad19', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*19, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad20 = visual.RadialStim( win=win, name='rad20', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*20, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad21 = visual.RadialStim( win=win, name='rad21', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*21, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad22 = visual.RadialStim( win=win, name='rad22', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*22, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad23 = visual.RadialStim( win=win, name='rad23', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*23, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad24 = visual.RadialStim( win=win, name='rad24', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*24, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad25 = visual.RadialStim( win=win, name='rad25', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*25, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad26 = visual.RadialStim( win=win, name='rad26', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*26, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad27 = visual.RadialStim( win=win, name='rad27', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*27, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad28 = visual.RadialStim( win=win, name='rad28', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*28, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad29 = visual.RadialStim( win=win, name='rad29', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*29, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad30 = visual.RadialStim( win=win, name='rad30', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*30, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad31 = visual.RadialStim( win=win, name='rad31', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*31, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad32 = visual.RadialStim( win=win, name='rad32', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*32, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad33 = visual.RadialStim( win=win, name='rad33', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*33, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad34 = visual.RadialStim( win=win, name='rad34', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*34, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad35 = visual.RadialStim( win=win, name='rad35', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*35, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad36 = visual.RadialStim( win=win, name='rad36', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*36, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad37 = visual.RadialStim( win=win, name='rad37', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*37, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad38 = visual.RadialStim( win=win, name='rad38', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*38, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad39 = visual.RadialStim( win=win, name='rad39', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*39, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad40 = visual.RadialStim( win=win, name='rad40', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*40, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad41 = visual.RadialStim( win=win, name='rad41', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*41, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad42 = visual.RadialStim( win=win, name='rad42', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*42, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad43 = visual.RadialStim( win=win, name='rad43', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*43, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad44 = visual.RadialStim( win=win, name='rad44', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*44, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad45 = visual.RadialStim( win=win, name='rad45', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*45, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad46 = visual.RadialStim( win=win, name='rad46', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*46, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad47 = visual.RadialStim( win=win, name='rad47', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*47, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad48 = visual.RadialStim( win=win, name='rad48', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*48, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad49 = visual.RadialStim( win=win, name='rad49', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*49, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad50 = visual.RadialStim( win=win, name='rad50', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*50, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad51 = visual.RadialStim( win=win, name='rad51', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*51, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad52 = visual.RadialStim( win=win, name='rad52', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*52, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad53 = visual.RadialStim( win=win, name='rad53', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*53, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad54 = visual.RadialStim( win=win, name='rad54', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*54, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad55 = visual.RadialStim( win=win, name='rad55', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*55, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad56 = visual.RadialStim( win=win, name='rad56', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*56, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad57 = visual.RadialStim( win=win, name='rad57', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*57, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad58 = visual.RadialStim( win=win, name='rad58', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*58, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad59 = visual.RadialStim( win=win, name='rad59', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*59, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad60 = visual.RadialStim( win=win, name='rad60', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*60, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad61 = visual.RadialStim( win=win, name='rad61', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*61, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad62 = visual.RadialStim( win=win, name='rad62', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*62, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad63 = visual.RadialStim( win=win, name='rad63', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*63, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad64 = visual.RadialStim( win=win, name='rad64', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*64, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad65 = visual.RadialStim( win=win, name='rad65', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*65, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad66 = visual.RadialStim( win=win, name='rad66', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*66, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad67 = visual.RadialStim( win=win, name='rad67', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*67, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad68 = visual.RadialStim( win=win, name='rad68', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*68, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad69 = visual.RadialStim( win=win, name='rad69', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*69, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad70 = visual.RadialStim( win=win, name='rad70', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*70, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad71 = visual.RadialStim( win=win, name='rad71', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*71, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad72 = visual.RadialStim( win=win, name='rad72', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*72, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad73 = visual.RadialStim( win=win, name='rad73', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*73, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad74 = visual.RadialStim( win=win, name='rad74', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*74, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad75 = visual.RadialStim( win=win, name='rad75', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*75, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad76 = visual.RadialStim( win=win, name='rad76', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*76, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad77 = visual.RadialStim( win=win, name='rad77', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*77, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad78 = visual.RadialStim( win=win, name='rad78', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*78, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad79 = visual.RadialStim( win=win, name='rad79', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*79, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad80 = visual.RadialStim( win=win, name='rad80', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*80, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad81 = visual.RadialStim( win=win, name='rad81', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*81, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad82 = visual.RadialStim( win=win, name='rad82', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*82, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad83 = visual.RadialStim( win=win, name='rad83', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*83, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad84 = visual.RadialStim( win=win, name='rad84', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*84, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad85 = visual.RadialStim( win=win, name='rad85', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*85, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad86 = visual.RadialStim( win=win, name='rad86', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*86, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad87 = visual.RadialStim( win=win, name='rad87', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*87, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad88 = visual.RadialStim( win=win, name='rad88', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*88, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad89 = visual.RadialStim( win=win, name='rad89', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*89, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad90 = visual.RadialStim( win=win, name='rad90', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*90, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad91 = visual.RadialStim( win=win, name='rad91', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*91, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad92 = visual.RadialStim( win=win, name='rad92', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*92, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad93 = visual.RadialStim( win=win, name='rad93', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*93, pos=segpos, size=segSize, visibleWedge=visWed, opacity = opac )

        rad94 = visual.RadialStim( win=win, name='rad94', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*94, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad95 = visual.RadialStim( win=win, name='rad95', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*95, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad96 = visual.RadialStim( win=win, name='rad96', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*96, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad97 = visual.RadialStim( win=win, name='rad97', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*97, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad98 = visual.RadialStim( win=win, name='rad98', color=[-1,1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*98, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )

        rad99 = visual.RadialStim( win=win, name='rad99', color=[1,-1,-1],
            angularCycles = 0, radialCycles = 0, radialPhase = 0.5, colorSpace = 'rgb',
            ori= orimult*99, pos=segpos, size=segSize, visibleWedge=visWed,  opacity = opac )
      Each Frame:
        #MARK: Detect Mouse Press On Segment
        #Takes the multiplier (How many segments) and multiplies it by rad number
        #Then adds half of the multiplier (to make color average)
        if isDragging == False and isOnColor == True: #If its on a segment it will update the color of the Image3
            if mouse3.isPressedIn(rad0): #Will not set color if dragging Image3
                degrees = (orimult*0)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad1):
                degrees = (orimult*1)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad2):
                degrees = (orimult*2)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad3):
                degrees = (orimult*3)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad4):
                degrees = (orimult*4)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad5):
                degrees = (orimult*5)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad6):
                degrees = (orimult*6)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad7):
                degrees = (orimult*7)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad8):
                degrees = (orimult*8)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad9):
                degrees = (orimult*9)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad10):
                degrees = (orimult*10)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad11):
                degrees = (orimult*11)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad12):
                degrees = (orimult*12)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad13):
                degrees = (orimult*13)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad14):
                degrees = (orimult*14)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad15):
                degrees = (orimult*15)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad16):
                degrees = (orimult*16)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad17):
                degrees = (orimult*17)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad18):
                degrees = (orimult*18)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad19):
                degrees = (orimult*19)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad20):
                degrees = (orimult*20)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad21):
                degrees = (orimult*21)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad22):
                degrees = (orimult*22)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad23):
                degrees = (orimult*23)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad24):
                degrees = (orimult*24)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad25):
                degrees = (orimult*25)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad26):
                degrees = (orimult*26)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad27):
                degrees = (orimult*27)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad28):
                degrees = (orimult*28)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad29):
                degrees = (orimult*29)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad30):
                degrees = (orimult*30)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad31):
                degrees = (orimult*31)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad32):
                degrees = (orimult*32)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad33):
                degrees = (orimult*33)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad34):
                degrees = (orimult*34)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad35):
                degrees = (orimult*35)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad36):
                degrees = (orimult*36)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad37):
                degrees = (orimult*37)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad38):
                degrees = (orimult*38)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad39):
                degrees = (orimult*39)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad40):
                degrees = (orimult*40)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad41):
                degrees = (orimult*41)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad42):
                degrees = (orimult*42)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad43):
                degrees = (orimult*43)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad44):
                degrees = (orimult*44)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad45):
                degrees = (orimult*45)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad46):
                degrees = (orimult*46)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad47):
                degrees = (orimult*47)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad48):
                degrees = (orimult*48)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad49):
                degrees = (orimult*49)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad50):
                degrees = (orimult*50)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad51):
                degrees = (orimult*51)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad52):
                degrees = (orimult*52)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad53):
                degrees = (orimult*53)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad54):
                degrees = (orimult*54)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad55):
                degrees = (orimult*55)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad56):
                degrees = (orimult*56)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad57):
                degrees = (orimult*57)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad58):
                degrees = (orimult*58)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad59):
                degrees = (orimult*59)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad60):
                degrees = (orimult*60)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad61):
                degrees = (orimult*61)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad62):
                degrees = (orimult*62)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad63):
                degrees = (orimult*63)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad64):
                degrees = (orimult*64)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad65):
                degrees = (orimult*65)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad66):
                degrees = (orimult*66)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad67):
                degrees = (orimult*67)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad68):
                degrees = (orimult*68)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad69):
                degrees = (orimult*69)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad70):
                degrees = (orimult*70)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad71):
                degrees = (orimult*71)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad72):
                degrees = (orimult*72)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad73):
                degrees = (orimult*73)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad74):
                degrees = (orimult*74)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad75):
                degrees = (orimult*75)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad76):
                degrees = (orimult*76)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad77):
                degrees = (orimult*77)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad78):
                degrees = (orimult*78)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad79):
                degrees = (orimult*79)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad80):
                degrees = (orimult*80)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad81):
                degrees = (orimult*81)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad82):
                degrees = (orimult*82)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad83):
                degrees = (orimult*83)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad84):
                degrees = (orimult*84)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad85):
                degrees = (orimult*85)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad86):
                degrees = (orimult*86)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad87):
                degrees = (orimult*87)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad88):
                degrees = (orimult*88)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad89):
                degrees = (orimult*89)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad90):
                degrees = (orimult*90)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad91):
                degrees = (orimult*91)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad92):
                degrees = (orimult*92)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad93):
                degrees = (orimult*93)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad94):
                degrees = (orimult*94)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad95):
                degrees = (orimult*95)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad96):
                degrees = (orimult*96)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad97):
                degrees = (orimult*97)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad98):
                degrees = (orimult*98)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color
            elif mouse3.isPressedIn(rad99):
                degrees = (orimult*99)+(orimult/2)
                Image3.setColor([degrees,1,1])#sets Image3 hsv color

        #MARK: Update Segment Positions And Draw Them
        if didFinishDrag == True: #This is to prevent slowness when picking up ubject to drag
            segpos = (place)#When it appears sets the pos equal to the current place of the object
            #Sets each segment position
            rad0.setPos(segpos)
            rad1.setPos(segpos)
            rad2.setPos(segpos)
            rad3.setPos(segpos)
            rad4.setPos(segpos)
            rad5.setPos(segpos)
            rad6.setPos(segpos)
            rad7.setPos(segpos)
            rad8.setPos(segpos)
            rad9.setPos(segpos)
            rad10.setPos(segpos)
            rad11.setPos(segpos)
            rad12.setPos(segpos)
            rad13.setPos(segpos)
            rad14.setPos(segpos)
            rad15.setPos(segpos)
            rad16.setPos(segpos)
            rad17.setPos(segpos)
            rad18.setPos(segpos)
            rad19.setPos(segpos)
            rad20.setPos(segpos)
            rad21.setPos(segpos)
            rad22.setPos(segpos)
            rad23.setPos(segpos)
            rad24.setPos(segpos)
            rad25.setPos(segpos)
            rad26.setPos(segpos)
            rad27.setPos(segpos)
            rad28.setPos(segpos)
            rad29.setPos(segpos)
            rad30.setPos(segpos)
            rad31.setPos(segpos)
            rad32.setPos(segpos)
            rad33.setPos(segpos)
            rad34.setPos(segpos)
            rad35.setPos(segpos)
            rad36.setPos(segpos)
            rad37.setPos(segpos)
            rad38.setPos(segpos)
            rad39.setPos(segpos)
            rad40.setPos(segpos)
            rad41.setPos(segpos)
            rad42.setPos(segpos)
            rad43.setPos(segpos)
            rad44.setPos(segpos)
            rad45.setPos(segpos)
            rad46.setPos(segpos)
            rad47.setPos(segpos)
            rad48.setPos(segpos)
            rad49.setPos(segpos)
            rad50.setPos(segpos)
            rad51.setPos(segpos)
            rad52.setPos(segpos)
            rad53.setPos(segpos)
            rad54.setPos(segpos)
            rad55.setPos(segpos)
            rad56.setPos(segpos)
            rad57.setPos(segpos)
            rad58.setPos(segpos)
            rad59.setPos(segpos)
            rad60.setPos(segpos)
            rad61.setPos(segpos)
            rad62.setPos(segpos)
            rad63.setPos(segpos)
            rad64.setPos(segpos)
            rad65.setPos(segpos)
            rad66.setPos(segpos)
            rad67.setPos(segpos)
            rad68.setPos(segpos)
            rad69.setPos(segpos)
            rad70.setPos(segpos)
            rad71.setPos(segpos)
            rad72.setPos(segpos)
            rad73.setPos(segpos)
            rad74.setPos(segpos)
            rad75.setPos(segpos)
            rad76.setPos(segpos)
            rad77.setPos(segpos)
            rad78.setPos(segpos)
            rad79.setPos(segpos)
            rad80.setPos(segpos)
            rad81.setPos(segpos)
            rad82.setPos(segpos)
            rad83.setPos(segpos)
            rad84.setPos(segpos)
            rad85.setPos(segpos)
            rad86.setPos(segpos)
            rad87.setPos(segpos)
            rad88.setPos(segpos)
            rad89.setPos(segpos)
            rad90.setPos(segpos)
            rad91.setPos(segpos)
            rad92.setPos(segpos)
            rad93.setPos(segpos)
            rad94.setPos(segpos)
            rad95.setPos(segpos)
            rad96.setPos(segpos)
            rad97.setPos(segpos)
            rad98.setPos(segpos)
            rad99.setPos(segpos)
        elif isDragging == False and isOnColor == True: #When dragging it will dispear
            #Draws each segment
            rad0.draw()
            rad1.draw()
            rad2.draw()
            rad3.draw()
            rad4.draw()
            rad5.draw()
            rad6.draw()
            rad7.draw()
            rad8.draw()
            rad9.draw()
            rad10.draw()
            rad11.draw()
            rad12.draw()
            rad13.draw()
            rad14.draw()
            rad15.draw()
            rad16.draw()
            rad17.draw()
            rad18.draw()
            rad19.draw()
            rad20.draw()
            rad21.draw()
            rad22.draw()
            rad23.draw()
            rad24.draw()
            rad25.draw()
            rad26.draw()
            rad27.draw()
            rad28.draw()
            rad29.draw()
            rad30.draw()
            rad31.draw()
            rad32.draw()
            rad33.draw()
            rad34.draw()
            rad35.draw()
            rad36.draw()
            rad37.draw()
            rad38.draw()
            rad39.draw()
            rad40.draw()
            rad41.draw()
            rad42.draw()
            rad43.draw()
            rad44.draw()
            rad45.draw()
            rad46.draw()
            rad47.draw()
            rad48.draw()
            rad49.draw()
            rad50.draw()
            rad51.draw()
            rad52.draw()
            rad53.draw()
            rad54.draw()
            rad55.draw()
            rad56.draw()
            rad57.draw()
            rad58.draw()
            rad59.draw()
            rad60.draw()
            rad61.draw()
            rad62.draw()
            rad63.draw()
            rad64.draw()
            rad65.draw()
            rad66.draw()
            rad67.draw()
            rad68.draw()
            rad69.draw()
            rad70.draw()
            rad71.draw()
            rad72.draw()
            rad73.draw()
            rad74.draw()
            rad75.draw()
            rad76.draw()
            rad77.draw()
            rad78.draw()
            rad79.draw()
            rad80.draw()
            rad81.draw()
            rad82.draw()
            rad83.draw()
            rad84.draw()
            rad85.draw()
            rad86.draw()
            rad87.draw()
            rad88.draw()
            rad89.draw()
            rad90.draw()
            rad91.draw()
            rad92.draw()
            rad93.draw()
            rad94.draw()
            rad95.draw()
            rad96.draw()
            rad97.draw()
            rad98.draw()
            rad99.draw()
    PolygonComponent screenRect3
      fillColor = $[1,1,1]
      opacity = 0
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    CodeComponent SelectShape3
      Code Type = Py
      Begin Experiment:
        import math #Needed for cos and sin
      Begin Routine:
        #Select shape is the selector circle that is white and behind the colored one
        selectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,1,1], pos=(0,0), size=(0.1,0.1), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 0)
        #Inner select shape is on top of select shape and updates it's color to the color of the part of the color wheel it is on
        innerSelectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,1,1], pos=(0,0), size=(0.1,0.1), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 0)
      Each Frame:
        if isDragging == False and hasColored == True: #Hides until you actually start selecting a color, this is separate from colorHelp in ExitCode so no interference ever occors
            #Explanation: Color is just hsv set to white, position on circle is calculated by, X:= origin of stimuli x position + cos of the angle in radians (cos funtion only takes radians) * the radius (circumference/2) and then subtracting a fourth of the radius of the color picker circle to make it in the middle of the color wheel
            selectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,1,0], pos=(place[0]+(math.cos(math.radians(-degrees+90))*(.15-(0.03/4))), place[1]+(math.sin(math.radians(-degrees+90))*(.15-(0.03/4)))), size=(0.03,0.03), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 1)
            #Explanation: Same as above except the color is set to the color wheel segment, and to get it centered I devided by 3.4 because for some reason 4 didn't center it correctly, but 3.4 centers it fine so just leaving it like that is ok
            innerSelectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[degrees,1,1], pos=(place[0]+(math.cos(math.radians(-degrees+90))*(.15-(0.025/3.4))), place[1]+(math.sin(math.radians(-degrees+90))*(.15-(0.025/3.4)))), size=(0.025,0.025), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = 1)
            #Draws both shapes
            selectShape.draw()
            innerSelectShape.draw()
    CodeComponent AnimationCode
      Code Type = Py
      Begin Experiment:
        #Max degrees and speed for color help
        colorMaxDeg = 270 #1 to any real number, must be at least twice as much as speed for smooth animation
        colorSpeed = 50 #1 to any real number, do not recomend setting this above 50

        #Color text setup
        ColorText = visual.TextStim(win=win, name='ColorText',
            text='Please select a color from the color wheel',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #Drag text setup
        DragText = visual.TextStim(win=win, name='DragText',
            text='Please Drag and Drop the object to a location on the screen',
            font='Arial',
            pos=(0, -0.4), height=0.03, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #Define images
        arrowUp = visual.ImageStim(
            win=win, name='arrowUp',
            image='sin', mask=None,
            ori=0, pos=(0, .2), size=(0.03, 0.03),
            color=[1,1,0], colorSpace='hsv', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        arrowDown = visual.ImageStim(
            win=win, name='arrowDown',
            image='sin', mask=None,
            ori=0, pos=(0, -.2), size=(0.03, 0.03),
            color=[1,1,0], colorSpace='hsv', opacity=1,
            flipHoriz=False, flipVert=True,
            texRes=128, interpolate=True, depth=0.0)

        arrowRight = visual.ImageStim(
            win=win, name='arrowRight',
            image='sin', mask=None,
            ori=0, pos=(.2, 0), size=(0.03, 0.03),
            color=[1,1,0], colorSpace='hsv', opacity=1,
            flipHoriz=False, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        arrowLeft = visual.ImageStim(
            win=win, name='arrowLeft',
            image='sin', mask=None,
            ori=0, pos=(-.2, 0), size=(0.03, 0.03),
            color=[1,1,0], colorSpace='hsv', opacity=1,
            flipHoriz=True, flipVert=False,
            texRes=128, interpolate=True, depth=0.0)

        #Set images
        arrowUp.setImage(thisdir + '/LOCO/arrowUp.png')
        arrowDown.setImage(thisdir + '/LOCO/arrowUp.png')
        arrowRight.setImage(thisdir + '/LOCO/arrowRight.png')
        arrowLeft.setImage(thisdir + '/LOCO/arrowRight.png')
      Begin Routine:
        win.mouseVisible = True #Show mouse at start
        mouse3.setPos(newPos=(0, 0.001)) #resets position of mouse, has to be offset slightly or else it will select a color for some reason

        #These two vars give the person help with knowing how to drag/color live
        helpDrag = False
        helpColor = False

        opacOfArrows = 0.0 #Opacity of the arrows
        opacUp = True #If Opacity is rising or falling

        colorDeg = 0 #Degrees of slider for colorHelp
        colorDegUp = True #Degrees of the slider going up or down
        colorOpac = 0 #Opacity of the slider
      Each Frame:
        if theseKeys == 'space':  # if space is pressed
            #a response ends the routine
            if hasColored and hasDragged: #Stops routine if they have colored and moved the stimuli
                continueRoutine = False
            elif not hasColored:
                helpColor = True
            elif not hasDragged:
                helpDrag = True

        #Help animations
        if helpColor == True and hasColored == False and isDragging == False: #If they need help coloring and they are not currently dragging the image
            helpDrag = False #Disables other option
            if colorOpac < 1.0:
                colorOpac += 0.01 #How fast opacity of slider increases
            if colorDeg < 1 and colorDegUp == True and colorOpac >= 0.75: #The last var is at what opacity to start sliding
                colorDeg += 0.1
            elif colorDeg < colorSpeed and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += 0.1*colorDeg
            elif colorDeg < colorMaxDeg-colorSpeed and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += colorSpeed/10 #Speed devided by 0.1 which is how much it increases by
            elif colorDeg < colorMaxDeg-1 and colorDegUp == True and colorOpac >= 0.75:
                colorDeg += 0.1*((-colorDeg)+colorMaxDeg)
            elif colorDeg < colorMaxDeg and colorDegUp == True and colorOpac >= 0.75:
                colorDegUp = False #Changes direction
            elif colorDeg > colorMaxDeg-colorSpeed and colorDegUp == False: #Starts going back down degrees here
                colorDeg -= 0.1*((-colorDeg)+colorMaxDeg)
            elif colorDeg > colorSpeed and colorDegUp == False:
                colorDeg -= colorSpeed/10
            elif colorDeg > 1 and colorDegUp == False:
                colorDeg -= 0.1*colorDeg
            elif colorDeg > 0 and colorDegUp == False:
                colorDeg -= 0.05
            elif colorOpac >= 0.75:
                colorDegUp = True #Resets the direction so degrees are going back up again
                colorDeg += 0.05
            #Sets postion of select shapes
            selectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[180,1,0], pos=(place[0]+(math.cos(math.radians(-colorDeg+90))*(.15-(0.03/4))), place[1]+(math.sin(math.radians(-colorDeg+90))*(.15-(0.03/4)))), size=(0.03,0.03), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = colorOpac)
            innerSelectShape = visual.RadialStim(win, colorSpace = 'hsv', color=[colorDeg,1,1], pos=(place[0]+(math.cos(math.radians(-colorDeg+90))*(.15-(0.025/3.4))), place[1]+(math.sin(math.radians(-colorDeg+90))*(.15-(0.025/3.4)))), size=(0.025,0.025), angularCycles = 0, radialCycles = 0, radialPhase = 0.5, opacity = colorOpac)
            #Draws each object
            selectShape.draw()
            innerSelectShape.draw()
            #ColorText.draw()
        elif helpDrag == True and hasDragged == False:
            helpColor = False #Disables other option
            #Makes a nice animation
            if opacOfArrows >= 1.0: #changes direction of opacity
                opacUp = False
            elif opacOfArrows <= 0.0:
                opacUp = True
            if opacUp == True:
                opacOfArrows += 0.01 #Changes opacity, change this var to make animation faster or slower
            else:
                opacOfArrows -= 0.01
            #Draws aroows and text
            arrowUp.opacity = opacOfArrows
            arrowDown.opacity = opacOfArrows
            arrowRight.opacity = opacOfArrows
            arrowLeft.opacity = opacOfArrows
            arrowUp.draw()
            arrowDown.draw()
            arrowRight.draw()
            arrowLeft.draw()
            #DragText.draw() #Tells user what to do
      End Routine:
        win.mouseVisible = False #Hide mouse at end
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
Flow
  Routine header
  Routine reset
  Routine study
  Routine reset
  Routine oldornew
  Routine reset
  Routine practiceExample
